/*******************************************************************************

  		FSENFP.PPL

Author:     MR Solutions Ltd (Ruslan Garipov)
Date:       18 March 2024
Version:    2.7.7c / DWI For EVO systems
            + twoTE-1.3 merge / 22 August 2026 (changes tagged [MERGE-2TE])
            + twoTE-1.5 / 24 September 2026: acq table 64 -> 512 rows
              (changes tagged [ACQ-512])
            + twoTE-1.6 / 29 September 2026: independent DAC crushers;
              reverse-centric (6) and linear-interleaved (7) DWI ordering.
              [CRUSH-PE] Source implementation; console validation required.
            + twoTE-1.7 / 3 October 2026: signed crusher schedules,
              centering correction and PE0 scratch protection. [CRUSH-SCHED]


FAST SPIN ECHO

1)  This program supports Multislice with new SEGMENT keyword
2)  The phase encode gradients are table driven.
3)  The number of phase encode steps and views per segment must satisfy the equation:
	no_views/(2*views_per_segment) must be an integer
4)  Use the console program pfgen.exe to create reorder tables for the data
5)  Full pilot capability
6)  The read and slice compensations can be either pre or post the 180 degree pulses.
7)  Automatic phase encode matrix calculation with feathering (pfgen.exe)
8)  Three additional phase encode ordering schemes
9)  Navigator echoes (2D/3D)
10) First-order flow compensation
11) Six independently controlled pre-saturation blocks in three logical directions
12) First N echoes can be discarded. When doing so physical TE eff remains unchanged 
	(i.e. the te_eff echo is still in the middle of the k-space), but reordering table 
	has to be reconstructed with te_eff = te_eff-N
13) Single shot version with sequential order and partial Fourier option. When selected,
the number of PF echoes is calculated automatically and equal to the position of 
	the central echo = te_eff
14) Fast recovery pulses option
15) Batch slice option and gating
16) CHESS pulse option - rectangular pulse / Gauss pulse
17) Single echo support (PE_order=5), including 3D
18) Pin Diode Driver support:
	pdd_tx_mask - sets User Port pins during Tx
	pdd_rx_mask - sets User Port pins during Rx
19) MTC option
20) PTS support via systemport
21) TR array support

*******************************************************************************/

#use RF1 "c:\smis\seqlib\RFstd44.seq" pf1
#use RF1 "c:\smis\seqlib\gs_240Hz.seq" pf7
#use RF1 "c:\smis\seqlib\presat.seq" pf8
#use RF1 "c:\smis\seqlib\opt90_a.seq" pf10
#use RF1 "c:\smis\seqlib\opt90_as.seq" pf11
#use RF1 "c:\smis\seqlib\asym.seq" pf12
#use RF1 "c:\smis\seqlib\hypsec.seq" pf14
#use RF1 "c:\smis\seqlib\rfchess.seq" pf15
#use RF1 "c:\smis\seqlib\9lobsinb.seq" pf16
#use RF1 "c:\smis\seqlib\19lobsinb.seq" pf17
#use RF1 "g:\J_Figger\seqlib\v19_research_rf.seq" pf19

#use GRAD "c:\smis\seqlib\g3040_15.seq" grad

/* PARAMLIST
OBSERVE_FREQUENCY "1H", -600000000, 600000000, 0, MHz, kHz, Hz, rx1MHz;
EDITTEXT  "Receive Frequency ","Hz ","%d",-32767,32767,0,1,rec_freq;
SPECTRAL_WIDTH 1000,200000,33333, sample_period;
GRADIENT_STRENGTH grad_var;

NO_SAMPLES 64,1024,256,no_samples;
NO_VIEWS 1,1024,256, no_views;
VIEWS_PER_SEGMENT 1,1024,8, views_per_seg;
NO_VIEWS_2 1, 1024, 1, no_views_2 ;
SCROLLBAR "Freq (under/over)sampling ","under/none/over","%d",-1,1,0,1,oversample;
SCROLLBAR "Phase (under/over)sampling ","under/none/over","%d",-1,1,0,1,oversample2;
SCROLLBAR "Phase2 Oversample ","(Yes = 1)","%d",0,1,0,1,oversample3;
SCROLLBAR "Navigator?","1=yes","%d",0,1,0,1,nav_on;

DISCARD 0, 128, 6, no_discard ;
EXPERIMENT_ARRAY 1,32767,1,no_experiments;
NO_AVERAGES 1, 10000, 1, no_averages ;
VIEW_BLOCK  1, 10000, 1, view_block;
SLICE_BLOCK 1, 1, 1, slice_block;
PHASE_CYCLE 1, 2, 1, phase_cycle ;

EDITTEXT "Patient X angle", "degrees", "%.1f", -1800, 1800, 0, 10,  subj_angle_x;
EDITTEXT "Patient Y angle", "degrees", "%.1f",   -900, 900, 0, 10,  subj_angle_y;
EDITTEXT "Patient Z angle", "degrees", "%.1f", -1800, 1800, 0, 10,  subj_angle_z;

SLICE_THICKNESS 32767, 1070, gs_var ;
SLICE_SEPARATION -6000, 6000, 1070, slice_offset ;
NO_SLICES 1, 512, 1, no_slices ;
BATCH_SLICES 0, 128, 0, batch_slices ;
BATCH_INTERLEAVE 0, 5, 1, batch_interleave ;
SLICE_INTERLEAVE 1, 5, 2, slice_interleave ;
FOV 32767,32767,2.5e-3,gr_var,gp_init_var ;
MULTI_ORIENTATION 0, 3, 0, phase_var, r_angle_var, p_angle_var, s_angle_var;
FOV_SLICE_OFF -32000, 32000, 0, 400, fov_slice_off;
FOV_PHASE_OFF -32000, 32000, 0, 4000, fov_phase_off;
FOV_READ_OFF -32000, 32000, 0, 4000, fov_read_off;
EDITTEXT "FOV factor * 8","","%d",4,16,8,1,FOVf;
SCROLLBAR "Slab Thickness (3D)","% Slice Thk(=Slice FOV)","%d",0,200,90,1,slab_ratio;

EDITTEXT  "RF pulse shape ","1-16","%d",1,16,2,1,rfnum;
SCROLLBAR "Obs. Mod. Level ","(0 = off)","%u",0,1,1,0.25,obs_mod_level;
SCROLLBAR "RF Calibration value  ","%","%.2f",0,2047,256,20.48,rfcal ;
SCROLLBAR "90 deg scale factor   ","rfcal","%.2f",0,180,90,90,alpha ;
SCROLLBAR "180 deg scale factor  ","rfcal","%.2f",0,300,200,100,p180_scale ;

EDITTEXT  "Repetition time between shots (0=min)","ms","%d",0,32767,4000,1,tr;
EDITTEXT  "Imaging echo spacing","ms (train spacing; sets echoes 2..N when Diffusion is ON)","%d",0,32767,25,1,esp;
EDITTEXT  "Echo time","ms (DWI: first echo; otherwise effective TE)","%d",2,32767,125,1,te;
EDITTEXT  "PF effective number of echoes","","%d",0,128,0,1,PF_echoes;
SCROLLBAR "Report Min TE and TR times ?","1=yes","%d",0,1,0,1,report_on;

EDITTEXT  "Ramp time","us, multiple of 10 only","%d",100,1000,500,1,tramp;
EDITTEXT  "Rephase lobe duration","us","%d",100,5000,2000,1,tref_setup;
EDITTEXT  "180 Crusher time","us","%d",0,5000,10,1,tcrush;
EDITTEXT  "180 Crusher time diff","us","%d",0,10000,2000,1,diff_tcrush;
SCROLLBAR "Independent 180 crushers","0=legacy, 1=separate lobes","%d",0,1,0,1,crush_independent_on;
EDITTEXT "180 Crusher amplitude","DAC units (logical slice axis)","%d",-32767,32767,0,1,crush_amp;
EDITTEXT "First 180 diffusion crusher amplitude","DAC units (logical slice axis)","%d",-32767,32767,0,1,diff_crush_amp;
SCROLLBAR "Crusher schedule","0=original,1=up,2=alternate,3=up+alternate,4=down,5=custom","%d",0,5,0,1,crusher_schedule;
EDITTEXT "Crusher additive step","percent of train baseline","%d",0,1000,0,1,crusher_step_pct;
EDITTEXT "Crusher amplitude ceiling","calibrated logical DAC; verify hardware rating","%d",1,32767,32767,1,crusher_max_dac;
EDITTEXT "Crusher slew ceiling","DAC per 100 us; verify hardware rating","%d",1,32767,32767,1,crusher_slew_dac_100us;
EDITTEXT "Custom crusher active count","must equal ETL in custom mode (max 64)","%d",0,64,0,1,crusher_custom_count;
VAR_ARRAY "Custom signed crusher percentages","entry 0 = pulse 1; no repeat","%d",-32767,32767,1,crusher_custom_pct,64,100;

SCROLLBAR "Slice refocus lobe post 180","%","%d",0,300,100,1,gsp_lobe;
SCROLLBAR "Slice refocus adjustment","%","%.1f",-100,100,0,10,gs_comp_scale;
SCROLLBAR "Read dephase lobe pre 180","%","%d",0,300,100,1,grp_lobe;
SCROLLBAR "Read dephase adjustment","%","%.1f",-200,200,0,1,gr_comp_scale;
EDITTEXT  "Slice Offset","mm","%.1f",-400,400,0,10,slice_mm_10;


SCROLLBAR "Pre-sat Blocks Master  ", "off/on","%u",0,1,0,1,sat_on;
SCROLLBAR "Pre-sat Blocks Mode    ", "fixed/travelling","%u",0,1,0,1,sat_mode;
VAR_ARRAY "Pre-sat Block & Pulse  ", "off/on","%u",0,1,1,PB_on, 6, 0,0,0,0,0,0;
VAR_ARRAY "Pre-sat Block Offset   ", "mm","%d",-300,300,1,PB_offset, 6, 0,0,0,0,0,0;
VAR_ARRAY "Pre-sat Block FOV      ", "mm","%d",0,600,1,PB_FOV, 6, 200,200,200,200,200,200;
VAR_ARRAY "Pre-sat Block Thickness", "mm","%d",0,300,1,PB_thk, 6, 30,30,30,30,30,30;
EDITTEXT  "Travelling Pre-sat extra gap", "mm", "%d", -100,100,5,1, PB_gap;
EDITTEXT  "Number of PBs", "(for validation only)", "%d", 0,6,0,1, no_PB;

EDITTEXT  "Pre-sat Crusher Duration","us","%d",10,10000,1000,1,sat_tcrush;
EDITTEXT  "Pre-sat Crusher Amplitude","DAC UNITS","%d",-32767,32767,0,1,sat_gr_amp;
EDITTEXT  "Pre-sat RF pulse shape","","%u",9,13,9,1,rfnum_sat;
SCROLLBAR "Pre-sat RF calibration value","%","%.2f",0,2047,256,20.48,p_sat_mul ;
EDITTEXT  "Pre-sat blocks extra delay", "us", "%d", 10,32767,10000,1, inter_PB_delay;

SCROLLBAR "Slice gradient ON","1=yes","%d",0,1,1,1,gs_on;
SCROLLBAR "Read gradient ON","1=yes","%d",-1,1,1,1,gr_on;
SCROLLBAR "Phase gradient ON","1=yes","%d",0,1,1,1,gp_on;
SCROLLBAR "Slice phase gradient ON","1=yes","%u",0,1,1,1,gp_sl_on ;

SCROLLBAR "PE order","0=pfgen,1=egen,2=single shot,3=disabled,4=NA,5=single echo,6=reverse centric,7=linear interleaved","%d",0,7,1,1,PE_order;
SCROLLBAR "Phase steps 2 sequential/centric","seq/cen","%u",0,1,0,1,pe2_centric_on;
SCROLLBAR "TREF setup mode","1=yes","%d",0,1,1,1,setup_mode;
SCROLLBAR "1st Order Flow compensation ","off/on","%u",0,1,0,1,flow_comp_on;
EDITTEXT  "Manual phase correction (+)", "", "%d", -32768,32767,0,1, phcor_plus;
EDITTEXT  "Manual phase correction (-)", "", "%d", -32768,32767,0,1, phcor_minus;
EDITTEXT  "Read frequency phase correction", "", "%d", -32768,32767,0,1, r_phcor;
EDITTEXT  "First echoes to discard", "(how many)", "%d", 0,0,0,1, echoes_to_discard;
SCROLLBAR "Driven equilibrium","off/on","%d",0,1,1,1,de_on;

SCROLLBAR "Gating ","off/on","%u",0,1,0,1,gating;
SCROLLBAR "Slice clustering (auto ON when gating)","off/on","%u",0,1,0,1,slice_clustering_on;
SCROLLBAR "Gating mode","1=T1w/T2w, 2=1, 3=cardiac (each slice)","%u",1,3,1,1,gating_mode;
EDITTEXT  "Resp plateau duration (0=auto)","ms","%d",0,32767,0,1,t_resp_plateau;
SCROLLBAR "Resp plateu % of interval","%","%d",0,100,50,1,t_resp_fraction;
EDITTEXT  "Cluster interslice delay","ms","%d",0,32767,0,1,interslice_delay;
SCROLLBAR "Gating after TR","off/on","%u",0,1,0,1,gating_after_tr_on;

SCROLLBAR "Fat Sat","off/on","%u",0,1,0,1,chess_on;
SCROLLBAR "Fat Sat pulse - rect/gauss","0=rect, 1=gauss","%u",0,1,0,1,chess_gauss;
SCROLLBAR "Fat Sat RF calibration value","%","%.2f",0,2047,256,20.48,chess_mul;
EDITTEXT  "Fat Sat freq offset","Hz","%d",-32000,32000,0,1,chem_shift_freq;
EDITTEXT  "Fat Sat rect pulse duration","us","%u",100,5000,4500,1,t_chess;
EDITTEXT  "Fat Sat gauss pulse duration","ms","%u",2,30,2,1,t_chess_gauss;
EDITTEXT  "Fat Sat crusher duration","us","%u",100,30000,3000,1,tcrush_chess;
EDITTEXT  "Fat Sat crusher amplitude","DAC units","%d",-32767,32767,0,1,gs_chess_amp;

SCROLLBAR "CEST pulses  ","off/on","%u",0,1,0,1,mtc_on ;
SCROLLBAR "CEST pulses CW/Gaussian","CW/Gaussian","%u",0,1,0,1,mtc_gaussian;
SCROLLBAR "CEST rf calibration value","%","%.2f",0,2047,256,20.48,mtc_mul;
EDITTEXT  "Number of CEST pulses  "," ","%i",1,200,1,1,no_cest_pulses;
EDITTEXT  "CEST pulse duration    ","ms","%u",2,32000,2,1,tselmtc_ms;
EDITTEXT  "CEST Crusher Duration","us","%d",10,10000,1000,1,mtc_tcrush;
EDITTEXT  "CEST Crusher Amplitude","DAC UNITS","%d",-32767,32767,0,1,mtc_gr_amp;
EDITTEXT  "CEST pulse offset frequency (when exp=1)","Hz ","%i",-32767,32767,0,1,mtc_freq;
EDITTEXT  "CEST pulse initial offset","Hz","%i",-32767,32767,0,1,mtc_freq_max;
EDITTEXT  "CEST pulse offset step (when exp>1)","Hz","%i",-32767,32767,0,1,mtc_freq_step;
EDITTEXT  "Inter-CEST pulse delay  ","ms","%d",2,5000,10,1,inter_cest_delay;
EDITTEXT  "Post-CEST pulse delay  ","ms","%d",0,100,10,1,post_cest_delay;
SCROLLBAR "CEST use array","no/yes","%u",0,1,0,1,mtc_array_on;
VAR_ARRAY "CEST offset frequencies", "Hz","%d",-32767,32767,1,mtc_freq_array, 1000;

SCROLLBAR "Master diffusion switch OFF/ON","0=OFF, 1=ON","%u",0,1,1,1,diff_on;
SCROLLBAR "b-value input mode","0=DAC array, 1=b-value array","%u",0,1,0,1,b_input_mode;
EDITTEXT "Little delta","us","%d",200,32767,5000,1,sm_delta;
EDITTEXT "Big delta","us","%d",200,65535,11000,1,big_delta;

EDITTEXT "Number of diffusion acquisitions","(rows of the acq table)","%d",1,512,1,1,no_diff_acq;
VAR_ARRAY "Acq table: b-value (used when b-value mode=1)", "s/mm^2","%d",0,13000,1,acq_b, 512;

VAR_ARRAY "Acq table: b-value (gradient DAC)", "DAC units","%d",0,32767,1,acq_grad, 512;		
VAR_ARRAY "Acq table: direction X", "(1000-normalised)","%d",-1000,1000,1,acq_x, 512; 
VAR_ARRAY "Acq table: direction Y", "(1000-normalised)","%d",-1000,1000,1,acq_y, 512; 
VAR_ARRAY "Acq table: direction Z", "(1000-normalised)","%d",-1000,1000,1,acq_z, 512; 

EDITTEXT "Diff. ramp time","us, multiple of 10 only","%d",100,5000,500,1,diff_tramp;
EDITTEXT "Diff scale","%","%u",100,200,100,1,diff_grad_scale;

EDITTEXT  "RF pulse delay", "us", "%d", 6,100,6,1, rfdelay;
EDITTEXT  "RF gate delay", "us", "%d", 23,100,23,1, rfgate_delay;
EDITTEXT  "Post 90 extra delay","us","%d",-30000,30000,0,1,post_90_delay1;
EDITTEXT  "phcor0","","%d",-30000,30000,0,1,phcor0;

SCROLLBAR "Post echo train crusher","off/on","%u",0,1,0,1,post_crush_on;
EDITTEXT  "Post echo train crusher duration","us","%u",100,30000,3000,1,post_tcrush;
EDITTEXT  "Post echo train crusher crusher amplitude","DAC units","%d",-32767,32767,-6000,1,post_crush_amp;

SCROLLBAR "Discard Acquisitions"," ","%d",0,200,0,1,no_disacq;

SCROLLBAR "Dixon OFF/ON"," ","%u",0,1,0,1,dixon_on;
EDITTEXT  "Dixon RF shift (Delta/2)    ","us","%d",-10000,10000,0,1,delta_2_90;
EDITTEXT  "Dixon Initial RF shift (Delta0)   ","us","%d",-10000,10000,0,1,delta_0;
SCROLLBAR "Dixon Scan Mode                   ","0=WF0,1=WF90,2=WF180,3=W-F","%u",0,3,1,1,smode;

VAR_ARRAY "Variable TR array", "ms","%u",0,32767,1,TR_array, 64;
EDITTEXT  "Variable TR array size","(number of trs, 0=do not use array)","%u",0,64,0,1,TR_array_size;

EDITTEXT  "DE phase","","%d",-30000,30000,0,1,de_phase;
SCROLLBAR "Mains gating ","off/on","%u",0,1,0,1,mains_gating;
EDITTEXT  "Mains gating delay","ms","%u",0,32767,0,1,post_mains_gate_delay;

SCROLLBAR "V19 method ON","0=v18 control path, 1=method path","%d",0,1,0,1,v19_on;
EDITTEXT  "V19 added dephasing","cycles across imaging slice","%d",1,8,2,1,v19_cycles;
EDITTEXT  "V19 compensation lobe flat","us, multiple of tramp/50","%d",100,5000,1000,1,v19_comp_flat;
VAR_ARRAY "V19 refocusing flips","0.1 deg; entry 0 = imaging RF 1","%d",1,1800,1,v19_flip_tenths,64,1800;
EDITTEXT  "V19 prep slab width","per mille of imaging slice","%d",1000,10000,3000,1,v19_slab_pml;
EDITTEXT  "V19 tip-up width","per mille of imaging slice","%d",1000,10000,1667,1,v19_tip_pml;
EDITTEXT  "V19 spoiler moment","cycles/mm on phase axis","%d",1,200,32,1,v19_spoil_cpmm;
EDITTEXT  "V19 spoiler amplitude","DAC on phase axis","%d",1000,32767,16384,1,v19_spoil_dac;
DSP_ROUTINE "c:\smis\dspe8";
DATA_TYPE 0x15;
RECEIVER_MASK 1,65535,1,rec_sel;

END
*/


#define MAO
#define MAX_SLICE 512
#define MULTIPRESAT // this and TRAVEL_PRESAT 818B
#define MAX_PRESAT_BLOCKS 6
#define FSE3D
#define DRIVEN_EQUILIBRIUM
#define SKIP_FIRST_ECHOES // 212B
#define CHESS //558B
#define AUTOGATE // 620B
#define POST_ETL_CRUSHER
#define PDD
#define PTS
#define MTC
#define PRESAT_FREQ_FLIP
#define DIXON3P

#define GATE_TIMEOUT 50000L
#define GATE_MAX_DURATION 50000L

\\#define MAINSGATE
#define MAINS_GATE_TIMEOUT 50000L
#define MAINS_GATE_MAX_DURATION 50000L

#define VALIDATOR

#define MAXCENTRE 512
#define MAXLOCATION 512
#define MAXPESIZE 1024
#define MAXPE2SIZE 1024
#define CENOFFSET 0
#define LOCOFFSET MAXCENTRE
#define GPOFFSET LOCOFFSET+MAXLOCATION
#define GP2OFFSET GPOFFSET+MAXPESIZE
#define FREEMEM GP2OFFSET+MAXPE2SIZE
// use last page - 5 for scan 7.4 or later
#define SPAGE 5

#define put_echo_centre(ind,val) 	pw(val, CENOFFSET+ind, SPAGE)
#define put_echo_location(ind,val) 	pw(val, LOCOFFSET+ind, SPAGE)
#define put_gp_order(ind,val) 		pw(val, GPOFFSET+ind, SPAGE)
#define put_gp_var_mul2(ind,val) 	pw(val, GP2OFFSET+ind, SPAGE)

#define get_echo_centre(ind) 		pr(CENOFFSET+ind, SPAGE)
#define get_echo_location(ind) 		pr(LOCOFFSET+ind, SPAGE)
#define get_gp_order(ind) 			pr(GPOFFSET+ind, SPAGE)
#define get_gp_var_mul2(ind) 		pr(GP2OFFSET+ind, SPAGE)

//Diffusion definitions
#define MAX_DIFF_ACQ 512

// [CRUSH-SCHED] Native int storage; no use of the PE scratch page.
#define MAX_CRUSHER_ETL 1024
#define MAX_CUSTOM_CRUSHERS 64
#define CRUSHER_ADC_TICKS 18997
#define CRUSHER_UPDATE_MAX_TICKS 9000L
// ADC is already playing aq_mat (3). The completed crusher lists no longer
// use 21/277 or 22/278. Allow aq_mat_sec DSP calculation to settle BEFORE
// starting a new calculation; finish the inactive secondary before selection.
// Call ONLY inside padded ADC time or the zero-gradient preflight benchmark.
#define PREPARE_NEXT_CRUSHER if (total_echo_cnt<crusher_etl) {\
if (crusher_play_mat==slice_crush) crusher_play_mat=first_slice_crush;\
else crusher_play_mat=slice_crush;\
delay(caldelay,us);\
CREATE_MATRIX(crusher_play_mat+256,gs_on*crusher_dac[total_echo_cnt],0,0)\
delay(caldelay,us);}
\\#define DELTAS_IN_MILLISECONDS


#include "stdfn_15.pph"
#include "var_20.pph"
#include "offst_20.pph"
#include "m3040_15.pph"
#include "m3031_15.pph"








#define V19_TAIL_US 100L
#define V19_GAP_MIN 20L
#define V19_ANCHOR 5L
#define V19_INIT_COST 76L


#define V19_MAX_WAIT 49000L


#define V19_ADC_SLOW 8997L

#define V19_POST_RF 200L



#define v19_m_ex 40
#define v19_m_rf 41
#define v19_m_d 42
#define v19_m_m 43
#define v19_m_im 44
#define v19_m_sp 45
#define v19_m_re 46

main(){

/*  gradient variables */
	int gs_rp, gr_dp, gp_dp, gp_store;
	int gp_var_calc, gp_var_calc_rescale;
	int gp_cnt, gp_loc, gp_mul;
	//echo_centre[256], echo_location[256];
	int views_per_echo, array_count, phase_count, phase_offset;
	int slice_list_rp, read_list_dp, phase_list_dp;
	int grp_dp, gsp_rp;
	common int fse_gs_comp;
	
	int v19_on, v19_cycles, v19_comp_flat, v19_mode;
	int v19_flip_tenths[64], v19_mul[64];
	int v19_gabs, v19_gsign, v19_i, v19_setup_ticks;
	int v19_g_ex, v19_g_rf, v19_g_m, v19_g_im, v19_c_ex, v19_c_m, v19_d_dac, v19_rp_dac;
	int v19_mul_ex, v19_mul_rf, v19_mul_m;
	int v19_l_ex, v19_l_rf, v19_l_diff, v19_l_d, v19_l_m, v19_l_mr, v19_l_im;
	int v19_f_ex, v19_f_rf, v19_f_m, v19_f_im, v19_diff_flat, v19_mr_zero;
	long v19_r, v19_rd, v19_ld, v19_te_us, v19_esp_us, v19_tacq_half, v19_t0;
	long v19_s_ex, v19_s_rf, v19_a1, v19_a2, v19_s_d, v19_s_m, v19_s_1, v19_e_1;
	long v19_b_ex, v19_b_rf, v19_b_df, v19_b_d, v19_b_m, v19_b_im, v19_len;
	long v19_gap_x1, v19_gap_1r, v19_gap_r2, v19_gap_2d, v19_gap_dm;
	long v19_go_ex, v19_off_ex, v19_rem_ex, v19_go_rf, v19_off_rf, v19_rem_rf;
	long v19_go_m, v19_off_m, v19_rem_m, v19_go_im, v19_off_im, v19_rem_im;
	long v19_lead, v19_wait_next, v19_first_wait, v19_gap_ir, v19_rd_a1, v19_rd_a2;
	long v19_adc_mid, v19_post_a, v19_post_b, v19_post_end, v19_df_wait, v19_shot_us;
	long v19_read_len, v19_nsp, v19_unblank, v19_offl_ex, v19_offl_rf, v19_offl_m, v19_offl_im;
	int v19_slab_pml, v19_tip_pml, v19_spoil_cpmm, v19_spoil_dac;
	int v19_g_re, v19_c_re, v19_mul_re, v19_l_sp, v19_l_re, v19_l_rr, v19_f_re, v19_t_sp;
	long v19_s_sp, v19_s_re, v19_b_sp, v19_b_re, v19_gap_ms, v19_gap_sr;
	long v19_go_re, v19_off_re, v19_rem_re, v19_offl_re;
	common int overhead_var;
	common int grp_lobe, gsp_lobe;
	common int de_phase;

/*  timing variables */
	long te_a, te_b, sample_period_l;
	int te_extend, tdp, tacq_int, del;
	long tacq_2; // half of tacq for faster calculations
	long te_balance_al, te_balance_bl;
	long te_balance_bl_temp1, te_balance_bl_temp2; // pre-calculated delay
	long te_balance_bl_esp, te_balance_bl_temp1_esp; // [ESP MOD] esp-based imaging-echo balance
	common int post_90_delay1;

/*  misc */
	int slice_180_refocus, stim_tcrush, temp, extra_val;
	int slice_180_refocus_diff; // [TWO-TE FIX #3] first-180 crusher list (tcrush1 budget)
	int this_tcrush; // per-side pre-RF budget; includes extra ramps in independent mode
	common int crush_independent_on, crush_amp, diff_crush_amp;
	int crush_pre_pad, crush_post_pad, crush_rf_pad, crush_rf_flat;
	int tcrush_play, tcrush1_play, crusher_play_mat, first_crush_flat;
	long refocus_wait_ticks, min_half_te;
	long post_adc_base_ticks, post_adc_train_ticks;
	// Immutable run controls (native VAR_ARRAY cannot be common int).
	int crusher_schedule, crusher_step_pct, crusher_custom_count;
	int crusher_saved_train, crusher_saved_first;
	int crusher_max_dac, crusher_slew_dac_100us;
	int crusher_custom_pct[MAX_CUSTOM_CRUSHERS], crusher_dac[MAX_CRUSHER_ETL];
	int crusher_etl, crusher_i, crusher_sign, crusher_base;
	int crusher_setup_ticks;
	long crusher_factor, crusher_steps, crusher_mag, crusher_result;
	long crusher_update_ticks, crusher_update_max_ticks, crusher_adc_remaining;
	int pe_center_echo, pe_echo_index, pe_shots;
	long pe_center_te_us;
	int PE_order, echo, shot, cnt, nav_on, no_views_eff;
	// gp_order[512]
	int setup_mode;
	common int tref_setup, esp; 
	
	int FOVf, view_shift, PF_echoes;
	long rec_sel;
	int gr_comp_flow, grp_dp_1; /* gradient amplitudes for the flow-compensated waveforms */
	int t_flow, G1, G2;
	long tr_extend_us, tr_extend_usL;
	
	int read_pre_list;
	int slice_batch_start;
	
	/* Pre-saturation blocks variables */

	int PB_on[MAX_PRESAT_BLOCKS], PB_offset[MAX_PRESAT_BLOCKS], PB_FOV[MAX_PRESAT_BLOCKS], PB_thk[MAX_PRESAT_BLOCKS];
	int PB_channel[MAX_PRESAT_BLOCKS] = {CHANNEL_P, CHANNEL_P, CHANNEL_R, CHANNEL_R, CHANNEL_S, CHANNEL_S}; /* head, feet, left, right, front, back */
	int PB_freq[MAX_PRESAT_BLOCKS], PB_kHz[MAX_PRESAT_BLOCKS], PB_Hz[MAX_PRESAT_BLOCKS], PB_gs_sat[MAX_PRESAT_BLOCKS];
	int PB_index, sat_offset, no_PB;
    int fov_phase_off_sat, fov_read_off_sat;
	common int sat_on, inter_PB_delay, p_sat_mul_1, phcor, phcor_plus, phcor_minus, r_phcor;	
	int sat_on_ar[3] = {1,1,1};
	
	/* 3D specific variables */
	int gp_sl_inc, gp_sl_init_var, gp_sl_var, gp_sl_on;
	int no_views_2, current_view_2;
	int fov_sl_phase_off, fov_sl_phase_deg, oversample3, gp2_oversample, nav_cnt;
	long grad_varl, bw_override;
	// gp_var_mul2[128];
	common int post_crush_on;
	int de_on;
	int slice_180_crush;
	int slice_de90_list, read_de90_list;
	int post_crush_list;
	common int post_tcrush, post_crush_amp;
	int no_views_eff_1;
	int total_echo_cnt, discard_current_echo;
	// Some variables made common to save memory
	common int gate_duration, gate_interval;
	int sat_mode, PB_gap;
	common int pe2_centric_on;
	common int echoes_to_discard;
	common int no_slices_per_gating_interval;
	common int slice_clustering_on;
	int t_resp_plateau, no_views_per_gating_interval;
	int t_resp_fraction;
	int gating_condition, gating_condition_1, gating_condition_2;
	common int gating_mode;
	int mains_gating;
	int post_mains_gate_delay;
		
	int chess_list;
	common int tcrush_chess, t_chess, gs_chess_amp, chem_shift_freq, chess_on, chess_gauss, chess_mul;	
	int t_chess_gauss;
	int chess_rfnum;
	common int rfdelay, rfgate_delay;
	common int phcor0;
	common int slice_mm_10;
	long slice_freq_var;
	common int validate;
	common int no_disacq, disacq_cnt, notdummy;
	int slab_ratio;
	
	int pr(int offset, int page);
	void pw(int value, int offset, int page);

	void delay32(long);
	int gating_temp1[5], gating_temp2[5];
	int gs_var1;
	common int hasprinted;
	common int interslice_delay;
	common int phase_sign;
	common int use_pdd, pdd_tx_mask, pdd_rx_mask, pts_mask;

	int mtc_list;	
	common int mtc_on, no_cest_pulses, inter_cest_delay, post_cest_delay;
	int cest_count, inter_cest_cal, inter_cest_cal_min;
	int mtc_rfnum, mtc_gaussian, mtc_freq_max, mtc_freq_step;
	long tselmtcl;
	common int mtc_amp1, tselmtc_ms, mtc_tcrush, mtc_gr_amp, mtc_freq, mtc_mul;
	int no_experiments, completed_ex;
	int mtc_array_on;
	int mtc_freq_array[1000];
	int other_channel;
	int gating_after_tr_on;
	long rf_extend_delay;
	
	void systemout(int eightbit);

	int dixon_on, delta_2, delta_2_90, delta_0, smode;

	/* delta_2_90 is the 180 degree pulse shift in us corresponding to (nominally) pi/2 phase difference;
	in 3-point DIXON, the first pulse is shifted by 0-delta_0, the second by delta_2_90-delta_0, and the third
	by 2*delta_2_90-delta_0; here delta_0 is the initial RF shift */

	int TR_array[64];
	int TR_array_size;


	long post_90_delay0L;
	// DE parameter
	long pre_90_delay0L;
	
	int bad_cnt;
	
	/*	diffusion variables */
	int b_inc, max_diff_grad, max_diff_grad_pc;
	long b_max;  // [MERGE-2TE] F2: was int; true max b overflows 16 bit at long delta/Delta and full gradient
	long b_kfac; // [MERGE-2TE] F3: fixed-point b-factor kernel = 39.69*delta_us^2*(Delta-delta/3)_us/1e10
	int b_input_mode;              // [B-VALUE MODE] 0 = DAC array, 1 = b-value array
	int b_calc_cnt;                // [B-VALUE MODE] loop counter over b entries
	int dac_lo, dac_hi, dac_mid;   // [B-VALUE MODE] binary search bounds
	int diff_grad, diff_acq_cnt;
	int diff_scale_saved; // fixed for the validated acquisition table
	int diff_abs_read, diff_abs_phase, diff_abs_slice;
	int diff_list, diff_list2;
	int diff_slice, diff_read, diff_phase;
	int diff_tramp, diff_clock;  /* clock time is changed for diffusion ramps*/
	long b_diff_slice, b_diff_read, b_diff_phase;
	long Gmax; \\temporary size of maximum gradient in uT/m

	int sm_delta, big_delta;
	long big_delta_min, big_delta_max_4_given_TE;
	int diff_comp;
	int expt;
	long big_delta_us, sm_delta_us;
	long b_trial, b_target;        // [B-VALUE MODE] forward-computed and requested b
	common int diff_on, diff_non_zero;
	// [ACQ-TABLE] one row per acquired diffusion volume; row i is acquired as experiment
	// volume i (and again at i+no_diff_acq, ... when no_experiments is a multiple).
	int acq_grad[MAX_DIFF_ACQ];	// [TWO-TE FIX #11] DAC values are authoritative; printed Stejskal-Tanner b-value is accurate only after FIX #3/#4 make realized big_delta requested.
	int acq_b[MAX_DIFF_ACQ];
	int acq_x[MAX_DIFF_ACQ], acq_y[MAX_DIFF_ACQ], acq_z[MAX_DIFF_ACQ];
	common int diff_tcrush, tcrush1, diff_grad_scale;
	long space_pre, space_post, extra_te, extra_te2, extra_delta;
	long extra_delta_us, extra_delta2_us;
	\\void delay32(long);
	int no_diff_acq;
	long min_pre, min_post, true_half_te_us;
	long te_us_long;
	long min_te;
	long t_segment, t_profile;


	
	/*
	* Timing Control
	*/

	#define time_t                  long

	void begin_sequence();
	void end_sequence();
	time_t now();
	void wait_until(time_t time);
	void wait_for(time_t time);

	/* 
	* Asynchronous acquisition
	*/

	void acquire_async(int, long);
	void acquire_async_prepare(int, long);
	void acquire_async_run();
	
#ifdef MAINSGATE
	bad_cnt = 0;
#endif
	
	#include "tstex_15.pph"

	#define 	post_90_delay 	  0
	#define 	post_180_delay_1  0
	#define 	post_180_delay 	  0
	#define 	post_acq_delay 	  0


#ifdef PDD
	if (use_pdd>0)
		userout(pdd_rx_mask);
#endif
	phase_sign =  1;
	
	if (tramp-40+rfdelay-(rfgate_delay-17)<10) 
	{
		printf("Illegal parameter\n");
		goto end;
	}

	overhead_var	 =  0;
	fse_gs_comp      =  0;  // was 6 before 5PM 20111122
	
	// Check if grad_var[0] is less than dacmax
	if (grad_var[0]<0) grad_varl = 65536L+grad_var[0];
	else grad_varl = grad_var[0];

	/* Definitions in addition to var_15.pph */

	#define slice_crush 		21
	#define slice_crush_sec 	277
	#define first_slice_crush 	22
	#define first_slice_crush_sec 	278
	#define fse_mat 		23
	#define fse_mat_sec	 	279
	#define presat_mat 24
	#define presat_mat_sec 280
	#define mtc_mat 25

	#define resolution 192
	#define step_size 24
	#define tacq_phase 16

	/* Define a flow compensation matrix for pre-180 read dephase gradient*/
	#define flow_mat 19
	#define flow_mat_sec 275
	#define post_crush_mat 30


	//Diffusion matrix
	#define diff_mat 60

	// Hardcoded for the moment
	diff_comp = 0;

#ifdef DELTAS_IN_MILLISECONDS
	big_delta_us = IntToLong(big_delta)*1000L;
	sm_delta_us = IntToLong(sm_delta)*1000L;
	// Remember to change the limits in PARAMLIST header from us to ms when enabling this option!!!
#else
	big_delta_us = IntToLong(big_delta);
	if (big_delta_us < 0L) big_delta_us = big_delta_us + 65536L;
	sm_delta_us = IntToLong(sm_delta);   // [FIX] was never assigned in the us build
#endif

	/* [MERGE-2TE] F3: fixed-point b-factor kernel, computed ONCE (delta and Delta
	   are scan constants). b[s/mm^2] = (((A+5000)/10000)*b_kfac + 5000)/10000 with
	   A = (DAC*grad_var[0]/32767)^2 in (Hz/mm)^2 and
	   b_kfac = 39.69*delta_us^2*(Delta-delta/3)_us/1e10, 39.69 = (63/10)^2 as in
	   the original code (~+0.5% vs (2*pi)^2). delta enters EXACT in us - the old
	   formula truncated delta to whole ms before squaring, so the true b exceeded
	   the printed/requested value by ~(delta/floor_ms(delta))^2-1 (about +14% at
	   delta = 6.4 ms). Delta-delta/3 rounds to the nearest ms equivalent through
	   the /100 and /1000 stages (<=0.5 ms, unbiased). All intermediates fit 32 bit
	   only inside the envelope delta <= 10 ms AND Delta <= 80 ms; outside it
	   b_kfac stays 0, b-value input mode aborts, and the runtime b report prints a
	   notice instead of a wrong number. DAC-driven scanning is unaffected. */
	b_kfac = 0;
	if ((sm_delta_us > 0L)&&(sm_delta_us <= 10000L)&&(big_delta_us > sm_delta_us)&&(big_delta_us <= 80000L))
	{
		templ1 = (sm_delta_us*sm_delta_us + 500L)/1000L;   \\ delta^2/1e3      <= 1e5
		templ2 = big_delta_us - sm_delta_us/3L;            \\ (Delta-delta/3) us
		templ1 = templ1*((templ2 + 50L)/100L);             \\ d^2*D/1e5        <= 7.7e7
		templ1 = (templ1 + 500L)/1000L;                    \\ d^2*D/1e8        <= 7.7e4
		templ1 = (templ1*63L)/10L;                         \\ 6.3*d^2*D/1e8    <= 4.9e5
		templ1 = (templ1*63L)/10L;                         \\ 39.69*d^2*D/1e8  <= 3.1e6
		b_kfac = (templ1 + 50L)/100L;                      \\ 39.69*d^2*D/1e10 <= 3.1e4
	}

	
	/* The newshape macro is used now used to assign each pulse to an index number. For example
	'5' refers to the 5lobe_sinc_1500Hz, the default. The user only has to select an index number
	to select any one of the six following pulses. The arguments after each  frame  name are the
	pulse length (in usecs) and the pulse width (in Hz) which are written to the arrays 'rf_length'
	and 'rf_bwdth' respectively. The macro MR3031_RFSTART is now equivalent to the old MR3031_setup
	command but uses an index index number instead of a frame label and is also more efficient in
	terms of 3020 memory */

	// Maximum number of pulses is 16 (upgradable)

	NEWSHAPE_MAC(1, pf1,"3lobe_sinc_3kHz" , 1332, 3000)
	NEWSHAPE_MAC(2, pf1,"3lobe_sinc_1500Hz" , 2664, 1500)
	NEWSHAPE_MAC(3, pf1,"3lobe_sinc_750Hz" , 5328, 750)
	NEWSHAPE_MAC(4, pf1,"5lobe_sinc_3kHz" , 2000, 3000)
	NEWSHAPE_MAC(5, pf1,"5lobe_sinc_1500Hz" , 4000, 1500)
	NEWSHAPE_MAC(6, pf1,"5lobe_sinc_750Hz" , 8000, 750)
	NEWSHAPE_MAC(7, pf1,"3lobe_sinc_6kHz" , 666, 6000)
	NEWSHAPE_MAC(8, pf1,"3lobe_sinc_4kHz" , 1000, 4000)

	// RF shapes below are not compatible with FLASH
	
	NEWSHAPE_MAC(9, pf14,"hypsec_1500Hz" , 10000, 1500)
	NEWSHAPE_MAC(10, pf14,"hypsec_1875Hz" , 8000, 1875)
	NEWSHAPE_MAC(11, pf14,"hypsec_3000Hz" , 5000, 3000)
	NEWSHAPE_MAC(12, pf14,"hypsec_3750Hz" , 4000, 3750)
	NEWSHAPE_MAC(13, pf14,"hypsec_7500Hz" , 2000, 7500)		
	NEWSHAPE_MAC(14, pf15,"gauss" , 7000, 180) // duration and bandwidth are nominal and this pulse should always be not slice selective!!
											   // 180Hz is FWHM for 7ms pulse
	NEWSHAPE_MAC(15, pf16,"9lobe_sinc_5kHz" , 2000, 5000) /* 1.7x rfnum 1*/
	NEWSHAPE_MAC(16, pf17,"19lobe_sinc_2ms" , 2000, 10000) /* +10dB of rfnum 1*/
	NEWSHAPE_MAC(17, pf15,"gauss" , 20000, 10) // duration and bandwidth are nominal and this pulse should always be not slice selective!!
	NEWSHAPE_MAC(18, pf19,"v19_slrprep90" , 3200, 1109) 
	NEWSHAPE_MAC(19, pf19,"v19_slrprep180" , 3200, 1109) 
	NEWSHAPE_MAC(20, pf19,"v19_slrtip90" , 3200, 1109) 
	NEWSHAPE_MAC(21, pf19,"v19_slrelim90" , 3200, 1109) 
	NEWSHAPE_MAC(22, pf19,"v19_reexc90" , 1200, 1283) 
	NEWSHAPE_MAC(23, pf19,"v19_imaging180" , 1200, 1283) 


	//  Establish Overhead time for bandwidths selected. This is used in phase angle correction

    group_delay = acqpad(sample_period);  /*  Group delay for bandwidth selected */

    /* The next calls determine an "extra time factor" for the calculations of
    overhead times in addition to the length of acq. These values have been determined
    empirically for this program and the bandwidths and filter types selected */

    if (sample_period > 19 ) extra_val = 51;
    if (sample_period == 20) extra_val = 3;
    if (sample_period == 15) extra_val = 3;
    if (sample_period == 10) extra_val = 38;
    if (sample_period == 5)  extra_val = 59;

	
    /* The next calculation is for the overhead time in addition to the length of acq.
    Using these two values ie (overhead and tacq) a phase correction can be made for
    the phase shift caused by frequency difference between transmit and receive */

    templ1 = group_delay+16+extra_val;
    templ1 = templ1*16L;
    templ1 = templ1 /100L;
    overhead = templ1;
    tfilter = acqpad(sample_period)/10;
	/*** Swap the channels 1,2 and 3,4 if the phase direction = horizontal (phase_var=1) *****/
	
	if (phase_var==1) 
	{
		PB_channel[0]=CHANNEL_R;
		PB_channel[1]=CHANNEL_R;
		PB_channel[2]=CHANNEL_P;
		PB_channel[3]=CHANNEL_P;
	}

	if ((tramp*3+tref_setup-rfdelay)<43) // 43 us = 423 clocks below
	{
		printf("Illegal parameter (2)\n");
		goto end;
	}

	if ((tramp*3+tref_setup-tfilter-rfdelay+500)<69)
	{
		printf("Illegal parameter (3)\n");
		goto end;
	}
	
	//Check that the number of experiments has been set correctly:
	
	// [ACQ-TABLE] The acquisition loop only returns to experiment_loop after a COMPLETE
	// pass over the table, so the number of acquired volumes is always a multiple of
	// no_diff_acq. The modulo test (not equality) keeps the existing outer repetition
	// semantics: no_experiments/no_diff_acq repeats of the whole diffusion table.
	if (((no_experiments)%(no_diff_acq))!=0)
	{
		printf("No expts should be divisible by no of diffusion acqs (%d)\n", no_diff_acq);
		goto end;
	}
	
	if (no_experiments < no_diff_acq)
	{
		printf ("Number of expts must be = no_diff_acq\n");
		printf ("Set the Experiment Array Size to %d \n", no_diff_acq);
		goto end;
	}
	// [V17-REVIEW] Snapshot scale; preflight must cover the value used at runtime.
	if ((diff_grad_scale<100)||(diff_grad_scale>200))
	{ printf("Invalid diffusion scale\n"); goto end; }
	diff_scale_saved = diff_grad_scale;
	max_diff_grad_pc = 0;
	if ((diff_on==1) && (b_input_mode==1))
		max_diff_grad_pc = 1;
	b_calc_cnt = 0;
b_value_direction_loop:
		if (b_calc_cnt >= no_diff_acq)
			goto b_value_direction_done;
		if ((acq_x[b_calc_cnt]<-1000)||(acq_x[b_calc_cnt]>1000)||
		    (acq_y[b_calc_cnt]<-1000)||(acq_y[b_calc_cnt]>1000)||
		    (acq_z[b_calc_cnt]<-1000)||(acq_z[b_calc_cnt]>1000))
		{ printf("Invalid diffusion direction\n"); goto end; }
		templ1 = IntToLong(acq_x[b_calc_cnt])*IntToLong(acq_x[b_calc_cnt]);
		templ1 = templ1 + IntToLong(acq_y[b_calc_cnt])*IntToLong(acq_y[b_calc_cnt]);
		templ1 = templ1 + IntToLong(acq_z[b_calc_cnt])*IntToLong(acq_z[b_calc_cnt]);
		// [ACQ-TABLE] Applied to EVERY row, b=0 rows included. A b=0 row must carry a unit
		// direction; runtime also handles DAC-1 component truncation on oblique rows.
		// A literal X=Y=Z=0 row is rejected here.
		if ((max_diff_grad_pc==1)&&((templ1 < 902500L)||(templ1 > 1102500L)))
		{
			printf("Row %d not unit length: b-value mode needs\n", b_calc_cnt);
			printf("all directions normalised to 1000\n");
			goto end;
		}
		b_calc_cnt = b_calc_cnt+1;
		goto b_value_direction_loop;
b_value_direction_done:
		/* [MERGE-2TE] F3: search/b_max/achieved-b all on the b_kfac kernel (see its
		   definition near sm_delta_us for units, accuracy and the 32-bit envelope).
		   Also shrinks the image: the old 5-line formula appeared four times here. */
		max_diff_grad = 30000;
		if ((max_diff_grad_pc==1)&&(b_kfac==0))
		{
			printf("b-value mode needs delta <= 10 ms and Delta <= 80 ms\n");
			goto end;
		}
		templ3 = (1L*max_diff_grad*grad_var[0]/32767L)*(1L*max_diff_grad*grad_var[0]/32767L);
		b_max = (((templ3+5000L)/10000L)*b_kfac + 5000L)/10000L;
		if ((max_diff_grad_pc==1)&&(report_on==1))
			printf("Max achievable b = %ld s/mm2\n", b_max);
		b_calc_cnt = 0;
b_value_entry_loop:
		b_target = IntToLong(acq_b[b_calc_cnt]);
		if ((max_diff_grad_pc==1)&&(b_target > b_max))
		{
			printf("b=%ld too high for current delta/Delta\n", b_target);
			printf("Max b = %ld. Raise delta, Delta or grads\n", b_max);
			goto end;
		}
		dac_lo = 1;
		dac_hi = max_diff_grad;
		b_inc = 0;
b_value_search_loop:
		b_inc = b_inc+1;
		if (b_inc > 20)
		{
			printf("b-value DAC search did not converge\n");
			goto end;
		}
		dac_mid = dac_lo + (dac_hi-dac_lo+1)/2;
		templ3 = (1L*dac_mid*grad_var[0]/32767L)*(1L*dac_mid*grad_var[0]/32767L);
		b_trial = (((templ3+5000L)/10000L)*b_kfac + 5000L)/10000L; // [MERGE-2TE] F3 kernel
		if (b_trial <= b_target)
			dac_lo = dac_mid;
		else
			dac_hi = dac_mid-1;
		if (dac_lo >= dac_hi)
			goto b_value_search_done;
		goto b_value_search_loop;
b_value_search_done:
		dac_mid = scale(dac_lo, 100, diff_scale_saved);
		if ((dac_mid < 0)||(dac_mid > 32767))
		{
			printf("b-value DAC conversion outside array limits\n");
			goto end;
		}
		// [B-VALUE MODE] Use DAC 1 for b=0 to avoid the known zero-gradient artifact.
		if (max_diff_grad_pc==1)
		{
			if (b_target <= 0)
				acq_grad[b_calc_cnt] = 1;
			else
				acq_grad[b_calc_cnt] = dac_mid;
		}
		// [V17-REVIEW] Report the actual row components with the existing kernel.
		// Search remains the nominal unit-direction approximation; no calibration change.
		dac_mid = scale(dac_mid, diff_scale_saved, 100);
		b_diff_read = (1L*scale(dac_mid,acq_x[b_calc_cnt],1000)*grad_var[0])/32767L;
		b_diff_phase = (1L*scale(dac_mid,acq_y[b_calc_cnt],1000)*grad_var[0])/32767L;
		b_diff_slice = (1L*scale(dac_mid,acq_z[b_calc_cnt],1000)*grad_var[0])/32767L;
		templ3 = b_diff_read*b_diff_read+b_diff_phase*b_diff_phase+b_diff_slice*b_diff_slice;
		b_trial = (((templ3+5000L)/10000L)*b_kfac + 5000L)/10000L; // [MERGE-2TE] F3 kernel
		if ((max_diff_grad_pc==1)&&(report_on==1)&&(b_target>0))
			printf("b[%d]: want %ld, got %ld, DAC %d\n", b_calc_cnt, b_target, b_trial, dac_lo);
		if (b_trial > b_target)
			templ3 = b_trial-b_target;
		else
			templ3 = b_target-b_trial;
		if ((max_diff_grad_pc==1)&&(b_target>0)&&(templ3*100L > b_target*5L))
			printf("b[%d] differs >5%%; record achieved b\n", b_calc_cnt);
		b_calc_cnt = b_calc_cnt+1;
		if (b_calc_cnt >= no_diff_acq)
			goto b_value_mode_done;
		goto b_value_entry_loop;
b_value_mode_done:
		// [V17-REVIEW] scale() returns a 16-bit int. Check the LONG result
		// before runtime scale() can narrow it (e.g. 20000 DAC at 200%).
		b_calc_cnt=0;
diffusion_scale_check:
		templ1=(IntToLong(acq_grad[b_calc_cnt])*IntToLong(diff_scale_saved))/100L;
		if ((acq_grad[b_calc_cnt]<0)||((diff_on==1)&&(templ1>30000L)))
		{ printf("Diffusion DAC exceeds limit\n"); goto end; }
		if (templ1>32767L)
		{ printf("Diffusion DAC overflows int\n"); goto end; }
		b_calc_cnt=b_calc_cnt+1;
		if (b_calc_cnt<no_diff_acq) goto diffusion_scale_check;
		// [B-VALUE MODE] end

	
/*   ********************** PHASE ENCODE MATRIX CALCULATION ***************************** */



	if ((no_views<1)||(no_views>MAXPESIZE)||(views_per_seg<1)||(views_per_seg>no_views)) 
	{
		printf("Views (including navigator) must be 1..%d; ETL must be 1..views\n", MAXPESIZE);
		goto end;
	}


	//  Check that the base echo time is a multiple of the effective echo time

	/*
	if (te%esp != 0 ) 	{
		printf("The base echo time must be a multiple of the eff echo time \n");
		goto end;
	}
	*/
	if(diff_on == 0)
	{
		if(esp == 0)
		{
			printf("Base TE (esp) be a multiple of eff. echo time (TE) when Diffusion is OFF \n");
			goto end;
		}
		te_eff = scale(te, 1, esp);
	}	
	else
	{
		// [CRUSH-PE] DWI timing always uses te as FIRST echo, independent of ordering.
		te_eff = 1;
		if (PE_order != 1)
		{
			if ((PE_order != 5)&&(PE_order != 6)&&(PE_order != 7))
			{
				printf("Set PE order to 1, 5, 6 or 7 for DWI\n");
				goto end;
			}
		}
		/* [MERGE-2TE] M5 (port): the DE (-90 flip-back) timing is the legacy
		   esp-based chain (pre_90_delay0L, te_balance_bl) and is not valid on the
		   two-TE skeleton - block the combination instead of playing a silently
		   mistimed flip-back. */
		if (de_on == 1)
		{
			printf("Set Driven Equilibrium OFF when Diffusion is ON\n");
			goto end;
		}
	}
	// [CRUSH-PE] New orders are full-Fourier multi-echo DWI only.
	if ((PE_order==6)||(PE_order==7))
	{
		if ((diff_on!=1)||(views_per_seg<=1)||(echoes_to_discard!=0))
		{
			printf("PE 6/7 requires DWI ON, ETL > 1, and no discarded echoes\n");
			goto end;
		}
		if ((PF_echoes!=0)&&(PF_echoes!=views_per_seg))
		{
			printf("PE 6/7 requires full Fourier: PF echoes = 0 or ETL\n");
			goto end;
		}
	}
	if ((PE_order<0)||(PE_order>7)||(PE_order==3)||(PE_order==4))
	{
		printf("Unsupported PE order\n");
		goto end;
	}
	if (PE_order != 2){
		no_views_eff = no_views;
		if(nav_on==1) no_views_eff = no_views - views_per_seg;
		
		if (no_views_eff<1)
		{
			printf("Navigator leaves no imaging views\n");
			goto end;
		}
		if ((no_views_eff%2 != 0 )&&(PE_order != 5)) {
			printf("Effective number of views must be even number\n");
			goto end;
		}
		
		if (PF_echoes == 0) PF_echoes = views_per_seg;
		
		if (PF_echoes < views_per_seg )  {
			printf("PF eff echoes must be >= VPS\n");
			goto end;
		} 

		if (PF_echoes >= 2*views_per_seg )  {
			printf("PF eff echoes must be < 2*VPS\n");
			goto end;
		} 
		views_per_echo = no_views_eff/(2*views_per_seg);
		view_shift = (PF_echoes - views_per_seg) * views_per_echo;		
	}
	else {
		// For single shot, only acquire part of the k-space
		// the number of lines in the full k-space is no_views_eff
		// But we still only acquire no_views echoes
		// no_views_eff - no_views is the number of missing lines
		no_views_eff = (no_views - te_eff + 1)*2;

		
		if (no_views<=te_eff)  {
			printf("no_views must be > te_eff\n");
			goto end;
		}
		view_shift = 0;		
	}	

	
#ifdef SKIP_FIRST_ECHOES
	te_eff = te_eff-echoes_to_discard;
	if (report_on) printf("First %d echoes discarded: ", echoes_to_discard);
	if (te_eff<0) 
	{
		printf("te_eff must be >0\n");
		goto end;
	}
	else
	{
		if (report_on)  printf("te_eff=%d\n", te_eff);
	}
#endif

	if (te_eff > views_per_seg ) 	{
		printf("The eff echo time is too large\n");
		goto end;
	}

	cnt = 0;

	if (nav_on) {
		navigator_loop:
		if (cnt<views_per_seg) {
			//gp_order[cnt] = 0;
			put_gp_order(cnt,0);
			cnt = cnt+1;
			goto navigator_loop;
		}
	}	



	if (views_per_seg == 1) // single echo
	{
		if(PE_order != 5) 
		{
			printf("Set PE order to 5 for single echo\n");
			goto end;
		}
	}
	
	if (PE_order == 5) // single echo
	{
		if(views_per_seg != 1) 
		{
			printf("Set Echo train to 1 for single echo\n");
			goto end;
		}
	}
	
	
    if ((PE_order<2)||(PE_order==6))
	{
		if (no_views_eff%(views_per_seg*2) != 0 ) 	
		{
			printf("Number of views / (2*views per segment) must be an integer \n");
			goto end;
		}
	}	

	if ((PE_order==7)&&(no_views_eff%views_per_seg!=0))
	{
		printf("Linear interleaved requires imaging views divisible by ETL\n");
		goto end;
	}
	if ((PE_order==6)||(PE_order==7))
		goto PE_order_6_7;
    if (PE_order == 0)
		goto PE_order_0;
	if (PE_order == 1) 
		goto PE_order_1;
	if (PE_order == 2) 
		goto PE_order_2;
	
	if (PE_order == 5) 
		goto PE_order_5;
	
	
PE_order_0: 

    // Use pfgen.exe to create the reconstruction table

	// Check that phase encode and echo parameters are compatible
	if ((PE_order == 0)&&(views_per_seg<4))
	{
		printf("Minimum echo train length is 4 for selected PE order\n");
		goto end;
	}

	// [CRUSH-SCHED] PE0 uses one-based doubled scratch tables: index 512
	// is outside 0..511, even when its aliased location word is unused.
	if ((2L*IntToLong(views_per_seg)>=MAXCENTRE)||(2L*IntToLong(views_per_echo)>=MAXLOCATION))
	{
		printf("PE order 0 exceeds scratch table capacity\n");
		goto end;
	}
	if (2L*IntToLong(views_per_seg)*IntToLong(views_per_echo)>MAXPESIZE)
	{
		printf("PE order 0 exceeds GP table capacity\n");
		goto end;
	}

	//  Set up the echo_centre array
	array_count = 0;
echo_centre_loop:   
    array_count = array_count + 1;

	gp_mul = (array_count-te_eff)*views_per_echo-1;
	if(gp_mul < (-no_views_eff/2) - view_shift)
		gp_mul = gp_mul + no_views_eff;
	if(gp_mul >= (no_views_eff/2) - view_shift)
		gp_mul = gp_mul - no_views_eff;
	
	//echo_centre[array_count] = gp_mul;
	put_echo_centre(array_count, gp_mul);

	gp_mul = (1-te_eff-array_count)*views_per_echo-1;
	if(gp_mul < (-no_views_eff/2) - view_shift) 
		gp_mul = gp_mul + no_views_eff;
	if(gp_mul >= (no_views_eff/2) - view_shift) 
		gp_mul = gp_mul - no_views_eff;
	
	//echo_centre[array_count + views_per_seg] = gp_mul;
	put_echo_centre(array_count + views_per_seg, gp_mul);

    if(array_count < views_per_seg)
		goto echo_centre_loop;

	// Set up the echo_location array
	array_count = 0;

echo_location_loop:   
	array_count = array_count + 1;
	
	//echo_location[array_count] = (views_per_echo/2) - array_count + 1;
	//echo_location[array_count+views_per_echo] = echo_location[array_count];	
	temp = (views_per_echo/2) - array_count + 1;	
	put_echo_location(array_count, temp);
	put_echo_location(array_count+views_per_echo, temp);

	if(array_count < views_per_echo) 
		goto echo_location_loop;	 
	 
	/*  Set up the gp_order array */
	
	array_count = cnt;
    gp_loc = 0;
    gp_store = 0;	
	
gp_order_loop1:
    gp_loc = gp_loc + 1;
    if (gp_loc > views_per_echo) 
		gp_store = views_per_seg;
    gp_cnt = 0;
gp_order_loop2:
    gp_cnt = gp_cnt + 1;
    //gp_mul = echo_centre[gp_cnt + gp_store] + echo_location[gp_loc];
	gp_mul = get_echo_centre(gp_cnt + gp_store)+get_echo_location(gp_loc);
	
	
    if(gp_mul < (-no_views_eff/2)-view_shift) 
		gp_mul = gp_mul + no_views_eff;
    if(gp_mul >= (no_views_eff/2)-view_shift) 
		gp_mul = gp_mul - no_views_eff;
    //gp_order[array_count] = gp_mul;
	put_gp_order(array_count,gp_mul);
    array_count = array_count + 1;  
    if (gp_cnt < views_per_seg) 
		goto gp_order_loop2;
    if (gp_loc < 2*views_per_echo) 
		goto gp_order_loop1;
	goto setup_image_params;
	
PE_order_1:

	// Use egen.exe to create the reconstruction table
	
	shot = 1;
	// Number of shots is (views_per_echo*2)
	no_views_eff_1 = no_views_eff;
	gp_loc = no_views_eff_1/2-views_per_echo-1;
	shots_loop_3:	
	
		echo = 1;
		gp_loc = gp_loc+1;
		echoes_loop_3:
			if (shot>views_per_echo) 
				gp_mul = gp_loc+views_per_echo*(echo-te_eff);
			else 
				gp_mul = gp_loc-views_per_echo*(echo-te_eff);
			
			//gp_order[cnt] = gp_mul - no_views_eff_1/2;
			put_gp_order(cnt,gp_mul - no_views_eff_1/2);
			cnt = cnt+1;
			echo = echo + 1;
		if (echo < views_per_seg+1) 
			goto echoes_loop_3;

		shot = shot + 1;
	if (shot < views_per_echo*2+1) 
		goto shots_loop_3;


	goto setup_image_params;

PE_order_6_7:
	// cnt already skips the unchanged navigator train. Zero-based imaging shot s,
	// echo e, N imaging lines, L ETL, S=N/L. Values are gp_order, not physical DAC.
	// Mode 6: reverse mode-1 echo assignment separately in every imaging shot.
	// Mode 7: k(s,e) = -N/2 + s + e*S (negative to positive, interleaved).
	pe_shots = no_views_eff/views_per_seg;
	shot = 0;
new_pe_shot_loop:
	echo = 0;
new_pe_echo_loop:
	if (PE_order==6)
	{
		pe_echo_index = views_per_seg-1-echo;
		if (shot<views_per_echo)
			gp_mul = shot-views_per_echo-views_per_echo*pe_echo_index;
		else
			gp_mul = shot-views_per_echo+views_per_echo*pe_echo_index;
	}
	else
		gp_mul = -no_views_eff/2 + shot + echo*pe_shots;
	put_gp_order(cnt,gp_mul);
	cnt = cnt+1;
	echo = echo+1;
	if (echo<views_per_seg) goto new_pe_echo_loop;
	shot = shot+1;
	if (shot<pe_shots) goto new_pe_shot_loop;
	if (cnt!=no_views)
	{
		printf("Internal PE table length error\n");
		goto end;
	}
	goto setup_image_params;

PE_order_2:

	// Single shot with centric order
	// Requires VIEW_ORDER_1 = CENTREOUT in reconstruction, or reordering table - cengen
	
	if (nav_on==1) {
		printf("Navigators are not supported with selected PE order\n");
		goto end;
	}

	views_per_echo = 1;
	array_count = cnt;
	
	temp = -te_eff+1;
	
	// Single echo, sequential order
	if (views_per_seg != no_views)
	{
		printf("Views per segment (ETL) must be equal number of Views for this PE order\n");
		goto end;
	}
	
    // Centric phase encoding
	put_gp_order(0,0);
	put_gp_order(1,1);
	array_count = 2;
	do {
		ret = -1;
		if (array_count%2==1) 
			ret = 1;
		put_gp_order(array_count,ret*(array_count+1)/2);
		
		array_count = array_count + 1;
	}
	until(array_count == no_views);
	
	goto setup_image_params;
	
PE_order_5: 
	// previous combined PE_order_2 - now used with single echo only
	// Single shot with sequential order and partial Fourier option
	// Essentially te_eff is the equal to the kernel offset to be used in reconstuction!!
	// Also includes single echo when views_per_seg = 1, but te_eff should be overriden
	
	if (nav_on==1) {
		printf("Navigators are not supported with selected PE order\n");
		goto end;
	}

	if (report_on) 
		printf("Kernel offset (for reconstruction)=%d\n", te_eff);
	views_per_echo = 1;
	array_count = cnt;
	
	temp = -te_eff+1;
	
	// Single echo, sequential order
	if (views_per_seg == 1)
		temp = -no_views/2;
	
	
    // Sequential phase encoding
	do { 
		//gp_order[array_count] = temp;
		put_gp_order(array_count, temp);
		temp = temp + 1;
		array_count = array_count + 1;
	}
	until(array_count == no_views);	
	
	goto setup_image_params;	
	

	
setup_image_params:
	// Report actual zero-PE acquisition separately; never feed it into DWI timing.
	if ((diff_on==1)&&(report_on==1))
	{
		pe_center_echo = 1;
		if (PE_order==6) pe_center_echo = views_per_seg;
		if (PE_order==7) pe_center_echo = (no_views_eff/2)/(no_views_eff/views_per_seg)+1;
		pe_center_te_us = IntToLong(te)*1000L + IntToLong(pe_center_echo-1)*IntToLong(esp)*1000L;
		printf("DWI PE=%d: first TE=%d ms, ESP=%d ms\n", PE_order, te, esp);
		printf("Zero PE at echo %d; center TE=%ld us\n", pe_center_echo, pe_center_te_us);
	}
	
	// Calculation of slice phase encoding (3D) steps
    // Sequential slice phase encoding
	temp = -no_views_2/2;
	gp_cnt = 0;
	if (pe2_centric_on==0)
	{
		do {
			//gp_var_mul2[gp_cnt] = temp;
			put_gp_var_mul2(gp_cnt, temp);
			temp = temp + 1;
			gp_cnt = gp_cnt + 1;
		}
		until(gp_cnt == no_views_2);
	}
	else if (no_views_2>2)
	// Centric slice phase encoding
	{
		//gp_var_mul2[0] = 0;
		//gp_var_mul2[1] = -1;
		put_gp_var_mul2(0, 0);
		put_gp_var_mul2(1, -1);
		gp_cnt = 2;
		do {
			ret = 1;
			if (gp_cnt%2==1) ret = -1;
			//gp_var_mul2[gp_cnt] = ret*(gp_cnt+1)/2;
			put_gp_var_mul2(gp_cnt, ret*(gp_cnt+1)/2);
			gp_cnt = gp_cnt + 1;
		}
		until(gp_cnt == no_views_2);
	}	
	else
	{
		//gp_var_mul2[0] = 0;
		//gp_var_mul2[1] = -1;
		put_gp_var_mul2(0, 0);
		put_gp_var_mul2(1, -1);		
	}	

averages_loop_setup:


/*   **************************** SET UP IMAGING PARAMETERS ***************************** */

	discard(no_discard);
	phase_increment(1);
	deg_90 = scale(90, 1000, phase_res);
	deg_360 = scale(360, 1000, phase_res);
	sample_period_l = sample_period ;
	tacq = (sample_period_l * (no_samples+no_discard))/10;
	tacq_2 = tacq/2;
	\\printf("tacq = %ld us, tacq_2 = %ld us\n",tacq, tacq_2);
	templ1 = tacq - dacmaxlong;
	if (templ1 > 0 ) {
		printf("Sampling time too long");
		goto end;
	}
	tacq_int = tacq;
	
/*  Define the length of the RF pulse and its associated bandwidth */

	tsel90 = rf_length[rfnum];
	tsel180 = tsel90;
	// [CRUSH-PE] Independent waveform = SEC crusher, primary RF lobe, SEC crusher.
	// Add a plateau margin for rfdelay and round RF flat time UP to an exact
	// gradient raster (tramp/10 us = five gradient clock ticks), with an even flat
	// time so the RF can be centered exactly. rfdelay is the minimum RF margin.
	crush_pre_pad = 0;
	crush_post_pad = 0;
	crush_rf_pad = 0;
	crush_rf_flat = tsel90;
	if ((crush_independent_on!=0)&&(crush_independent_on!=1))
	{
		printf("Independent crusher switch must be 0 or 1\n");
		goto end;
	}
	if (crush_independent_on==1)
	{
		if ((tramp<100)||(tramp>1000)||(tramp%10!=0))
		{
			printf("Independent crushers require ramp 100..1000 us, multiple of 10\n");
			goto end;
		}
		if ((crush_amp==-32768)||(diff_crush_amp==-32768))
		{
			printf("Crusher amplitudes must be -32767..32767 DAC\n");
			goto end;
		}
		if ((tcrush<=0)||(tcrush>5000)||((IntToLong(tcrush)*50L)%IntToLong(tramp)!=0L))
		{
			printf("tcrush must be 1..5000 us and an exact multiple of tramp/50 us\n");
			goto end;
		}
		if ((diff_on==1)&&((diff_tcrush<=0)||(diff_tcrush>10000)||((IntToLong(diff_tcrush)*50L)%IntToLong(tramp)!=0L)))
		{
			printf("diff_tcrush must be 1..10000 us and an exact multiple of tramp/50 us\n");
			goto end;
		}
		if (de_on==1)
		{
			printf("Independent crushers require Driven Equilibrium OFF\n");
			goto end;
		}
		temp = tramp/10;
		if ((tsel90<1)||(rfdelay<6)||(rfdelay>100))
		{ printf("Invalid independent-crusher RF timing\n"); goto end; }
		crusher_result=((IntToLong(tsel90)+2L*IntToLong(rfdelay)+IntToLong(temp)-1L)/IntToLong(temp))*IntToLong(temp);
		if (crusher_result%2L!=0L) crusher_result=crusher_result+IntToLong(temp);
		if (crusher_result>32767L)
		{ printf("Independent-crusher RF plateau overflow\n"); goto end; }
		crush_rf_flat=crusher_result;
		crush_rf_pad = crush_rf_flat-tsel90;
		// [CRUSH-SCHED] Retain RF/ADC physical group-delay compensation.
		crush_pre_pad = 2*tramp+crush_rf_pad/2;
		crush_post_pad = 2*tramp+crush_rf_pad/2;
	}

	// [CRUSH-SCHED] Validate/build once, BEFORE any acquisition/validator exit.
	// Pulse k is stored at k-1. Constant diffusion-OFF retains v1.6s first
	// train baseline; DWI (including nominal b=0) uses diff_crush_amp first.
	crusher_etl = views_per_seg;
	crusher_saved_train=crush_amp;
	crusher_saved_first=diff_crush_amp;
	if ((crusher_schedule<0)||(crusher_schedule>5)||(crusher_step_pct<0)||(crusher_step_pct>1000))
	{
		printf("Invalid crusher schedule or additive step\n");
		goto end;
	}
	if ((crusher_etl<1)||(crusher_etl>MAX_CRUSHER_ETL))
	{
		printf("Crusher ETL exceeds storage capacity\n");
		goto end;
	}
	if (crusher_schedule!=0)
	{
		if ((crush_independent_on!=1)||(de_on!=0)||(echoes_to_discard!=0))
		{
			printf("Scheduled crushers require independent mode, DE OFF, no skipped echoes\n");
			goto end;
		}
		if ((no_slices<1)||(no_slices>MAX_SLICE))
		{ printf("Crusher orientation count exceeds storage\n"); goto end; }
		// The extra 1000 us is taken FROM the existing ADC window. TE, ESP
		// and the sample count do not grow. Mirror the played delay split.
		if ((no_samples<1)||(no_samples>1024)||(no_discard<0)||(no_discard>128)||(sample_period<1))
		{ printf("Invalid scheduled-crusher sampling parameters\n"); goto end; }
		crusher_adc_remaining = IntToLong(no_samples+no_discard)*IntToLong(sample_period)-3L-CRUSHER_ADC_TICKS;
		crusher_steps = crusher_adc_remaining/10000L;
		crusher_factor = crusher_adc_remaining/10L-crusher_steps*1000L;
		if (sample_period==250) crusher_factor=crusher_factor-1L;
		if ((crusher_steps<1L)||(crusher_factor<10L))
		{
			printf("ADC window too short for scheduled crusher update\n");
			goto end;
		}
	}
	if (crush_independent_on==1)
	{
		if ((crusher_max_dac<1)||(crusher_slew_dac_100us<1))
		{
			printf("Crusher amplitude/slew ceilings must be positive\n");
			goto end;
		}
		if (crusher_schedule==5)
		{
			if ((crusher_custom_count!=crusher_etl)||(crusher_custom_count<1)||(crusher_custom_count>MAX_CUSTOM_CRUSHERS))
			{
				printf("Custom crusher count must equal ETL and be 1..64\n");
				goto end;
			}
			crusher_i=0;
crusher_custom_check:
			if (crusher_custom_pct[crusher_i]==-32768)
			{ printf("Custom crusher storage contains invalid percentage\n"); goto end; }
			crusher_i=crusher_i+1;
			if (crusher_i<MAX_CUSTOM_CRUSHERS) goto crusher_custom_check;
		}
		crusher_i=0;
crusher_schedule_loop:
		crusher_base=crusher_saved_train;
		if ((crusher_i==0)&&(diff_on==1)) crusher_base=crusher_saved_first;
		crusher_mag=IntToLong(crusher_base);
		crusher_sign=1;
		if (crusher_mag<0L) { crusher_mag=-crusher_mag; crusher_sign=-1; }
		crusher_factor=100L;
		crusher_steps=0L;
		if ((crusher_i>=1)&&((crusher_schedule==1)||(crusher_schedule==3)))
			crusher_steps=IntToLong(crusher_i)-1L;
		if ((crusher_i>=1)&&(crusher_schedule==4))
			crusher_steps=IntToLong(crusher_etl)-IntToLong(crusher_i)-1L;
		// Bound BEFORE multiplying and BEFORE adding 100.
		if (crusher_steps>0L)
		{
			if (IntToLong(crusher_step_pct)>(2147483647L-100L)/crusher_steps)
			{
				printf("Crusher progression overflow\n");
				goto end;
			}
			crusher_factor=100L+crusher_steps*IntToLong(crusher_step_pct);
		}
		if (crusher_schedule==5)
		{
			crusher_factor=IntToLong(crusher_custom_pct[crusher_i]);
			if (crusher_factor==-32768L) { printf("Invalid custom crusher percentage\n"); goto end; }
			if (crusher_factor<0L) { crusher_factor=-crusher_factor; crusher_sign=-crusher_sign; }
		}
		if (((crusher_schedule==2)||(crusher_schedule==3))&&(crusher_i%2==1))
			crusher_sign=-crusher_sign;
		// Round POSITIVE magnitude half up, then apply polarity. No clamp.
		if (crusher_mag>0L)
		{
			if (crusher_factor>(2147483647L-50L)/crusher_mag)
			{
				printf("Crusher magnitude product overflow\n");
				goto end;
			}
		}
		crusher_result=(crusher_mag*crusher_factor+50L)/100L;
		if ((crusher_result>32767L)||(crusher_result>IntToLong(crusher_max_dac)))
		{
			printf("Crusher amplitude exceeds DAC/gradient ceiling\n");
			goto end;
		}
		// Both products are <= 32767*1000 after the checks above.
		if (crusher_result*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))
		{
			printf("Crusher ramp exceeds slew ceiling\n");
			goto end;
		}
		crusher_dac[crusher_i]=crusher_result*IntToLong(crusher_sign);
		crusher_i=crusher_i+1;
		if (crusher_i<crusher_etl) goto crusher_schedule_loop;
	}
	tcrush_play = tcrush+crush_pre_pad;
	tcrush1_play = tcrush_play;
	if (diff_on==1) tcrush1_play = diff_tcrush+crush_pre_pad;
	// [V17-REVIEW] waittimer has a 16-bit argument and a 65500-tick
	// documented maximum. Validate BOTH pulse types before any acquisition.
	// Evaluate in long before multiplication or narrowing; do not wrap/clamp.
	crusher_i=0;
refocus_timer_check:
	templ1=IntToLong(tcrush_play);
	if (crusher_i==1) templ1=IntToLong(tcrush1_play);
	templ2=(templ1+IntToLong(tramp)-40L+IntToLong(rfdelay)-IntToLong(rfgate_delay-17))*10L;
	templ3=(templ1+IntToLong(tramp)-IntToLong(rfdelay)+IntToLong(crush_post_pad-crush_pre_pad))*10L;
	if ((templ2<50L)||(templ2>65500L)||(templ3<50L)||(templ3>65500L))
	{ printf("Refocus wait exceeds timer range\n"); goto end; }
	crusher_i=crusher_i+1;
	if (crusher_i<2) goto refocus_timer_check;
	if ((report_on==1)&&(crush_independent_on==1))
	{
		printf("Independent crusher amplitudes (signed slice DAC): train=%d, first-DWI=%d\n", crush_amp, diff_crush_amp);
		printf("Extra refocus block time=%d us; RF gradient flat=%d us\n", crush_pre_pad+crush_post_pad, crush_rf_flat);
	}
	if (no_views_2==1) 
		bw_override = 71L;
	// TODO: is this correct, or does 3D require 71L bandwidth? Answer: no it does not
	else 
		bw_override = 100L;
	templ1 = (bw_override*rf_bwdth[rfnum])/100L;
	pulse_bwdth = templ1;
    
	chess_rfnum = 14; // hard coded
	rwt[chess_rfnum] = t_chess_gauss*10; // 1000 is the number of points in the frame
	
	if (batch_slices == 0) 
		batch_slices = no_slices;		
	if (no_slices%batch_slices!=0) {
		printf("No of slices should be an integer number of batch size\n");
		goto end;
	}	
	
	/*Pre-sat addon*/
#ifdef MULTIPRESAT	
    tsel_sat = rf_length[rfnum_sat];
    sat_pulse_bwdth = rf_bwdth[rfnum_sat];      
#endif   

#ifdef MTC	
	tselmtcl = IntToLong(tselmtc_ms)*1000L; // [us]
    mtc_rfnum = 17;                     //   RF shape for the MTC pulse (hard coded)
	rwt[mtc_rfnum] = tselmtc_ms*10; 	// 1000 is the number of points in the frame
#endif	
	tref = 4*tref_setup; // refocus time after 90 pulse
	tdp = tref_setup; // dephase time between 180 pulses
    gr_oversample =  3 + oversample;
	gr_undersample = 3 - oversample;
	gp_oversample =  3 + oversample2;
	gp_undersample = 3 - oversample2;
	gp2_oversample = 1 + oversample3;	
	
	if (FOVf!=8) {
		if (oversample2!=0) {
			printf("Can't do phase oversampling with rect FOV - adjust FOVf!");
			goto end;
		}
		gp_oversample = FOVf; /* FOVf is between 4 and 16 */		
		gp_undersample = 8;	
	}
	
	gp_mul = 0;
	
	
	
/* These are the scale factors defined in the PARAMLIST header
which must be a factor of ten for the following macros to
work correctly */

	scale_read_off = scale(4000, gr_oversample, gr_undersample);
	scale_slice_off = 400;
	scale_phase_off = scale(4000, gp_oversample, gp_undersample);



/* gp_var_calc is the initial phase encode value passed from PARSETUP
   based on an effective phase encode delay of 4 ms
   It must be rescaled for the selected ramp time
   The value is reassigned to prevent reset by PARSETUP to the initial
   value during setup */

	templ1 = gp_init_var;
	templ2 = gp_undersample;
	templ3 = gp_oversample;
	templ1 = (templ1*templ2*2500L)/templ3;
	templ1 = templ1/(tdp+tramp);
	if ((templ1<-32768L)||(templ1>32767L))
	{
		printf("FOV too small in PE dir\n");
		goto end;
	}
	
	gp_inc = scale(templ1,2,no_views);
	

#ifdef FSE3D	
/* Calculate phase encode amplitude for the slice select axis. The FOV in the slice
select direction is 'fov_sl'. The calculation for the phase encode initial value 'gp_sl_init_var
in the slice direction is as follows:

gp_sl_init_var = (no_views_2/2)*32768/(fov_sl*tphase_effective*grad_var[0])

where the effective phase encode time is 'tphase_effective'

This calculation will the initial gradient value in ppl units. This calculation is prone to
integer overflow errors so longs ie templ1 etc are used below */


	// 20141109 New calculations
	templ1 = (1000000L/1070L)*IntToLong(gs_var);
	templ2 = templ1/IntToLong(tdp+tramp);
	gp_sl_inc = templ2/IntToLong(gp2_oversample);
	templ3 = (IntToLong(no_views_2)*IntToLong(gp_sl_inc))/2L;
    if ((templ3<-32768L)||(templ3>32767L))
	{
        printf("FOV too small in slice direction");
        goto end;
    } 
    gp_sl_init_var = templ3; 	

#endif	
	
/*  gs_var must also be rescaled for the RF pulse selected */
/*  gs_var was calculated by PARSETUP assuming a 1070Hz bandwidth */

	gs_var1 = gs_var;
	if (no_views_2>1) 
		gs_var1 = scale(gs_var,100,slab_ratio);
    templ1 = gs_var1;
    templ1 = templ1*pulse_bwdth;
    templ1 = templ1/1070L;
    ret = dacmaxlong + templ1;
    if (ret < 0 ){
        printf(" Slice thickness too small for pulse selected ");
        goto end;
    }
    gs_var_rescale = templ1;


/*  Switched gradient dephasing lobe calculation */

	
	templ1 = (tacq + IntToLong(tramp))/2;
	templ1 = templ1*IntToLong(gr_var);
	templ1 = templ1/(IntToLong(tdp+tramp));
    templ2 = gr_undersample;
	templ3 = gr_oversample;
	templ4 = (templ1*templ2)/templ3;
	ret = dacmaxlong + templ4;
	if (ret < 0){
		printf("FOV too small for read comp\n");
		goto end;
	}
	gr_comp = templ4;
	
	if (flow_comp_on)
	{
		
		templ1 = IntToLong(3*tramp/2);
		templ1 = templ1+tacq_2+IntToLong(tdp);
		templ1 = templ1*IntToLong(gr_var);
		templ1 = templ1/(IntToLong((tsel90/2)+tramp));
		templ2 = gr_undersample;
		templ3 = gr_oversample;
		templ4 = (templ1*templ2)/templ3;
		ret = dacmaxlong + templ4;
		if (ret < 0){
			printf("Flow comp grad amp caused overflow\n");
			goto end;
		}
	}
	gr_comp_flow = templ4;			

/*  Slice gradient refocussing lobe calculation */

	templ1 = (tsel90 + tramp)/2;
	templ2 = tref + tramp;
	templ1 = gs_var_rescale * templ1/templ2;
	ret = dacmaxlong + templ1;
	if (ret < 0){
		printf("Slice refocussing lobe is excessive\n");
		printf("Decrease bw or select a longer pulse\n");
		goto end;
	}
	gs_comp = templ1;
	

	/*  Pre-sat calculations */
	//#ifndef TRAVEL_PRESAT
	#ifdef MULTIPRESAT
	if (validate==1) 
		goto PB_end;
	no_PB = 0;

	if ((sat_on==1)&&(sat_mode==0))
	{
		PB_index = 0;
		/* Calculate actual number of Pre-sat blocks used */		
		do {
			no_PB = no_PB + PB_on[PB_index];
			if (PB_on[PB_index]>0)
			{
				sat_fov_scale = PB_thk[PB_index];
				sat_offset = PB_offset[PB_index];
	#ifdef PRESAT_FREQ_FLIP
				// Temporary workaround for Moulis - in coronal orientation fifth and sixth presat blocks need swapping
				if (PB_index>3)
					sat_offset = -PB_offset[PB_index];
	#endif
				sat_channel = PB_channel[PB_index];

				templ1 = -32768L*sat_pulse_bwdth;                       \\ Calculate pre-sat gradient strength
				templ2 = sat_fov_scale*1L;
				templ2 = templ2*grad_varl;
				templ4 = templ1/templ2;
				ret = dacmaxlong + templ4;

				if (ret < 0 ) 
				{
					printf("PB [%d] thk too small!\n", PB_index+1);
					goto end;
				}
				gs_sat = templ4;                                        \\ Scale the gradient strength
				PB_gs_sat[PB_index] = templ4;
				
				SELECTSLICE( current_slice )
				/* Pre-sat block offsets are calculated wrp the isocentre! */
				
				templ1 = 1L*sat_offset*sat_pulse_bwdth;
				templ2 = 0;
				sat_slice_freq_long = (templ2 + templ1)/sat_fov_scale;
				fov_sat_slice_freq = sat_slice_freq_long;
				kHz_new3 = 0;
				Hz_new3 = 0;
				if (sat_slice_freq_long < -32767L | sat_slice_freq_long > 32767L) 
				{
					fov_sat_slice_freq = sat_slice_freq_long%32767L;
					kHz_new3 = 32*(sat_slice_freq_long/32767);
					Hz_new3 = 767*(sat_slice_freq_long/32767);
				}
				PB_kHz[PB_index] = kHz_new3;
				PB_Hz[PB_index] = Hz_new3;			
				PB_freq[PB_index] = fov_sat_slice_freq;
				if (report_on) printf("PB [%d], gs_sat = %d  sat_freq = %d\n",PB_index, gs_sat,fov_sat_slice_freq);
			}
			PB_index = PB_index +1;
		} until (PB_index==MAX_PRESAT_BLOCKS);
			
	}	
	#endif

	#ifdef TRAVEL_PRESAT
	/*************TRAVELLING PRESAT BLOCK****************************/	
	if ((sat_on==1)&&(sat_mode==1))
	{
		PB_index = 5; // use the existing infrastructure for pre-sat blocks in which slice direction blocks are 4 and 5
		// Make sure only one, i.e. #5, block is enabled and others are disabled
		temp = 0;
		for (5)
		{
			PB_on[temp] = 0;
			temp = temp+1;
		}
		PB_on[PB_index] = 1; 
		no_PB = 1;
		
		// Go through all slices and find the boundary slices to stick the pre-saturation bands to
		temp = no_slices-1;
		pos_index = 0;
		for (temp)
		{
			SLICEOFF(fov_slice_off,pulse_bwdth,scale_slice_off,slice_freq_long,fov_slice_freq,kHz_new,Hz_new)
			if (pos_index==0)
			{
				templ1 = slice_freq_long; // running maximum
				templ2 = slice_freq_long; // running minimum
			}
			if (slice_freq_long>templ1) 
				templ1 = slice_freq_long; // running maximum
			if (slice_freq_long<templ2) 
				templ2 = slice_freq_long; // running minimum
			pos_index = pos_index+1;
		}
		
		// Calculate desired PB offset for the boundary slices
		
		// 1. Re-calculate the slice thickness of the imaging slice in mm from parsetup values using the formula below
		
		templ3 = (-32768L * 10700L) / (IntToLong(gs_var1)*grad_varl); // slice_thickness [mm] multiplied by 10 for 0.1 mm precision
		
		// 2. Calculate the slice offset [mm] from its thickness, bandwidth, and frequency:
		templ1 = templ1*templ3;
		templ1 = templ1/IntToLong(pulse_bwdth); // top slice offset multiplied by 10 for 0.1 mm precision
		templ2 = templ2*templ3;
		templ2 = templ2/IntToLong(pulse_bwdth); // bottom slice offset multiplied by 10 for 0.1 mm precision
		
		// Calculate nominal absolute offset, to be added to the PB offset later [0.1*mm] (templ4)
		// the sign will be negative for the bottom slice and positive for the top slice
		templ4 = (((10L*IntToLong(PB_thk[PB_index])) + (templ3*100L)/slab_ratio)/2L) + IntToLong(PB_gap)*10L;	
		
		// Finally determine where do we want to place our PB - at the bottom or the top?
		
		// 3. Calculate the offset in mm of the PB (from the centre of the imaging slice) (templ5)
		if (batch_slices>1)
		{
			if (fov_slice_off[1]>fov_slice_off[0])
			{	 // incrementing order, bottom PB
				templ5 = templ2 - templ4;
			}
			else 
			{  // decrementing order, top PB
				templ5 = templ2 + templ4;
			}
		}
		else  // do something
		{
			templ5 = templ2 - templ4;
		}	
		PB_offset[PB_index] = templ5/10;
		
		// Calculate pre-sat frequency  as freq = bw*(offset/thk)
		templ1 = IntToLong(sat_pulse_bwdth)*PB_offset[PB_index];
		sat_slice_freq_long = templ1/IntToLong(PB_thk[PB_index]);
		PB_freq[PB_index] = sat_slice_freq_long;
		PB_kHz[PB_index] = 0;
		PB_Hz[PB_index] = 0;
		if (sat_slice_freq_long < -32767L | sat_slice_freq_long > 32767L) 
		{
			PB_freq[PB_index] = sat_slice_freq_long%32767L;
			PB_kHz[PB_index] = 32*(sat_slice_freq_long/32767);
			PB_Hz[PB_index] = 767*(sat_slice_freq_long/32767);
		}
		
		// Calculate pre-sat gradient amplitude
		templ1 = -32768L*sat_pulse_bwdth;                       \\ Calculate pre-sat gradient strength
		templ2 = IntToLong(PB_thk[PB_index]);
		templ2 = templ2*grad_varl;
		templ4 = templ1/templ2;
		ret = dacmaxlong + templ4;
		if (ret < 0 ) 
		{
			printf("Pre-sat block thk too small!\n");
			goto end;
		}
		PB_gs_sat[PB_index] = templ4;   		
	}
	/*************END OF TRAVELLING PRESAT BLOCK****************************/		
	#endif
	PB_end:
	if (report_on) 
		printf("No of PBs = %d\n", no_PB);
 

#ifdef DIXON3P
	if (dixon_on)
	{
		/** calculate the 180 RF pulse shift from the scan mode (smode) */
		if (smode<3)
		{
			delta_2 = smode*delta_2_90;
		}
		if (smode==3)
		{
			if (no_experiments < 3)
			{
				printf("Number of experiments must be 3 in W-F mode!");	
				goto end;
			}
		}
	}
#endif


	if (TR_array_size>0)
	{
		if (no_experiments%TR_array_size!=0) 
		{
			printf("Exper array size (%d) must be divisable by the TR array size (%d)!\n", no_experiments, TR_array_size);
			goto end;
		}
		tr = TR_array[0];
	}
	
	
/*  Calculate Base matrix */

	BASEMATRIX( subj_angle_z, subj_angle_y, subj_angle_x )
	delay(caldelay,us);

/*  macro call to remove initial glitch from MR3031 and MR3040 */

	MR3031_DEGLITCH
	MR3040_DEGLITCH

/*  Create gradient lists to be used for the slice, read, and phase profiles */

/* 100 us is the minimum tramp permitted by PARSETUP.
   This sets the argument 'clock' to 20 and the sequencer timebase to 2 us
   (the argument multiplies the duration of the sequencer master clock
   timebase by 100 ns units).
   A tramp of 1 ms sets the argument to 200 and the timebase to 20 us.*/

	clock = tramp/5;
	MR3040_Clock(clock);
	diff_clock = diff_tramp/5;
	MR3040_Clock(diff_clock);

	MR3040_SetListAddress(0);

	slice_list = MR3040_InitList();
	POSPULSE_HOLD()
	NEGPULSE_SEC(tref, clock)
	
	
	read_pre_list = MR3040_InitList();
	MR3040_Output(NOLOOP,grad.address."zeros",grad.size."zeros",
		grad.waits."zeros");
	MR3040_Hold(NOLOOP);
	MR3040_Output( NOLOOP, grad.address."zeros",grad.size."zeros",
		grad.waits."zeros");
	if ( flow_comp_on) {			
		POSPULSE_SEC(tref, clock)
		NEGPULSE(tsel90/2, clock)
	}
	if ( flow_comp_on==0) {
		NEGPULSE_SEC(tref, clock)
	}
	
	slice_180_refocus = MR3040_InitList();
	if (crush_independent_on==1)
	{
		POSPULSE_SEC(tcrush, clock)
		POSPULSE(crush_rf_flat, clock)
		POSPULSE_SEC(tcrush, clock)
	}
	else
	{
		POSPULSE(tsel90+tcrush+tcrush, clock)
	}
	// [TWO-TE FIX #3] Dedicated crusher list for the FIRST 180 only. Plateau uses the
	// first-180 budget: diff_tcrush when diffusion mode is on, tcrush otherwise (identical
	// to slice_180_refocus in that case). This makes the played waveform match the timing
	// arithmetic (min_pre/min_post/big_delta_min/extra_delta all use tcrush1), and provides
	// real spoiling around the first 180 at b=0 where the diffusion lobes have zero amplitude.
	temp = tcrush;
	if (diff_on==1)
		temp = diff_tcrush;
	slice_180_refocus_diff = MR3040_InitList();
	if (crush_independent_on==1)
	{
		first_crush_flat = temp;
		POSPULSE_SEC(first_crush_flat, clock)
		POSPULSE(crush_rf_flat, clock)
		POSPULSE_SEC(first_crush_flat, clock)
	}
	else
	{
		POSPULSE(tsel90+temp+temp, clock)
	}
		

    slice_180_crush = MR3040_InitList();
    MR3040_Output(NOLOOP,grad.address."0_mx_sec",grad.size."0_mx_sec",grad.waits."0_mx_sec");
    DELAY(tdp, clock, "mx_0_sec")
    MR3040_Output( NOLOOP, grad.address."mx_0_sec",grad.size."mx_0_sec",grad.waits."mx_0_sec");
	
	MR3040_Clock(clock); 		  // RG - to remove
	diff_list = MR3040_InitList();
	POSPULSE_HOLD()
	
	/*
	DELAY(tramp, clock, "0_max")
	POSPULSE_SEC(tdp, clock)
	*/
	
	MR3040_Clock(diff_clock); 		// RG - to remove
	diff_list2 = MR3040_InitList();
	POSPULSE_HOLD()	
	
	
	read_list = MR3040_InitList();
	NEGPULSE_SEC(tdp, clock)
	POSPULSE(tacq_int, clock)
	NEGPULSE_SEC(tdp, clock)
	
	phase_list = MR3040_InitList();
	NEGPULSE_SEC(tdp, clock)
	DELAY(tramp, clock, "0_max")
	DELAY(tacq_int, clock, "0_max")
	DELAY(tramp, clock, "0_max")
	POSPULSE_SEC(tdp, clock)
	
	slice_list_rp = MR3040_InitList();
	
	POSPULSE_SEC(tdp, clock)
	DELAY(tramp, clock, "0_max")
	DELAY(tacq_int, clock, "0_max")
	DELAY(tramp, clock, "0_max")
	
	POSPULSE_SEC(tdp, clock)
	
    sat_list = MR3040_InitList();
    POSPULSE_2_HOLD()

	post_crush_list = MR3040_InitList();
	POSPULSE(post_tcrush, clock)

#ifdef DRIVEN_EQUILIBRIUM
	if (de_on)
	{
		// slice_list played out backwards
		slice_de90_list = MR3040_InitList();
		if ( flow_comp_on) {
			DELAY(tsel90/2+2*tramp, clock, "zeros")
		}
		NEGPULSE_SEC(tref, clock)
		POSPULSE_HOLD()
		
		// read_pre_list played out backwards
		read_de90_list = MR3040_InitList();
		if ( flow_comp_on) {
			NEGPULSE(tsel90/2, clock)
			POSPULSE_SEC(tref, clock)
			
		}
		if ( flow_comp_on==0) {
			NEGPULSE_SEC(tref, clock)
		}
	}
#endif

#ifdef CHESS
	chess_list = MR3040_InitList();
	POSPULSE(tcrush_chess, clock)	
#endif

#ifdef MTC
	mtc_list = MR3040_InitList();
	POSPULSE(mtc_tcrush, clock)	
#endif


	
	if ((v19_on!=0)&&(v19_on!=1))
	{ printf("V19 method switch must be 0 or 1\n"); goto end; }
	v19_mode = 0;
	if (v19_on==1)
	{
		
		if ((diff_on!=1)||(crush_independent_on!=1)||(crusher_schedule!=0)||(de_on!=0))
		{ printf("V19 needs DWI ON, independent constant crushers,");
printf(" DE OFF\n"); goto end; }
		if ((flow_comp_on!=0)||(dixon_on!=0)||(no_views_2!=1)||(echoes_to_discard!=0)||(setup_mode!=0))
		{ printf("V19 rejects flow comp, Dixon, 3D, skipped echoes");
printf(", TREF setup\n"); goto end; }
		if ((no_slices!=1)||(slice_mm_10!=0)||(fov_slice_off[0]!=0))
		{ printf("V19 supports one centred slice (fixed tx frequen");
printf("cy for all widths)\n"); goto end; }
		if ((sat_on!=0)||(chess_on!=0)||(mtc_on!=0)||(gating!=0)||(mains_gating!=0)||(TR_array_size!=0))
		{ printf("V19 rejects presat, CHESS, CEST, gating and TR a");
printf("rrays\n"); goto end; }
		if ((gs_on!=1)||(gr_on!=1)||(gsp_lobe!=0)||(post_90_delay1!=0)||(phcor0!=0))
		{ printf("V19 needs slice/read ON, gsp_lobe 0, no post-90/");
printf("phcor0 trims\n"); goto end; }
		if ((views_per_seg<1)||(views_per_seg>64)||(v19_cycles<1)||(v19_cycles>8))
		{ printf("V19 needs ETL 1..64 and 1..8 dephasing cycles\n"); goto end; }
		if (v19_cycles!=2)
		{ printf("V19 supports only 2 dephasing cycles; re-validat");
printf("e other values with examples/v19_validate_events");
printf(".py\n"); goto end; }
		if ((diff_tramp!=tramp)||(rfgate_delay<17)||(tramp+rfdelay<163))
		{ printf("V19 needs diff_tramp=tramp, rfgate_delay>=17, tr");
printf("amp+rfdelay>=163 us\n"); goto end; }
		if ((gs_var==0)||(gs_var<-12000)||(gs_var>12000)||(warmup<0)||(warmup>200))
		{ printf("V19 slice selector outside 1..12000 DAC, or warm");
printf("up outside 0..200 us\n"); goto end; }
		if ((IntToLong(v19_comp_flat)*50L)%IntToLong(tramp)!=0L)
		{ printf("V19 compensation flat must be a multiple of tram");
printf("p/50\n"); goto end; }
		if (((IntToLong(tdp)*50L)%IntToLong(tramp)!=0L)||(sm_delta_us<=IntToLong(tramp))||(sm_delta_us>32000L)||
		    (((sm_delta_us-IntToLong(tramp))*50L)%IntToLong(tramp)!=0L))
		{ printf("V19 tdp and little delta-tramp must be multiples");
printf(" of tramp/50\n"); goto end; }
		v19_gabs = gs_var;
		v19_gsign = 1;
		if (gs_var<0) { v19_gabs = -gs_var; v19_gsign = -1; }
		v19_r = IntToLong(tramp);
		v19_rd = IntToLong(rfdelay);
		
		
		v19_lead = IntToLong(warmup+rfgate_delay+60)*10L;
		v19_unblank = v19_lead - IntToLong(warmup+rfgate_delay-17+10)*10L - V19_ANCHOR;
		v19_te_us = IntToLong(te)*1000L;
		v19_esp_us = IntToLong(esp)*1000L;
		v19_tacq_half = tacq/2L;
		v19_nsp = IntToLong(no_samples+no_discard)*IntToLong(sample_period);
		v19_diff_flat = sm_delta_us - v19_r;
		v19_ld = sm_delta_us + v19_r;
		
		v19_mul_ex = scale(rfcal, 3436, 10000);
if ((v19_mul_ex<1)||(v19_mul_ex>2047)) { printf("V19 RF multiplier outside 1..2047\n"); goto end; }
		v19_mul_rf = scale(rfcal, 11509, 10000);
if ((v19_mul_rf<1)||(v19_mul_rf>2047)) { printf("V19 RF multiplier outside 1..2047\n"); goto end; }
		v19_i = 0;
v19_flip_check:
		if ((v19_flip_tenths[v19_i]<1)||(v19_flip_tenths[v19_i]>1800))
		{ printf("V19 refocusing flip %d outside 0.1..180 deg\n", v19_i+1); goto end; }
		temp = scale(10783, v19_flip_tenths[v19_i], 1800);
		v19_mul[v19_i] = scale(rfcal, temp, 10000);
if ((v19_mul[v19_i]<1)||(v19_mul[v19_i]>2047)) { printf("V19 RF multiplier outside 1..2047\n"); goto end; }
		v19_i = v19_i+1;
		if (v19_i<views_per_seg) goto v19_flip_check;
		temp = tramp/10;
v19_f_ex = ((rf_length[18]+2*rfdelay+temp-1)/temp)*temp;
if (v19_f_ex%2!=0) v19_f_ex = v19_f_ex+temp;
		temp = tramp/10;
v19_f_rf = ((rf_length[19]+2*rfdelay+temp-1)/temp)*temp;
if (v19_f_rf%2!=0) v19_f_rf = v19_f_rf+temp;
		temp = tramp/10;
v19_f_im = ((rf_length[23]+2*rfdelay+temp-1)/temp)*temp;
if (v19_f_im%2!=0) v19_f_im = v19_f_im+temp;
		
		templ1 = IntToLong(v19_gabs)*IntToLong(154);
templ1 = ((templ1*100L)/IntToLong(1200))*10L;
templ1 = (templ1*1000L+535L)/1070L;
templ1 = (templ1*10L+IntToLong(1000)/2L)/IntToLong(1000);
if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))) {
printf("V19 selector DAC %ld outside amplitude/slew ceil", templ1);
printf("ing\n"); goto end; }
v19_g_im = templ1*IntToLong(v19_gsign);
		
		
		
		
		templ1 = (IntToLong(v19_gabs)*10000L)/107L;
		templ1 = (templ1*IntToLong(v19_cycles)*10L + IntToLong(tdp+tramp)/2L)/IntToLong(tdp+tramp);
		if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp)))
		{ printf("V19 added-dephasing DAC %ld outside ceiling\n", templ1); goto end; }
		
		
		
		if (crusher_saved_train==0) { printf("V19 needs a nonzero train crusher\n"); goto end; }
		v19_d_dac = templ1;
		if (crusher_saved_train<0) v19_d_dac = -v19_d_dac;
		templ2 = IntToLong(crusher_saved_train)*IntToLong(tcrush+tramp);
		if (templ2<0L) templ2 = -templ2;
		if (templ2<3L*templ1*IntToLong(tdp+tramp))
		{ printf("V19 train crusher area must be >= 3x added depha");
printf("sing (C=%ld, D=%ld DAC.us)\n", templ2, templ1*IntToLong(tdp+tramp)); goto end; }
		
		
		templ3 = IntToLong(crusher_saved_first)*IntToLong(diff_tcrush+tramp);
		if (templ3<0L) templ3 = -templ3;
		templ4 = templ1*IntToLong(tdp+tramp);
		
		
		if ((crusher_saved_first>=0)||(crusher_saved_train>=0)||
		    (templ2/100L<(templ4/100L)*381L/100L)||(templ2/100L>(templ4/100L)*385L/100L)||
		    (templ3/100L<(templ4/100L)*253L/100L)||(templ3/100L>(templ4/100L)*257L/100L))
		{ printf("V19 crusher geometry unvalidated; use C/D=3.83 a");
printf("nd C1/D=2.55, then re-validate with examples/v19");
printf("_validate_events.py\n"); goto end; }

		
		if ((v19_slab_pml<1000)||(v19_tip_pml<1000)||(v19_tip_pml>v19_slab_pml))
		{ printf("V19 needs imaging <= tip-up <= slab width\n"); goto end; }
		templ1 = IntToLong(v19_gabs)*IntToLong(355);
templ1 = ((templ1*100L)/IntToLong(3200))*10L;
templ1 = (templ1*1000L+535L)/1070L;
templ1 = (templ1*10L+IntToLong(v19_slab_pml)/2L)/IntToLong(v19_slab_pml);
if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))) {
printf("V19 selector DAC %ld outside amplitude/slew ceil", templ1);
printf("ing\n"); goto end; }
v19_g_ex = templ1*IntToLong(v19_gsign);
		templ1 = IntToLong(v19_gabs)*IntToLong(355);
templ1 = ((templ1*100L)/IntToLong(3200))*10L;
templ1 = (templ1*1000L+535L)/1070L;
templ1 = (templ1*10L+IntToLong(v19_slab_pml)/2L)/IntToLong(v19_slab_pml);
if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))) {
printf("V19 selector DAC %ld outside amplitude/slew ceil", templ1);
printf("ing\n"); goto end; }
v19_g_rf = templ1*IntToLong(v19_gsign);
		templ1 = IntToLong(v19_gabs)*IntToLong(355);
templ1 = ((templ1*100L)/IntToLong(3200))*10L;
templ1 = (templ1*1000L+535L)/1070L;
templ1 = (templ1*10L+IntToLong(v19_tip_pml)/2L)/IntToLong(v19_tip_pml);
if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))) {
printf("V19 selector DAC %ld outside amplitude/slew ceil", templ1);
printf("ing\n"); goto end; }
v19_g_m = templ1*IntToLong(v19_gsign);
		templ1 = IntToLong(v19_gabs)*IntToLong(154);
templ1 = ((templ1*100L)/IntToLong(1200))*10L;
templ1 = (templ1*1000L+535L)/1070L;
templ1 = (templ1*10L+IntToLong(1000)/2L)/IntToLong(1000);
if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))) {
printf("V19 selector DAC %ld outside amplitude/slew ceil", templ1);
printf("ing\n"); goto end; }
v19_g_re = templ1*IntToLong(v19_gsign);
		temp = tramp/10;
v19_f_m = ((rf_length[20]+2*rfdelay+temp-1)/temp)*temp;
if (v19_f_m%2!=0) v19_f_m = v19_f_m+temp;
		temp = tramp/10;
v19_f_re = ((rf_length[22]+2*rfdelay+temp-1)/temp)*temp;
if (v19_f_re%2!=0) v19_f_re = v19_f_re+temp;
		templ2 = (IntToLong(5316)*IntToLong(rf_length[18])+5000L)/10000L + IntToLong(v19_f_ex-rf_length[18])/2L + (IntToLong(5096)*IntToLong(tramp)+5000L)/10000L;
templ1 = IntToLong(v19_g_ex);
if (templ1<0L) templ1 = -templ1;
templ1 = (templ1*templ2 + IntToLong(v19_comp_flat+tramp)/2L)/IntToLong(v19_comp_flat+tramp);
if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))) {
printf("V19 compensation DAC %ld outside amplitude/slew ", templ1);
printf("ceiling\n"); goto end; }
v19_c_ex = templ1*IntToLong(v19_gsign);
		templ2 = (IntToLong(5318)*IntToLong(rf_length[20])+5000L)/10000L + IntToLong(v19_f_m-rf_length[20])/2L + (IntToLong(4904)*IntToLong(tramp)+5000L)/10000L;
templ1 = IntToLong(v19_g_m);
if (templ1<0L) templ1 = -templ1;
templ1 = (templ1*templ2 + IntToLong(v19_comp_flat+tramp)/2L)/IntToLong(v19_comp_flat+tramp);
if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))) {
printf("V19 compensation DAC %ld outside amplitude/slew ", templ1);
printf("ceiling\n"); goto end; }
v19_c_m = templ1*IntToLong(v19_gsign);
		templ2 = (IntToLong(5547)*IntToLong(rf_length[22])+5000L)/10000L + IntToLong(v19_f_re-rf_length[22])/2L + (IntToLong(5096)*IntToLong(tramp)+5000L)/10000L;
templ1 = IntToLong(v19_g_re);
if (templ1<0L) templ1 = -templ1;
templ1 = (templ1*templ2 + IntToLong(v19_comp_flat+tramp)/2L)/IntToLong(v19_comp_flat+tramp);
if ((templ1<1L)||(templ1>IntToLong(crusher_max_dac))||(templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))) {
printf("V19 compensation DAC %ld outside amplitude/slew ", templ1);
printf("ceiling\n"); goto end; }
v19_c_re = templ1*IntToLong(v19_gsign);
		v19_mul_m = scale(rfcal, 3761, 10000);
if ((v19_mul_m<1)||(v19_mul_m>2047)) { printf("V19 RF multiplier outside 1..2047\n"); goto end; }
		v19_mul_re = scale(rfcal, 5392, 10000);
if ((v19_mul_re<1)||(v19_mul_re>2047)) { printf("V19 RF multiplier outside 1..2047\n"); goto end; }
		
		if ((v19_spoil_dac<1000)||(v19_spoil_dac>crusher_max_dac)||(IntToLong(v19_spoil_dac)*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))||(grad_varl<1000L))
		{ printf("V19 spoiler amplitude outside ceiling\n"); goto end; }
		templ1 = 32767000L/grad_varl;
		if (IntToLong(v19_spoil_cpmm)*templ1>2000000L)
		{ printf("V19 spoiler moment too large for this gradient\n"); goto end; }
		templ1 = (IntToLong(v19_spoil_cpmm)*templ1*1000L + IntToLong(v19_spoil_dac)-1L)/IntToLong(v19_spoil_dac) - v19_r;
		temp = tramp/50;
		templ1 = ((templ1+IntToLong(temp)-1L)/IntToLong(temp))*IntToLong(temp);
		if ((templ1<IntToLong(tramp))||(templ1>6000L))
		{ printf("V19 spoiler flat %ld us outside tramp..6000 us\n", templ1); goto end; }
		v19_t_sp = templ1;

		
		v19_l_ex = MR3040_InitList();
		POSPULSE(v19_f_ex, clock)
		NEGPULSE_SEC(v19_comp_flat, clock)
		v19_l_rf = MR3040_InitList();
		POSPULSE_SEC(diff_tcrush, clock)
		POSPULSE(v19_f_rf, clock)
		POSPULSE_SEC(diff_tcrush, clock)
		v19_l_diff = MR3040_InitList();
		POSPULSE(v19_diff_flat, clock)
		v19_l_d = MR3040_InitList();
		POSPULSE_SEC(tdp, clock)
		v19_l_m = MR3040_InitList();
		NEGPULSE_SEC(v19_comp_flat, clock)
		POSPULSE(v19_f_m, clock)
		v19_l_sp = MR3040_InitList();
		POSPULSE(v19_t_sp, clock)
		v19_l_re = MR3040_InitList();
		POSPULSE(v19_f_re, clock)
		NEGPULSE_SEC(v19_comp_flat, clock)
		v19_mr_zero = v19_f_re+2*tramp;
		v19_l_rr = MR3040_InitList();
		DELAY(v19_mr_zero, clock, "zeros")
		NEGPULSE_SEC(tdp, clock)
		v19_l_im = MR3040_InitList();
		POSPULSE_SEC(tcrush, clock)
		POSPULSE(v19_f_im, clock)
		POSPULSE_SEC(tcrush, clock)

		
		
		v19_s_ex = -v19_rd - IntToLong(v19_f_ex/2) - v19_r;
		templ3 = IntToLong(v19_f_ex) + 4L*v19_r + IntToLong(v19_comp_flat);
		v19_go_ex = (0L + v19_r + IntToLong(v19_f_ex-rf_length[18])/2L + v19_rd)*10L;
v19_off_ex = v19_go_ex + IntToLong(rf_length[18])*10L + 50L;
v19_offl_ex = v19_lead - V19_ANCHOR + IntToLong(rf_length[18])*10L + 50L;
v19_rem_ex = (templ3 + 20L)*10L - v19_off_ex - V19_POST_RF - V19_ANCHOR;
v19_b_ex = templ3 + 20L + V19_TAIL_US;
if ((v19_go_ex-v19_lead<300L)||(v19_go_ex-v19_lead>V19_MAX_WAIT)||(v19_offl_ex+V19_POST_RF>V19_MAX_WAIT)||(v19_rem_ex<50L)||(v19_rem_ex+V19_TAIL_US*10L>V19_MAX_WAIT)) {
printf("V19 RF block window infeasible (rf %d)\n", 18); goto end; }
		templ3 = 2L*IntToLong(diff_tcrush) + IntToLong(v19_f_rf) + 6L*v19_r;
		v19_s_rf = v19_te_us/2L - v19_rd - IntToLong(v19_f_rf/2) - 3L*v19_r - IntToLong(diff_tcrush);
		v19_go_rf = (IntToLong(diff_tcrush)+2L*v19_r + v19_r + IntToLong(v19_f_rf-rf_length[19])/2L + v19_rd)*10L;
v19_off_rf = v19_go_rf + IntToLong(rf_length[19])*10L + 50L;
v19_offl_rf = v19_lead - V19_ANCHOR + IntToLong(rf_length[19])*10L + 50L;
v19_rem_rf = (templ3 + 20L)*10L - v19_off_rf - V19_POST_RF - V19_ANCHOR;
v19_b_rf = templ3 + 20L + V19_TAIL_US;
if ((v19_go_rf-v19_lead<300L)||(v19_go_rf-v19_lead>V19_MAX_WAIT)||(v19_offl_rf+V19_POST_RF>V19_MAX_WAIT)||(v19_rem_rf<50L)||(v19_rem_rf+V19_TAIL_US*10L>V19_MAX_WAIT)) {
printf("V19 RF block window infeasible (rf %d)\n", 19); goto end; }
		
		v19_a1 = v19_te_us/2L - v19_rd - (big_delta_us + v19_ld)/2L;
		v19_a2 = v19_a1 + big_delta_us;
		v19_b_df = v19_ld + 20L + V19_TAIL_US;
		v19_df_wait = (v19_ld + 20L)*10L - 1000L - 2L*V19_ANCHOR;
		v19_b_d = IntToLong(tdp) + 2L*v19_r + 20L + V19_TAIL_US;
		v19_read_len = 2L*IntToLong(tdp) + tacq + 6L*v19_r;
		templ3 = 2L*IntToLong(tcrush) + IntToLong(v19_f_im) + 6L*v19_r;
		v19_go_im = (IntToLong(tcrush)+2L*v19_r + v19_r + IntToLong(v19_f_im-rf_length[23])/2L + v19_rd)*10L;
v19_off_im = v19_go_im + IntToLong(rf_length[23])*10L + 50L;
v19_offl_im = v19_lead - V19_ANCHOR + IntToLong(rf_length[23])*10L + 50L;
v19_rem_im = (templ3 + 20L)*10L - v19_off_im - V19_POST_RF - V19_ANCHOR;
v19_b_im = templ3 + 20L + V19_TAIL_US;
if ((v19_go_im-v19_lead<300L)||(v19_go_im-v19_lead>V19_MAX_WAIT)||(v19_offl_im+V19_POST_RF>V19_MAX_WAIT)||(v19_rem_im<50L)||(v19_rem_im+V19_TAIL_US*10L>V19_MAX_WAIT)) {
printf("V19 RF block window infeasible (rf %d)\n", 23); goto end; }

		
		v19_s_m = v19_te_us - v19_rd - IntToLong(v19_f_m/2) - 3L*v19_r - IntToLong(v19_comp_flat);
		templ3 = IntToLong(v19_comp_flat) + IntToLong(v19_f_m) + 4L*v19_r;
		v19_go_m = (IntToLong(v19_comp_flat)+2L*v19_r + v19_r + IntToLong(v19_f_m-rf_length[20])/2L + v19_rd)*10L;
v19_off_m = v19_go_m + IntToLong(rf_length[20])*10L + 50L;
v19_offl_m = v19_lead - V19_ANCHOR + IntToLong(rf_length[20])*10L + 50L;
v19_rem_m = (templ3 + 20L)*10L - v19_off_m - V19_POST_RF - V19_ANCHOR;
v19_b_m = templ3 + 20L + V19_TAIL_US;
if ((v19_go_m-v19_lead<300L)||(v19_go_m-v19_lead>V19_MAX_WAIT)||(v19_offl_m+V19_POST_RF>V19_MAX_WAIT)||(v19_rem_m<50L)||(v19_rem_m+V19_TAIL_US*10L>V19_MAX_WAIT)) {
printf("V19 RF block window infeasible (rf %d)\n", 20); goto end; }
		v19_s_sp = v19_s_m + v19_b_m + V19_GAP_MIN;
		v19_b_sp = IntToLong(v19_t_sp) + 2L*v19_r + 20L + V19_TAIL_US;
		v19_s_re = v19_s_sp + v19_b_sp + V19_GAP_MIN;
		templ3 = IntToLong(v19_f_re) + 4L*v19_r + IntToLong(v19_comp_flat);
		templ4 = IntToLong(v19_mr_zero) + IntToLong(tdp) + 2L*v19_r;
		if (templ4>templ3) templ3 = templ4;
		v19_go_re = (0L + v19_r + IntToLong(v19_f_re-rf_length[22])/2L + v19_rd)*10L;
v19_off_re = v19_go_re + IntToLong(rf_length[22])*10L + 50L;
v19_offl_re = v19_lead - V19_ANCHOR + IntToLong(rf_length[22])*10L + 50L;
v19_rem_re = (templ3 + 20L)*10L - v19_off_re - V19_POST_RF - V19_ANCHOR;
v19_b_re = templ3 + 20L + V19_TAIL_US;
if ((v19_go_re-v19_lead<300L)||(v19_go_re-v19_lead>V19_MAX_WAIT)||(v19_offl_re+V19_POST_RF>V19_MAX_WAIT)||(v19_rem_re<50L)||(v19_rem_re+V19_TAIL_US*10L>V19_MAX_WAIT)) {
printf("V19 RF block window infeasible (rf %d)\n", 22); goto end; }
		v19_t0 = v19_s_re + v19_r + IntToLong(v19_f_re/2) + v19_rd;
		v19_len = v19_s_re + v19_b_re;
		v19_gap_ms = (v19_s_sp - v19_s_m - v19_b_m)*10L - 2L*V19_ANCHOR;
		v19_gap_sr = (v19_s_re - v19_s_sp - v19_b_sp)*10L - 2L*V19_ANCHOR;
		if (v19_b_sp*10L>V19_MAX_WAIT)
		{ printf("V19 spoiler window %ld us exceeds the 4.9-ms tim", v19_b_sp);
printf("er budget; raise spoiler DAC\n"); goto end; }
		v19_s_1 = v19_t0 + v19_esp_us/2L - v19_rd - IntToLong(v19_f_im/2) - 3L*v19_r - IntToLong(tcrush);
		v19_first_wait = (v19_s_1 - v19_len)*10L + V19_TAIL_US*10L + v19_rem_re - V19_ANCHOR;

		
		v19_s_d = v19_s_m - V19_GAP_MIN - v19_b_d;
		v19_e_1 = v19_t0 + v19_esp_us - v19_rd - 3L*v19_r - IntToLong(tdp) - v19_tacq_half;
		
		
		v19_gap_x1 = (v19_a1 - v19_s_ex - v19_b_ex)*10L - 2L*V19_ANCHOR;
		v19_gap_1r = (v19_s_rf - v19_a1 - v19_b_df)*10L - 2L*V19_ANCHOR;
		v19_gap_r2 = (v19_a2 - v19_s_rf - v19_b_rf)*10L - 2L*V19_ANCHOR;
		v19_gap_2d = (v19_s_d - v19_a2 - v19_b_df)*10L - 2L*V19_ANCHOR;
		v19_gap_dm = (v19_s_m - v19_s_d - v19_b_d)*10L - 2L*V19_ANCHOR;
		v19_gap_ir = (v19_e_1 - v19_s_1 - v19_b_im)*10L - 2L*V19_ANCHOR;
		
		
		
		v19_rd_a1 = (2L*v19_r + IntToLong(tdp))*10L;
		v19_rd_a2 = (3L*v19_r + IntToLong(tdp) + v19_rd)*10L;
		v19_adc_mid = v19_nsp - 3L - V19_ADC_SLOW - 10000L - 4L*V19_ANCHOR;
		
		
		templ1 = v19_rd_a2 + V19_INIT_COST + V19_ADC_SLOW + v19_adc_mid + 4L*V19_ANCHOR;
		v19_post_a = (v19_read_len + 10L)*10L - templ1;
		v19_post_b = (v19_s_1 + v19_esp_us - v19_e_1)*10L - templ1 - V19_ANCHOR;
		v19_post_end = v19_post_a + V19_TAIL_US*10L;
		
		if ((v19_gap_x1<V19_GAP_MIN*10L)||(v19_gap_1r<V19_GAP_MIN*10L)||(v19_gap_r2<V19_GAP_MIN*10L)||
		    (v19_gap_2d<V19_GAP_MIN*10L)||(v19_gap_dm<V19_GAP_MIN*10L-2L*V19_ANCHOR))
		{ printf("V19 TE/Delta/delta too short for prep (gaps %ld ", v19_gap_x1);
printf("%ld %ld %ld ticks)\n", v19_gap_1r, v19_gap_r2, v19_gap_2d); goto end; }
		if ((v19_s_1-v19_len<V19_GAP_MIN)||(v19_first_wait>V19_MAX_WAIT)||(v19_gap_ir<V19_GAP_MIN*10L))
		{ printf("V19 ESP too short after method block or before r");
printf("eadout (%ld %ld)\n", v19_first_wait, v19_gap_ir); goto end; }
		if ((v19_adc_mid<100L)||(v19_first_wait>V19_MAX_WAIT)||(v19_post_a<(10000L+IntToLong(tfilter)*10L+1000L))||(v19_post_b<v19_post_a+V19_TAIL_US*10L+V19_GAP_MIN*10L)||
		    (v19_post_b>V19_MAX_WAIT)||(v19_rd_a2>V19_MAX_WAIT)||(v19_df_wait<1000L))
		{ printf("V19 ESP/ADC too short for readout and restoratio");
printf("n (%ld %ld %ld)\n", v19_adc_mid, v19_post_a, v19_post_b); goto end; }
		if ((v19_rd_a1<4000L)||(v19_go_im-v19_lead<2500L)||(v19_b_d*10L>V19_MAX_WAIT)||(v19_post_end>V19_MAX_WAIT))
		{ printf("V19 readout/imaging/D windows outside budget (ne");
printf("ed 2*tramp+tdp>=400 us)\n"); goto end; }
		if ((v19_e_1-v19_s_1)+v19_read_len+V19_GAP_MIN+V19_TAIL_US>v19_esp_us)
		{ printf("V19 ESP too short for crusher + readout\n"); goto end; }
		
		
		v19_shot_us = (v19_e_1 + IntToLong(views_per_seg-1)*v19_esp_us + v19_read_len + 10L + V19_TAIL_US) - (v19_s_ex - 100L);
		v19_mode = 1;   
		if (report_on==1)
		{
			printf("V19 prep TE=%ld us, first imaging RF centre=%ld ", v19_te_us, v19_t0+v19_esp_us/2L);
printf("us, first echo=%ld us, ESP=%ld us\n", v19_t0+v19_esp_us, v19_esp_us);
			printf("V19 shot %ld us; D=%d DAC; mul ex/rf/m=%d/%d/%d", v19_shot_us, v19_d_dac, v19_mul_ex, v19_mul_rf, v19_mul_m);
printf("\n");
		}
	}
	CREATE_MATRIX(ss_mat,0,0,0)
	delay(caldelay,us);		/*  Create a zero matrix to select during matrix recalculation */

// [CRUSH-SCHED] Dry-run the EXACT update macro with zero gradients selected.
	// Also ask the vendor matrix calculation to validate every scheduled DAC at
	// every configured orientation, before acquisition. No extra matrices/lists.
	crusher_update_max_ticks=0L;
	if (crusher_schedule!=0)
	{
		MR3040_SelectMatrix(ss_mat);
		pos_index=0;
crusher_orientation_check:
		crusher_i=0;
crusher_matrix_check:
		CREATE_MATRIX(slice_crush_sec,gs_on*crusher_dac[crusher_i],0,0)
		delay(caldelay,us);
		crusher_i=crusher_i+1;
		if (crusher_i<crusher_etl) goto crusher_matrix_check;
		total_echo_cnt=1;
		crusher_play_mat=slice_crush;
crusher_update_benchmark:
		starttimer();
		PREPARE_NEXT_CRUSHER
		crusher_update_ticks=gettimer();
		if ((crusher_update_ticks<0L)||(crusher_update_ticks>CRUSHER_UPDATE_MAX_TICKS))
		{
			printf("Crusher update exceeds reserved ADC instruction budget\n");
			goto end;
		}
		if (crusher_update_ticks>crusher_update_max_ticks) crusher_update_max_ticks=crusher_update_ticks;
		total_echo_cnt=total_echo_cnt+1;
		if (total_echo_cnt<crusher_etl) goto crusher_update_benchmark;
		pos_index=pos_index+1;
		if (pos_index<no_slices) goto crusher_orientation_check;
		pos_index=0;
		if (report_on==1) printf("Crusher update max=%ld ticks; reserved extra=10000 ticks\n",crusher_update_max_ticks);
	}

#ifdef VALIDATOR
	if (validate==1)
	{
		/* [MERGE-2TE] M1 (port): this jump lands PAST both the worst-case block and
		   FIX #2's tcrush1 assignment inside diff_acq_loop, so the validator ran
		   with stale tcrush1/diff_non_zero left in dual-port RAM (possibly the
		   previous scan's values) and its min-TE/min-TR did not match the played
		   sequence. Set the worst case here, matching FIX #2's uniform diff_on
		   convention. */
		tcrush1 = tcrush;
		diff_non_zero = 0;
		if (diff_on==1)
		{
			tcrush1 = diff_tcrush;
			diff_non_zero = 1;
		}
		goto averages_loop;
	}
#endif

#ifdef MAINSGATE
/**************** AUTOMATIC GATE DETECTION CODE ********************/
	if (mains_gating==1)
	{
		
		gate_duration = 0;
		gate_interval = 0;
		cnt = 0;
		mains_gate_detect_loop:
		temp = 0;
		mains_gate_detect_start_loop:
		hostrequest();
		templ1=0;
		do{
			// check trigger state every 100us
			// timings calibrated with signal generator
			delay32(921L);
			// count
			templ1 = templ1+1L; // 26 ticks
		} until ((input#1!=0)||(templ1>MAINS_GATE_TIMEOUT)); // wait for 5 seconds maximum

		//if (templ1==1L)  // not liked by pplsim!
		if (templ1<2L)
		{
			// We have detected the input at the first read which means we started in the middle of the gate pulse;
			// repeat
			temp = temp+1;
			// This needs tweaking - do we want to reset all loops and start from the very beginning here?
			// For now lets assume this never happens on our timescale for well behaved subjects
			if (temp<25) 
				goto mains_gate_detect_start_loop;
			else printf("25 attempts and the gate still high\n");
		}

		if (templ1>=MAINS_GATE_TIMEOUT) 
		{
			// No gate detected for 5 seconds, disable gating
			printf("No mains gate detected for 5 seconds, disabling gating\n");
			gating = 0;
		}
		else
		{	// Gate detected within the first 5 seconds!
			// discard the first gate as it always comes up short and I dont want to be fixing this
			// Detect the length of the gate
			// gate_interval is a gap here, will adjust later
			gating_temp2[cnt] = templ1/10L;
			templ1 = 0;		
			do{
				// check trigger state every 100us
				// timings calibrated with signal generator
				delay32(921L);
				// count
				templ1 = templ1+1L;
			} until ((input#1==0)||(templ1>GATE_MAX_DURATION)); // wait for 5 seconds maximum
			if (templ1>=GATE_MAX_DURATION) 
			{
				// Disable gating? May be later
				printf("Gate too long (>=5s)\n");
			}
			else 
			{
				gating_temp1[cnt] = templ1/10L;
				cnt = cnt+1;
			}
			if (cnt<6) 
				goto mains_gate_detect_loop;
 			else
			{	
				cnt = 1;
				for (4)
				{
					gate_duration = gate_duration+gating_temp1[cnt];
					gate_interval = gate_interval+gating_temp2[cnt];
					cnt = cnt+1;
				}
				gate_duration = gate_duration/5;
				gate_interval = gate_interval/5;
				printf("Average gate duration (N=5) = %d ms\n", gate_duration);
				printf("Average gate interval (N=5) = %d ms\n", gate_interval);
				
				
			} 
		}
	}
 	if (t_resp_plateau==0)	
	{
		// Automatic plateau estimation based on the given fraction
		// Use 90% of the interval
		t_resp_plateau = scale(gate_interval,100,100);
		if (mains_gating) 
			printf("Plateau duration assuming %dpc interval fraction = %d ms\n", 100, t_resp_plateau);
	}
	hasprinted = 0;
/**************** END OF AUTOMATIC GATE DETECTION CODE ********************/			
		
		
#endif

#ifdef AUTOGATE
/**************** AUTOMATIC GATE DETECTION CODE ********************/
	if (gating&&(t_resp_plateau==0))
	{
		
		gate_duration = 0;
		gate_interval = 0;
		cnt = 0;
		gate_detect_loop:
		temp = 0;
		gate_detect_start_loop:
		hostrequest();
		templ1=0;
		do{
			// check trigger state every 100us
			// timings calibrated with signal generator
			delay32(921L);
			// count
			templ1 = templ1+1L; // 26 ticks
		} until ((input#0!=0)||(templ1>GATE_TIMEOUT)); // wait for 5 seconds maximum

		//if (templ1==1L)  // not liked by pplsim!
		if (templ1<2L)
		{
			// We have detected the input at the first read which means we started in the middle of the gate pulse;
			// repeat
			temp = temp+1;
			// This needs tweaking - do we want to reset all loops and start from the very beginning here?
			// For now lets assume this never happens on our timescale for well behaved subjects
			if (temp<10) goto gate_detect_start_loop;
			else printf("10 attempts and the gate still high\n");
		}

		if (templ1>=GATE_TIMEOUT) 
		{
			// No gate detected for 5 seconds, disable gating
			printf("No gate detected for 5 seconds, disabling gating\n");
			gating = 0;
		}
		else
		{	// Gate detected within the first 5 seconds!
			// discard the first gate as it always comes up short and I dont want to be fixing this
			// Detect the length of the gate
			// gate_interval is a gap here, will adjust later
			gating_temp2[cnt] = templ1/10L;
			templ1 = 0;		
			do{
				// check trigger state every 100us
				// timings calibrated with signal generator
				delay32(921L);
				// count
				templ1 = templ1+1L;
			} until ((input#0==0)||(templ1>GATE_MAX_DURATION)); // wait for 5 seconds maximum
			if (templ1>=GATE_MAX_DURATION) 
			{
				// Disable gating? May be later
				printf("Gate too long (>=5s)\n");
			}
			else 
			{
				gating_temp1[cnt] = templ1/10L;
				cnt = cnt+1;
			}
			if (cnt<6) goto gate_detect_loop;
 			else
			{	
				cnt = 1;
				for (4)
				{
					gate_duration = gate_duration+gating_temp1[cnt];
					gate_interval = gate_interval+gating_temp2[cnt];
					cnt = cnt+1;
				}
				gate_duration = gate_duration/5;
				gate_interval = gate_interval/5;
				printf("Average gate duration (N=5) = %d ms\n", gate_duration);
				printf("Average gate interval (N=5) = %d ms\n", gate_interval);
				
				
			} 
		}
	}
	if (t_resp_plateau==0)	
	{
		// Automatic plateau estimation based on the given fraction
		t_resp_plateau = scale(gate_interval,t_resp_fraction,100);
		if (gating) 
			printf("Plateau duration assuming %dpc interval fraction = %d ms\n", t_resp_fraction, t_resp_plateau);
	}
	hasprinted = 0;
/**************** END OF AUTOMATIC GATE DETECTION CODE ********************/	
#endif


	phase_rec = 0;  		/*  reset receiver phase to zero */
	setsync(100);
	sync();				    /*  Synchronise to 100kHz */
	starttimer();			/*  mark time for first acquisition, initiated after each profile */


/*  	*************************** MAIN ACQUISITION LOOP ************************************* */


// Experimental Loop - only used for navigators, dummies, and steps


	completed_ex = 0;
	disacq_cnt = 0;
experiment_loop:

#ifdef DIXON3P
	if ((dixon_on==1)&&(smode==3))
	{
		delta_2 = completed_ex*delta_2_90 - delta_0;
	}
#endif

	if (TR_array_size>0)
	{
		temp = completed_ex%(TR_array_size);
		tr = TR_array[temp];
	}

	
	diff_acq_cnt = 0;
	// [ACQ-TABLE] single loop over the acquisition table; replaces the nested
	// b_step_loop (b_step_cnt) / directions_loop (diff_dir_cnt) pair. One pass = one
	// diffusion volume. Kept as the FIRST statements of the loop body so that the
	// b->DAC scaling stays exactly where it was relative to waittimer(31000) below.
diff_acq_loop:
	
	// Now in DAC values
	diff_grad = scale(acq_grad[diff_acq_cnt], diff_scale_saved, 100);
	if(report_on)
		printf("diff_grad = %d\n",diff_grad);
	
	if ((diff_on>0)&&(diff_grad > 30000))
	{
		printf("Diffusion gradient amp %dDAC is too high\n", diff_grad);
		goto end;
	}

	// Only consider doing Nyquist on the first loop iteration
	
	// Calculate diffusion gradient strength in DAC units for the current b-step
	
	// ====================== [TWO-TE MOD #1] ======================================
	// Lifted the temporary restriction that forced diff_tcrush == tcrush and aborted
	// when diff_tcrush > tcrush. The intended DW-FSE design (PARAMLIST defaults:
	// tcrush = 10 us, diff_tcrush = 2000 us) uses a LARGE first-180 budget (diff_tcrush)
	// with SHORT imaging-180 crushers (tcrush) -> long diffusion-weighted first echo
	// (TE = te) followed by a SHORT imaging echo train spaced by tcrush. The two guards
	// below blocked exactly that configuration. tcrush1 (= diff_tcrush when b>0) feeds the
	// first-180 budget in min_pre / min_post / big_delta_min; the imaging train is timed
	// with tcrush via te_a / te_b and the slice_180_refocus list, so removing the guards
	// decouples the two echo times. See change log + validation checklist at end of file.
	//
	//  --- ORIGINAL CODE (disabled) ---
	//  if (diff_on==1) {
	//      if (diff_tcrush!=tcrush) { printf("tcrush (diff) and tcrush must be the same"); goto end; }
	//      if (diff_tcrush>tcrush)  { printf("tcrush (diff) (%dus) can not be longer than tcrush (%dus)", diff_tcrush, tcrush); goto end; }
	//  }
	//  --------------------------------
	if (diff_on==1)
	{
		// Sanity check only (warn, do not abort): for this DW-FSE the first-180 budget
		// should be >= the imaging-180 crusher. diff_tcrush < tcrush is most likely a
		// mis-set value; the downstream big_delta_min / min_te checks still guard timing.
		if (diff_tcrush < tcrush)
		{
			printf("Warning: diff_tcrush (%d us) is SMALLER than tcrush (%d us)\n", diff_tcrush, tcrush); // [MERGE-2TE] F1: message was inverted vs its condition
		}
	}
	// =============================================================================
	// [TWO-TE FIX #4] The played ramp-down waits use tramp while the lobe ramps and the
	// TE/big-delta balance use diff_tramp. Timing is only consistent when they are equal.
	if ((diff_on==1) && (diff_tramp != tramp))
	{
		printf("diff_tramp (%d us) must equal tramp (%d us) for consistent DW timing\n", diff_tramp, tramp);
		goto end;
	}
	
	// Set diffusion gradient strengths according to matrix directions, assume matrix is normalized to a value of 1000.
	tcrush1 = tcrush;
	// Check if the diffusion gradients are zero; if they are, we switch the diffusion part off
	diff_non_zero = 0;
	diff_read  = diff_on*scale( diff_grad, acq_x[diff_acq_cnt],1000) ;
	diff_phase = diff_on*scale( diff_grad, acq_y[diff_acq_cnt],1000) ;
	diff_slice = diff_on*scale( diff_grad, acq_z[diff_acq_cnt],1000) ;
	// [V17-REVIEW] DAC 1 truncates to zero on every oblique component.
	// Preserve the b=0 workaround on the largest signed direction component;
	// deterministic ties prefer read, then phase, then slice. No RF/timing change.
	if ((max_diff_grad_pc==1)&&(diff_grad>0)&&
	    (diff_read==0)&&(diff_phase==0)&&(diff_slice==0))
	{
		diff_abs_read=acq_x[diff_acq_cnt];
		diff_abs_phase=acq_y[diff_acq_cnt];
		diff_abs_slice=acq_z[diff_acq_cnt];
		if (diff_abs_read<0) diff_abs_read=0-diff_abs_read;
		if (diff_abs_phase<0) diff_abs_phase=0-diff_abs_phase;
		if (diff_abs_slice<0) diff_abs_slice=0-diff_abs_slice;
		if ((diff_abs_read>=diff_abs_phase)&&(diff_abs_read>=diff_abs_slice))
		{
			diff_read=1;
			if (acq_x[diff_acq_cnt]<0) diff_read=-1;
		}
		else
		{
			if (diff_abs_phase>=diff_abs_slice)
			{
				diff_phase=1;
				if (acq_y[diff_acq_cnt]<0) diff_phase=-1;
			}
			else
			{
				diff_slice=1;
				if (acq_z[diff_acq_cnt]<0) diff_slice=-1;
			}
		}
	}
	\\printf("diff_read = %d, diff_phase = %d, diff_slice = %d\n",diff_read,diff_phase,diff_slice);
	

	if ((diff_read!=0)||(diff_phase!=0)||(diff_slice!=0)) 
	{
		tcrush1 = diff_tcrush;
		// If diffusion is switched on but is actually zero, we need a flag for correct te calculations
		diff_non_zero = 1;
	}
	// [TWO-TE FIX #2] tcrush1 must not depend on the gradient amplitude: the zero-amplitude
	// (b=0) lobes and all first-180 timing are still played when diff_on==1, so the crusher
	// budget and all derived timing must be identical for b=0 and b>0. This also makes the
	// validator worst case (tcrush1=diff_tcrush) cover every real acquisition.
	if (diff_on==1)
		tcrush1 = diff_tcrush;

	// Enforce worse case scenario to prevent the sequence from starting if the crusher is wrong
	// validator does not read the arrays or values from outside
	// ALWAYS validate with the real diff_on switch
	// ====================== [TWO-TE MOD #2] ======================================
	// With diff_tcrush > tcrush now permitted (MOD #1), FIX #2 makes the real pass and
	// the validator use the same tcrush1 = diff_tcrush for all b-values. The FIRST-180
	// budget (min_pre / min_post / big_delta) is therefore validated exactly as played.
	// MUST VERIFY ON CONSOLE before scanning: run the sequence validator and confirm it
	// passes, and that report_on min-TE / min-TR are sensible. The original author flagged
	// the tcrush != diff_tcrush validation path as not fully verified (see change log).
	// =============================================================================
	if (validate==1)
	{
			tcrush1 = tcrush;
			if (diff_on==1) tcrush1 = diff_tcrush;
			diff_non_zero = diff_on;
	}
	
	// [TWO-TE FIX #3] The superseded first-180 list experiment is replaced by the
	// dedicated slice_180_refocus_diff list built before diff_acq_loop.
	//hostrequest();
	
	image_av = 0;

averages_loop:
	slice_batch_start = 0;
	
slice_batch_loop:
	gp_loc = 0;
	
	\\disacq_cnt = 0;
disacq_loop:

	current_view  = 0;
	gp_loc = 0;
    nav_cnt=1;
    if(nav_on==1) nav_cnt = 0;  
	
phase_encode_loop:
	view_av = 0;

#ifdef FSE3D
	current_view_2=0;
	
phase_encode_2_loop:	
#endif
	
view_block_loop:
	current_slice = slice_batch_start;

multislice_loop:
	current_slice = current_slice + 1;
	slice_av = 0;
	no_acq = view_av + image_av;
	
	/* Now use the offset macros to calculate
	the offsets in terms of frequency and phase increments.
	They work as follows:-
	1.READOFF returns the value of the read offset in Hz to
	read_freq_long and a 16 bit conversion to fov_read_freq plus kHz_new2 and Hz_new2
	2.PHASEOFF returns the number of phase increments to be added to the
	receiver phase each time a new line of k space is acquired. This is
	passed back to the variable fov_phase_deg.
	3. SLICEOFF returns the value of the slice offset in Hz to the variable
	slice_freq_long and a 16 bit conversion to fov_slice_freq plus kHz_new and Hz_new */

	

	
	BATCHSLICE(current_slice)
	READOFF(fov_read_off,sample_period,scale_read_off,read_freq_long,fov_read_freq,kHz_new2,Hz_new2)
	PHASEOFF(fov_phase_off,phase_res,scale_phase_off,fov_phase_deg)
	// Calculate frequency from the offset in mm
	
	slice_freq_var = (IntToLong(slice_mm_10) * IntToLong(pulse_bwdth))/10/1; // 1mm thk permanently hardcoded!
	slice_freq_long = (fov_slice_off[pos_index]*IntToLong(pulse_bwdth))/IntToLong(scale_slice_off);
	slice_freq_long = slice_freq_long+slice_freq_var;
	fov_slice_freq = slice_freq_long;
	kHz_new = 0;
	Hz_new = 0;
	if (slice_freq_long < -32767L | slice_freq_long > 32767L) 
	{	
		templ1 = (slice_freq_long/32767);
		fov_slice_freq =  slice_freq_long - templ1*32767L;
		kHz_new = 32*templ1;
		Hz_new = 767*templ1;
	}
	slice_freq_var = 0;

	
#ifdef FSE3D
/* An extra call to the phase offset macro is necessary for the offset in the
slice direction as there is also phase encoding in the slice select direction. It is
first necessary to determine the slice thickness from gs_var ie undo the calculation of
PARSETUP. Then rescale the offset value fov_slice_off for the FOV value in the
slice select direction. The value ' fov_sl_phase_deg' is then the number of phase
increments necessary to achieve the desired offset in the slice phase encode direction*/

	// Copied from new TOF3D 131
	
 	fov_sl_phase_off = fov_slice_off[pos_index];
	fov_sl_phase_off = fov_sl_phase_off/gp2_oversample;

	fov_sl_phase_off = scale(fov_sl_phase_off, slab_ratio, 100);	
	temp = scale(scale_slice_off, phase_res, 1000);
	fov_sl_phase_deg = scale(fov_sl_phase_off, phase_sign*360, temp);
	
	if (fov_sl_phase_deg < 0) fov_sl_phase_deg = fov_sl_phase_deg + scale(360,1000,phase_res);
		
#endif	
	
/* Set phase according to PHASE_CYCLE keyword and acquisition number
transmitter phase of 90 is alternated. So if
phase cycling is selected the DC offset is eliminated but so also is
the spurious signal from an imperfect 180 deg pulse.  */
	
	phase_90 = aqphase(no_acq,phase_cycle)*deg_90; 	// 0
    phase_180 = phase_90 + 3*deg_90;				// 1200

/* Set up frequency offsets for current slice. */

	templ3 = fov_read_freq + rec_freq;
	if (templ3 + dacmaxlong < 0 | templ3 - dacmaxlong > 0) {
		printf("Reduce receive frequency\n");
		goto end;
    }
	
#ifdef CHESS	
	if (chess_on)
	{
		frequency_buffer(4);
		frequency(MHz, kHz, Hz, rx1MHz);
		offset_frequency(chem_shift_freq);
	}	
#endif

#ifdef MTC
    if(mtc_on){
        frequency_buffer(5);   
        frequency(MHz, kHz, Hz, rx1MHz);
		if (no_experiments>1)
		{
			if (mtc_array_on==0)
				mtc_freq = mtc_freq_max + mtc_freq_step*completed_ex;
			else
				mtc_freq = mtc_freq_array[completed_ex];
		}
		offset_frequency(mtc_freq);
    }	
#endif

	frequency_buffer(1);
	frequency(MHz, kHz+kHz_new2, Hz+Hz_new2, rx1MHz);
	offset_frequency(fov_read_freq+rec_freq);

	frequency_buffer(0);                    /*  buffer 0 = tx freq */
	frequency(MHz, kHz+kHz_new, Hz+Hz_new, rx1MHz);
	offset_frequency(fov_slice_freq+slice_freq_var);
	reset_frequency();
	

slice_block_loop:

#ifdef PTS
	systemout(pts_mask);
#endif


	p90_mul =  scale(rfcal,alpha,90);
	p180_mul = scale(rfcal,p180_scale,100);
	if (p90_mul > 2047) 
		p90_mul = 2047;
	if (p180_mul > 2047) 
		p180_mul = 2047;
		
	
	// checked after adding diffusion - still ok	
	// 18341 diff off, 18361 diff on

	waittimer(31000); // 29813 with large offsets and chess, varies, depends on pre-sats and slice offsets, etc. 30000 is safe

	starttimer();
	// TE calculations
	
	if (v19_mode==1) goto v19_skip_te1;
	/* (1) Calculate time to make up echo time pre 180. N.B. A gradient pulse length is 
	sm_delta + diff_tramp, i.e. sm_delta is equal to the plateau plus one ramp */
	\\printf("tacq = %ld\n",tacq);
	templ2 = (tacq*(100))/200L;
	min_pre = (IntToLong(tsel90/2) + 4L*tramp + 1000L + IntToLong(tsel180/2) + tcrush1 + 20L); // TODO: is 20 still required?
	
	// [TWO-TE FIX #2] Timing follows diff_on because zero-amplitude lobes are still played.
	min_pre = min_pre + IntToLong(crush_pre_pad) + diff_on*(sm_delta_us + IntToLong(diff_tramp));

	// 35 us for frequency reset for Rx
	min_post = (IntToLong(tsel180/2) + 3L*tramp + 500L + tcrush1) + templ2 + 30L + 1L + 35L; 
	// [TWO-TE FIX #2] Timing follows diff_on because zero-amplitude lobes are still played.
	min_post = min_post + IntToLong(crush_post_pad) + diff_on*(sm_delta_us + IntToLong(diff_tramp));
	\\printf("tref1 = %d, tref3 = %d, psd/10 = %d\n",tref1,tref3,psd/10);

	// How about big delta??
	// Assume the DW gradients are always symmetric around 180 pulse. Then 
	//	extra_delta (us) is the time to make up for big_delta, once taken into account the 180 slice gradient and the diffusion gradient.

	// [TWO-TE FIX #1] Commented bare timing-modification tag to restore compilation.
	// [TIMINGS MOD #1]  
	if ((diff_on == 1) && (te == 0))
	{
		printf("Set TE explicitly when diffusion is on\n");
		goto end;
	}   
	 
	if (te == 0)
	{ // use minimum echo time if te=0
		if (min_post > min_pre )
		{
			true_half_te_us = min_post;
		}
		if (min_pre > min_post )
		{
			true_half_te_us = min_pre;
		}
		te_us_long = (true_half_te_us)*2L;
		// [TWO-TE FIX #8] removed unreachable diff_non_zero block (te==0 with diffusion
		// aborts above; see TIMINGS MOD #1 guard). It also read extra_delta_us before
		// initialisation and its min_te adjustment was immediately overwritten.
		min_te = te_us_long;
		templ1 = true_half_te_us - min_pre;
		templ2 = true_half_te_us - min_post;
	}
	else 
	{          
		true_half_te_us = IntToLong(te)*500L;		
		te_us_long = 2L*true_half_te_us;

		templ1 = true_half_te_us - min_pre;
		templ2 = true_half_te_us - min_post;
		
		if (min_post >= min_pre) 
			min_te = min_post*2L;
		if (min_post <  min_pre) 
		min_te = min_pre*2L;
		\\printf("min_pre = %ld, min_post = %ld\n",min_pre,min_post);
		\\printf("templ1 = %ld, templ2 = %ld\n",templ1,templ2);
		
	
		if ( (templ2 <= 0) ||  (templ1 <= 0) )
		{
				printf("TE is too short, increase to %d ms (=%ld us)\n", min_te/1000L+1, min_te );
				goto end;
		}

	}
	
	//templ1 is the required time to make up for the first half of TE (pre 180)
	//templ2 is the required time to make up for the second half of TE (post 180)
	//Split the timings on us and ms for accurate delays. // No longer needed (RG)

	if (diff_on)
	{
		// Calculate minimum big_delta. This would assume putting the diffusion gradients straight either side of the 180 and 
		// the extra time for making up to TE before/after the diffusion gradients.
		
		big_delta_min = sm_delta_us + (IntToLong(diff_tramp) + IntToLong(tsel180) + 2L*(IntToLong(tramp) + IntToLong(tcrush1)) + IntToLong(crush_pre_pad+crush_post_pad)) ;	// Minimum big_delta calculation
		\\printf("sm_delta_us = %d\n",sm_delta_us);
		\\printf("diff_tramp = %d, tsel180 = %d, tramp = %d, tcrush1 = %d\n",diff_tramp,tsel180,tramp,tcrush1);
		\\printf("big_delta_min = %d\n",big_delta_min);
		
		// templ1 and templ2 are still assigned to the time to make up for TE pre and post 180 (in us).
		big_delta_max_4_given_TE = big_delta_min + templ1 + templ2;		// Simplified
		\\printf("big_delta_max_4_given_TE = %ld\n", big_delta_max_4_given_TE);

		// Check that the chosen big_delta is > big_delta_min and < big_delta_max_4_given_TE
		if ( big_delta_us > big_delta_max_4_given_TE )
		{
			printf("Big delta (%ld) is too big for given TE, max Big delta = %d ms (%ld us)\n", big_delta_us, big_delta_max_4_given_TE/1000L, big_delta_max_4_given_TE);
			printf("Either reduce Big delta or increase TE to more than min. TE\n");
			goto end;
		}
		if ( big_delta_us < big_delta_min )
		{
			printf("Big delta is too small, min Big delta = %d ms (%ld us)\n", big_delta_min/1000L+1, big_delta_min);
			goto end;
		}
	}



// timer = 23288
/* 
	Calculate where to play the diffusion gradients based on the chosen big_delta. There are several options:
	
	1. check if there is space to put the diffusion gradients symmetrically around the 180 pulse.
	2. check if there is enough space to put the first diffusion gradient and the extra delay to make up for big_delta before the 180, hence playing the second diffusion gradient straight after the 180 pulse.
	3. check if there is enough space to put the first diffusion gradient attached to the 180, leaving a gap between the 180 and the second diffusion gradient.
*/   
	//	extra_delta (us) is the time to make up for big_delta, once taken into account the 180 slice gradient and the diffusion gradient. It is placed on either left or right side of the 180 pulse, or split equally

	// [TWO-TE FIX #1] Commented bare timing-modification tag to restore compilation.
	// [TIMINGS MOD #1] adjusted extra_delta to use tcrush1 over tcrush
	// [TWO-TE FIX #3] Realized big delta (lobe-onset to lobe-onset), from the played chain:
	//   sm_delta (plateau+ramp-up) + diff_tramp (ramp-down) + extra_delta/2
	//   + tramp + tcrush1 + tsel180 + tcrush1 + tramp + extra_delta/2
	// = big_delta_us exactly, PROVIDED (a) the first-180 crushers physically use tcrush1
	// (slice_180_refocus_diff + this_tcrush delays, FIX #3) and (b) diff_tramp == tramp
	// (enforced by FIX #4). Before FIX #3 the played crushers were tcrush, making the
	// realized big delta short by 2*(diff_tcrush - tcrush) and the true b-value much lower
	// than the value printed by the b-factor calculation below.
	extra_delta = diff_on*(big_delta_us - sm_delta_us - (IntToLong(diff_tramp) + IntToLong(tsel180) + 2L*IntToLong(tramp) + 2L*IntToLong(tcrush1) + IntToLong(crush_pre_pad+crush_post_pad)));
	\\printf("extra_delta = %d\n",extra_delta);

	space_pre = templ1;
	space_post = templ2;

	templ3 = extra_delta/2L;
	\\printf("space_pre = %ld\n",space_pre);
	\\printf("space_post = %ld\n",space_post);
	\\printf("templ3 = %ld\n",templ3);

    if ( (templ3 <= space_pre) && (templ3 <= space_post))
	{
		// 1. Extra spacing is split symmetrically between pre and post 180
		// [TWO-TE FIX #9] unused extra_te_us/extra_te2_us assignments removed.
		extra_delta_us = templ3;
		extra_delta2_us = templ3;
	}
	/*
	else 
	{

		if ( extra_delta <= space_pre )
		{
			// 2. Extra spacing is pre 180 only
			extra_te_us = space_pre - (extra_delta - 10L) ;
			extra_te2_us = 10L;
			extra_delta_us = extra_delta - 10L;
			extra_delta2_us = 10L;
		}
		else
		{	
			if ( extra_delta <= space_post )
			{
				// 3. Extra spacing is post 180 only
				extra_te_us = 10L;
				extra_te2_us = space_post - (extra_delta - 10L);
				extra_delta_us = 10L;
				extra_delta2_us = extra_delta - 10L;     
			}*/
			else
			{
				\\printf("extra_delta_us = %ld\n",templ3);
				// Insufficient time to insert the diffusion gradients. Report error and exit.
				min_te = min_te + 2*templ3;
				printf("TE is too short to realise given diffusion timing\n");
				printf("TE is too short, increase to %d ms (=%ld us)\n", min_te/1000L+1, min_te );
				goto end;
			}
		\\}
	\\}
	
	\\printf("extra_delta_us = %ld",extra_delta_us);
	  
	// Check that the us delays are at least 3 us which is a rounded up equivalent of 26ticks
	// [TWO-TE FIX #2] Validate the played zero-amplitude-lobe timing too.
	if (diff_on>0)
	{
		if (extra_delta_us < 3) 
		{
			printf("Increase TE and Big delta by %ld us\n", (3-extra_delta_us)*2);
			goto end;
		}
		if (extra_delta2_us < 3) 
		{
			printf("Increase TE by %ld us\n", 3-extra_delta2_us);
			goto end;
		}
	}
	
	\\printf("extra_delta_us = %ld",extra_delta_us);


	// [TWO-TE FIX #9] unused extra_te_us/extra_te2_us conversions removed; playout uses only extra_delta delays.
	extra_delta_us = 10L*extra_delta_us;
	extra_delta2_us = 10L*extra_delta2_us;
	// Preserve odd-microsecond requested Delta exactly using half-us timer delays.
	// Legacy path retains its existing integer-us split.
	if (crush_independent_on==1)
	{
		extra_delta_us = extra_delta*5L;
		extra_delta2_us = extra_delta_us;
	}
	
	

	// 4809 diff_non_zero=0 
	// 5016 diff_non_zero=1
	
v19_skip_te1:
	waittimer(5300);
	
	starttimer();

	/* b-FACTOR CALCULATIONS */
/*  
	Calculate b value for this loop 
	
	"b value (diffusion sensitising factor) = gamma*gamma*grad*grad*sm_delta*sm_delta*(big_delta - sm_delta/3)"  
	<== Stejskal and Tanner, J Chem Phys 1965 (43) 288 ~ 292 and Bammar, Eur. J. Radio 2003 (45) 170.
    MR3040 scales gradients so equal dac values give equal FINAL gradient not equal voltage on scope
    Max DAC value give grad_var[0] Hz/mm on all axes
    gamma = 42.58 (gamma = gyromagnetic ratio)
 */
 
	/* [MERGE-2TE] F3: runtime b report on the same b_kfac kernel as setup (delta
	   exact in us; setup "got" and runtime "b-value ~" now agree by construction).
	   Also removes ~5 long divisions from this starttimer/waittimer(19700) window,
	   whose documented slack was only 277 ticks (comment "19423" below). */
	/* Gr^2 + Gp^2 + Gs^2 */
    templ3 = (1L*diff_read*grad_var[0]/32767L)*(1L*diff_read*grad_var[0]/32767L); 	\\ Gradient_read^2 
	templ3 = templ3 + ((1L*diff_phase*grad_var[0]/32767L)*(1L*diff_phase*grad_var[0]/32767L));  	\\ + Gradient_phase^2
    templ3 = templ3 + ((1L*diff_slice*grad_var[0]/32767L)*(1L*diff_slice*grad_var[0]/32767L)); 	\\ + Gradient_slice^2
	templ4 = (templ3 + 5000L)/10000L;
	if (templ4 > 60000L)
		templ4 = 0L-1L;   // [MERGE-2TE] F6: non-unit direction sum would overflow the 32-bit product; flag instead
	else
		templ4 = (templ4*b_kfac + 5000L)/10000L;

	/* Recalculate the b-value considering units of measurements. Final value in s/mm^2.
    CWK 19-5-05
	63L/10L is used twice as multiplier because we need it squared in the calculations. 
	Included the unit of b in the printed result (i.e. s/mm^2). */

    if ((report_on == 1)&&(diff_on==1))
	{
        \\printf("Min Big delta = %ld us, max Big delta = %ld us\n", big_delta_min, big_delta_max_4_given_TE);
        printf("\nDW grad: X=%d, Y=%d, Z=%d DAC\n",diff_read, diff_phase, diff_slice);
        if ((b_kfac > 0L)&&(templ4 >= 0L))
			printf("\nNominal diffusion b ~ %ld; excludes crusher\n", templ4);
		else
			printf("\nb report off (needs delta<=10ms, Delta<=80ms, unit dirs)\n"); // [MERGE-2TE] F3/F6
        printf("DW grad array for this b-value:\n X=%ld, Y=%ld, Z=%ld,\n",acq_x[diff_acq_cnt],acq_y[diff_acq_cnt],acq_z[diff_acq_cnt]);

    }
    
	// 19423
	
	
	waittimer(19700);

	starttimer();
	
/*  Calculation of te extend time */
	
	if (v19_mode==1) goto v19_skip_te2;

	te_a = IntToLong(tsel90) + tcrush + tref + 4L*tramp + crush_pre_pad;
	t_flow = flow_comp_on*(tsel90/2 + 2*tramp); 
	te_a = te_a + t_flow;
	te_b = IntToLong(tsel90/2) + tcrush + tdp + 4L*tramp + tacq_2 + crush_post_pad;
	

	// TODO Modify te_b with diff_on
	\\if (diff_on)
	\\	te_b = te_b + sm_delta_us + diff_tramp + (extra_delta_us + 156L)/10L;
	
	min_half_te = te_a;
	if (te_b > min_half_te)
		min_half_te = te_b;
	
	
	// [TWO-TE FIX #2] single min_te adjustment: b=0 and b>0 now share identical timing
	if (diff_on == 1)
	{
		min_te = min_te + extra_delta + 1000;
		\\printf("\nMinimum TE = %ld us\n", min_te);
	}
	// --- ORIGINAL CODE (disabled by TWO-TE FIX #2) ---
	/*
	if((diff_on == 1) && (diff_non_zero==1))
		{
			min_te = min_te + extra_delta + 1000;
			\\printf("\nMinimum TE = %ld us\n", min_te);
		}
		
	else
	{
		if(diff_on == 1 && diff_read == 0 && diff_phase ==0 && diff_slice == 0)
		{
			min_te = min_te + extra_delta + 2*sm_delta_us + 2*tramp + 1000;
			\\printf("\nMinimum TE = %ld us\n", min_te);
		}
	}
	*/
	// [TWO-TE FIX #2] end
	
	if (report_on == 1 ) 
	{
		if(diff_on == 0)
		{
			\\printf("\nMinimum TE = %ld us\n", min_te);
			printf("\nMinimum TE = %ld ms (%ld us)\n", (min_half_te+21L)/500L + 1L, 2L*(min_half_te+21L));

		}
		else
		{
			\\min_te = min_te + (2*extra_delta_us)/10L;
			printf("\nMinimum TE = %ld us\n", min_te);
		}
		
		// [ESP MOD] report minimum imaging echo spacing
		/* [MERGE-2TE] M3 (port): te_a dropped - it belongs to the TE-governed
		   90->first-180 interval, not the train (see esp check below) */
		printf("Minimum esp = %ld ms (%ld us)\n", (te_b+21L)/500L + 1L, 2L*(te_b+21L));
	}
	if (te*1000L < min_te)
	{
		printf("\n Echo time should be greater than Minimum TE (= %ld us)\n", min_te);
		goto end;
	}
	
	if(diff_on)
		templ1 = IntToLong(te)*500L;
	else
		templ1 = IntToLong(esp)*500L;
	
	/* [MERGE-2TE] F4: pure long comparison - IntToLong(te_a+21) truncated the
	   long te_a/te_b to 16 bit before sign-extending (latent overflow once
	   tsel90+tref+crushers approach 32 ms). */
	if (templ1 - (te_a + 21L) < 0 || templ1 - (te_b + 21L) < 0 ) {
		printf("TE is too short, increase to %ld ms\n", (min_half_te+21L)/500L + 1L);
		goto end;
	}
	
	te_balance_bl = templ1 - te_b;
	te_balance_al = templ1 - te_a;

#ifdef DIXON3P
	if (dixon_on)
	{
		te_balance_bl = te_balance_bl+ IntToLong(delta_2);
		te_balance_al = te_balance_al- IntToLong(delta_2);
	}
#endif

	// Pre-calculated delays
	te_balance_bl_temp1 = te_balance_bl*10L - 210L;
	te_balance_bl_temp2 = IntToLong((tramp*3)+tdp-tfilter-rfdelay-21-16); // 16us is empirical negative delay

	/* [MERGE-2TE] A1 (audit): BOTH pre-flight replicas relocated to AFTER the Dixon
	   te_balance adjustment and re-expressed on te_balance_bl_temp1, so they mirror
	   the play-time expressions exactly. Previously they read the pre-Dixon balances
	   while echo_loop plays the post-Dixon ones; with dixon_on + diff_on (legal:
	   Dixon needs single echo, and PE_order 5 is a permitted DWI order) the check
	   could pass a configuration that then aborted mid-scan, or reject a good one,
	   by up to delta_2 (<= 10 ms = 100000 ticks). */
	if (diff_on==1)
	{
		/* pre-180 balance, mirrors post_90_delay0L in the play code */
		templ5 = te_balance_al + IntToLong(-21-6+post_90_delay1) - sm_delta_us - IntToLong(diff_tramp) - IntToLong(tcrush1 - tcrush);
		templ5 = templ5*10L - extra_delta_us - 185L;
		if (templ5 <= 25L)
		{
			printf("TE too short: pre-180 balance = %ld ticks\n", templ5);
			goto end;
		}
		/* first-echo post-180 balance, mirrors templ1 in echo_loop */
		templ5 = te_balance_bl_temp1 - sm_delta_us*10L - extra_delta_us - IntToLong(diff_tramp)*10L - IntToLong(tcrush1 - tcrush)*10L - 156L;
		if (templ5 <= 25L)
		{
			printf("TE too short: first-echo balance = %ld ticks\n", templ5);
			goto end;
		}
	}

	
	// [ESP MOD] esp-based balance for the imaging echo train (echoes 2..N) when diffusion is ON.
	/* [MERGE-2TE] M3+M4+F4 (ports/fixes):
	   (a) pure long arithmetic (te_b is long; IntToLong truncated it first);
	   (b) -36L tick compensation for the extra branch overhead of the diffusion
	       train pre-readout path relative to the legacy else path in echo_loop:
	       train = if(diff_on) 13 + if(total==0)->else 11 + if(>25L) 24 + 1 outer
	       else-skip = 49 ticks vs legacy 13 -> difference 36 ticks. DERIVED from
	       the manual 4.9 timing tables, NOT measured - trim on phantom;
	   (c) te_a dropped from the check: te_a (tref = 4*tref_setup) governs the
	       90->first-180 interval, which is TE-timed in two-TE mode; keeping it
	       inflated min ESP by up to several ms and blocked short trains;
	   (d) gated on views_per_seg>1 so single-echo DWI (PE_order 5) is not blocked
	       by an irrelevant esp constraint. */
	te_balance_bl_esp = IntToLong(esp)*500L - te_b;
	te_balance_bl_temp1_esp = te_balance_bl_esp*10L - 210L - 36L;
	if ((diff_on==1)&&(views_per_seg>1))
	{
		if (IntToLong(esp)*500L - (te_b + 21L) < 0)
		{
			printf("esp too short: increase esp to at least %ld ms\n", (te_b+21L)/500L + 1L);
			goto end;
		}
	}

v19_skip_te2:
/*  Calculate phase increment following each 180 degree pulse */

#define NEWPHCOR
#ifdef ORIGINAL_CODE
	templ1 = slice_freq_long + IntToLong(slice_freq_var) - read_freq_long - IntToLong(rec_freq);
	if (templ1>0) 
		phcor = phcor_plus;
	else 
		phcor = phcor_minus;
	templ2 = (IntToLong(overhead_var)+( tacq+IntToLong(tramp+phcor) )*(16L))/10L;
	templ3 = IntToLong(overhead);
	templ4 = ((templ2+templ3)*templ1)/1000L;
	phase_ang = templ4%IntToLong(deg_360);
	templ5 = ((templ2+templ3)*templ1)%1000L ;
	
#endif

#ifdef NEWPHCOR

	// Same calculation as above refactored to save FTH time
	// we also assume that overhead_var is always zero!
	// we also assume that phcor_plus equals phcor_minus - that is true anyway but not enforced
	templ1 = slice_freq_long + IntToLong(slice_freq_var);
	templ2 = - read_freq_long - IntToLong(rec_freq);
	if (templ1>0)
		phcor = phcor_plus;
	else 
		phcor = phcor_minus;
	
	templ3 = (IntToLong(overhead)) + ((tacq+IntToLong(tramp))*16L)/10L;
	templ4 = (templ1+templ2)*templ3;
	templ5 = IntToLong(phcor)*templ1 + IntToLong(r_phcor)*templ2;
	templ5 = (16L*templ5)/10L;
	templ4 = templ4+templ5;
	templ5 = templ4/1000L;
	phase_ang = templ5%IntToLong(deg_360);
	templ5 = templ4 - templ5*1000L; // remainder after division by 1000
#endif


	remainder_phase = templ5;
	phase_correction = 0;

	// More precise calculation below
	/* [MERGE-2TE] M2 (port): part 1 of tr_min = 90 -> last echo. Diffusion ON:
	   first interval TE, remaining (views_per_seg-1) at ESP. Diffusion OFF:
	   legacy formula on the identical code path. All legacy overhead terms below
	   (pre-90, 10.2 ms window overhead, CHESS/pre-sat/DE/post-ETL crusher) now
	   apply to BOTH modes. */
	if (diff_on == 0)
		templ1 = IntToLong(views_per_seg+echoes_to_discard)*IntToLong(esp)*1000L; // [us] - part 1 of tr_min;
	else
		templ1 = IntToLong(te)*1000L + IntToLong(views_per_seg-1+echoes_to_discard)*IntToLong(esp)*1000L; // [us] - part 1 of tr_min;
	if (flow_comp_on)
		templ1 = templ1 + 1000L; // 37500-27500
	templ1 = templ1 + IntToLong(tramp + tsel90/2); // [us]
	templ1 = templ1 + IntToLong(3*tramp + tref_setup) + tacq_2 + 26;
	if (tramp<130)
		templ1 = templ1 + 17;
	if (tramp<120)
		templ1 = templ1 + 30;
	if (tramp<110)
		templ1 = templ1 + 30;
	// Base TR is verified as correct
	// Add overheads - timed and untimed
	// 113500 ticks (11350 us) = 31000+5300+19700+27500+30000 waittimer above and below
	// 698 (70 us) extra overhead from unaccounted part before 90
	// 690 (69 us) is post echo train waittimer code
	templ1 = templ1 + 11350L + 70L + 69L;
	
	// CHESS duration = 30+t_chess+40+2*tramp+tcrush_chess [us]
#ifdef CHESS
	if (chess_on) 
	{
		templ2 = 30+2*tramp+tcrush_chess; // [us]
		if (chess_gauss)
			// TODO 30us TBC
			templ2 = templ2+1000*t_chess_gauss; // [us]			
		else
			templ2 = templ2+t_chess; // [us]
	}
	else 
		templ2 = 0;
#else
	templ2 = 0;
#endif
	// The delays below are better left at their null values
	templ3 = (IntToLong(post_180_delay + post_180_delay_1 + post_acq_delay))/10; // [us]
	if (de_on)
	{
		templ3 = templ3 + IntToLong(esp)*500L + tcrush + 2*tramp + (tsel180 + tsel90)/2 + (21 - post_acq_delay/10) + 32 + te_balance_bl;
	}

	//de: 75+te_balance_bl/10+2*tramp+tdp + de_rf_delay + tsel90+ tramp+tramp [us]

#ifdef POST_ETL_CRUSHER	
	if (post_crush_on) 
		templ3 = templ3+(2*tramp+post_tcrush+240); // [us]. 240 us is the empirical delay before crusher output
#endif
	tr_min = templ1 + templ2 + templ3;	// [us]
	templ1 = IntToLong(sat_tcrush + tsel_sat + (3*tramp) + 520 + inter_PB_delay);
	templ1 = IntToLong(no_PB*sat_on)*templ1;
	tr_min = tr_min + templ1;
	
	
	
	
	if (v19_mode==1)
	{
		tr_min = v19_shot_us + 11350L + 70L + 69L + 5000L;
#ifdef POST_ETL_CRUSHER
		if (post_crush_on)
			tr_min = tr_min + IntToLong(2*tramp+post_tcrush+240);
#endif
	}
	
	
	/* [MERGE-2TE] M2 (port): FIX #6's rebuilt diffusion tr_min removed. It
	   overwrote the accumulated tr_min and lost the pre-90 segment, the 10200 us
	   of timed-window overhead and the CHESS/pre-sat/DE/post-ETL-crusher terms
	   (only post_tcrush survived), so the played TR exceeded the requested TR by
	   10+ ms per slice. Diffusion mode now flows through the ENTIRE legacy
	   overhead chain; only the part-1 term above differs. */
	\\printf("tr_min = %ld\n",tr_min);
	
	
#ifdef MTC
	templ1 = (no_cest_pulses*tselmtcl + (no_cest_pulses-1)*IntToLong(inter_cest_delay)*1000L + IntToLong(mtc_tcrush+2*tramp) + IntToLong(post_cest_delay)*1000L);	
	// Calculate the inter-CEST-pulse delay 
    if(mtc_on){
		// Should remain in us!
		tr_min = tr_min + templ1;
        inter_cest_cal_min = 2*tramp + mtc_tcrush + 100;					
		// NOTE: inter_cest_delay is not a repetition time. It is the interval between the end of one pulse and the start of the next.
        inter_cest_cal = inter_cest_delay - (inter_cest_cal_min/1000L);
		if ( inter_cest_cal < 1 ) {
			printf("Inter-CEST delay too short, extend by %d ms\n ", -inter_cest_cal + 1);
			goto end ;
        }
    }	
#endif	
	if (tr==0) 
		tr = (tr_min*batch_slices)/1000+1;
	
	// Check if resp plateau is longer than tr_min
	// If no gate was detected t_resp_plateau would be 0
	// If gate was detected t_resp_plateau would be a positive value provided the interval is >0
	// If a positive t_resp_plateau is given in PPR then this is used instead
	if (t_resp_plateau==0) 
		t_resp_plateau = tr;
	templ1 = tr_min*IntToLong(batch_slices);
	temp = templ1/1000+1;
#ifdef MAINSGATE	
	if ((mains_gating)&&(t_resp_plateau<temp)&&(hasprinted==0))
	{
		printf("Gate interval (%dms) is shorter than min TR (%dms)\n", t_resp_plateau, temp);
		hasprinted = 1;
	}
#endif
 	if ((gating)&&(t_resp_plateau<temp)&&(hasprinted==0))
	{
		printf("Gate interval (%dms) is shorter than min TR (%dms)\n", t_resp_plateau, temp);
		hasprinted = 1;
	}
	if ((report_on == 1)&&(gating!=0)) 
		printf("Resp plateau set to %d ms\n", t_resp_plateau);
	if (report_on == 1) 
		printf("Minimum TR = %d ms\n", temp);
	tr_extend_us = ((tr*1000L/batch_slices) -tr_min); 			// [us]
	
	if ( tr_extend_us < 0 ) {
		printf("TR too short, increase to %d ms\n ", temp );
		if(batch_slices > 1) 
			printf(", or decrease number of slices (batch) to %d\n", ((tr-1)*1000L/tr_min));		
		goto end ;
	}
	
	if(diff_on)
	{
		tr_extend_us = ((tr*1000L/batch_slices) -tr_min); 
		\\printf("tr_extend_us = %ld us\n", tr_extend_us);
	}
	
	tr_extend_usL = tr_extend_us*10L;
	 	
	tr_min = tr_min/1000; // tr_min is the time per slice in [ms]
	
	
	// Find how many slices can fit into one resp interval assuming slice clustering is on
	temp = t_resp_plateau/tr_min;
	// The variable below will be >=1 for T2 when t_resp_plateau>=tr_min
	// and 1 for T1 when when tresp_plateau>=tr
	// clusters must be enabled!
	no_slices_per_gating_interval = temp;
	if (no_slices_per_gating_interval>batch_slices)
		no_slices_per_gating_interval = batch_slices;

	temp = t_resp_plateau/tr;
	// The variable below will be 0 for T2 when t_resp_plateau<tr
	// and >=1 for T1 when when tresp_plateau>=tr
	no_views_per_gating_interval = temp;
	
	if (no_views_per_gating_interval==0)
		no_views_per_gating_interval = no_views/views_per_seg;
	


	if ((report_on == 1)&&(gating!=0)) 
	{
		printf("Slices per gate interval = %d\n", no_slices_per_gating_interval);
		printf("Views per gate interval = %d\n",  no_views_per_gating_interval);
	 }
	
/*  Real time adjustment of slice and read compensation gradients */

	templ1 = gs_comp;
	templ1 = templ1 + (templ1*(gs_comp_scale+fse_gs_comp))/1000L; 	/*  Manual override of slice rephase lobe */
	templ2 = (templ1*IntToLong(gsp_lobe))/100L;
	templ3 = templ1 - templ2;
	if (templ2 + dacmaxlong < 0 | templ3 + dacmaxlong < 0){
		printf("Reduce slice grad comp\n");
		goto end;
	}
	gs_rp = templ3;
	gsp_rp = (templ2*IntToLong(tref+tramp))/IntToLong(tdp+tramp);
	
	
#ifdef FSE3D
	if ((gp_sl_on>0)&&(NO_VIEWS_2>1))
	{
	/* Check if the addition of slice compensation and initial value of slice
	phase encode gradient causes an overflow */
		templ2 = gp_sl_init_var;
		templ1 = templ1 + templ2;
		if (templ1 < -32767L) {
			printf("FOV in slice direction too small\n");
			goto end;
		}
	}	
#endif
	
	
	templ1 = gr_comp;
	templ1 = templ1 + (templ1*IntToLong(gr_comp_scale)/8)/1000L; 	/*  Manual override of switching dephase lobe */
	
	templ2 = (templ1*grp_lobe)/100L;
	templ3 = templ1 - templ2;
	if (templ2 + dacmaxlong < 0 | templ3 + dacmaxlong < 0){
		printf("Reduce read grad comp\n");
		goto end;
	}
	gr_dp = templ3;
	grp_dp = -(templ2*IntToLong(tdp+tramp))/IntToLong(tref+tramp);

	grp_dp_1 = 0;
	if (flow_comp_on)
	{
		templ1 = gr_comp_flow;
		templ1 = templ1 + (templ1*IntToLong(gr_comp_scale)/8)/1000L; 	/*  Manual override of switching dephase lobe */
		templ2 = (templ1*grp_lobe)/100L;
		templ3 = templ1 - templ2;
		if (templ2 + dacmaxlong < 0 | templ3 + dacmaxlong < 0){
			printf("Flow comp grad amp caused overflow\n");
			goto end;
		}
		grp_dp_1 = -(templ2*IntToLong(tdp+tramp))/IntToLong(tref+tramp); // TODO formula was not verfified when tdp and tref made separate!
		/* also recalculate gr_flow, later to be assigned to grp_dp */
		templ3 = gr_var;
		templ4 = gr_undersample;
		templ5 = gr_oversample;
		templ3 = (templ3*templ4)/templ5;
		templ3 = templ3+templ3*IntToLong(gr_comp_scale)/8000L;
		templ3 = templ3*grp_lobe/100L;
		
		gr_flow = templ3;
		if (gr_flow + dacmaxlong < 0){
			printf("Flow comp grad amp caused overflow\n");
			goto end;
		}
		grp_dp = -gr_flow;
	}
	
#ifdef VALIDATOR
	if (validate==1)
	{
		templ1 = IntToLong(no_views/views_per_seg) * IntToLong(no_views_2) + IntToLong(no_disacq);
		templ1 = templ1*IntToLong(no_slices/batch_slices) * IntToLong(no_averages);
		printf("Duration=%ld\n", tr * templ1 * no_experiments);
		goto end;
	}
#endif
	
	if (flow_comp_on) 
		templ1 = 37500L;
	else
		templ1 = 27500;
	
	// Unchanged
	
	waittimer(templ1);
	
	starttimer();
	// [V17-TIMER] Compute complete targets inside the existing setup budget.
	// Long multiplication and the echo branch must NOT follow gettimer()+250.
	post_adc_base_ticks=te_balance_bl_temp2*10L;
	post_adc_train_ticks=(te_balance_bl_temp2+te_balance_bl_esp+IntToLong(crush_post_pad-crush_pre_pad))*10L;
	G1 = grp_dp; /* if flow_comp_on = 0 */
	G2 = grp_dp_1; /* or 0 if flow_comp_on = 0 */
	
/*  Calculate the matrices for this phase-encode step */
/*  Phase-encode and refocus matrices only need be rescaled, but recalculate all for real time update of angulations */

	MR3040_SelectMatrix( ss_mat );          /*  Select a zero matrix during matrix re-calculation */
	
	CREATE_MATRIX(fse_mat,gs_on*gs_var_rescale,0,gr_on*G2)
	delay(caldelay,us);
	
	CREATE_MATRIX(fse_mat_sec,gs_on*gs_rp,0,gr_on*G1)
	delay(caldelay,us);

	CREATE_MATRIX(slice_crush,gs_on*gs_var_rescale,0,0)
	delay(caldelay,us);

	// [CRUSH-SCHED] EVERY shot/slice/row/experiment/dummy passes this setup
	// under ss_mat. Both primaries have identical slice selection. Constant
	// mode retains the v1.6 first=22, later=21 selection path.
	if (crusher_schedule==0)
	{
		CREATE_MATRIX(slice_crush_sec,gs_on*crush_independent_on*crusher_saved_train,0,0)
		delay(caldelay,us);
		crusher_play_mat=slice_crush;
		if ((crush_independent_on==1)&&(diff_on==1))
		{
			CREATE_MATRIX(first_slice_crush,gs_on*gs_var_rescale,0,0)
			delay(caldelay,us);
			CREATE_MATRIX(first_slice_crush_sec,gs_on*crusher_saved_first,0,0)
			delay(caldelay,us);
			crusher_play_mat=first_slice_crush;
		}
	}
	else
	{
		CREATE_MATRIX(slice_crush_sec,gs_on*crusher_dac[0],0,0)
		delay(caldelay,us);
		CREATE_MATRIX(first_slice_crush,gs_on*gs_var_rescale,0,0)
		delay(caldelay,us);
		crusher_base=0;
		if (crusher_etl>1) crusher_base=crusher_dac[1];
		CREATE_MATRIX(first_slice_crush_sec,gs_on*crusher_base,0,0)
		delay(caldelay,us);
		crusher_play_mat=slice_crush;
	}
	
	CREATE_MATRIX(diff_mat, -diff_slice, -diff_phase, -diff_read)
	delay( caldelay, us);
	
#ifdef MULTIPRESAT
	CREATE_MATRIX(presat_mat_sec, sat_on*sat_gr_amp, sat_on*sat_gr_amp, sat_on*sat_gr_amp)
	delay(caldelay,us);
#endif

#ifdef CHESS
	CREATE_MATRIX( chess_mat, -gs_chess_amp, 0 ,0)
	delay( caldelay, us);	
#endif

#ifdef MTC
	CREATE_MATRIX( mtc_mat, -mtc_on*mtc_gr_amp, -mtc_on*mtc_gr_amp, -mtc_on*mtc_gr_amp)
	delay( caldelay, us);	
#endif


/* For narrow band systems the observe modulator level can be 0 or 4 ie on or off
full control is provided in the instrument panel 0db to - 40db . So if the RF is on
set the observe modulator level to 4 */

	rf_on = 0 ;
	if ( obs_mod_level > 0 ) 
		rf_on = 4 ;

	// The minimum time returned by hostrequest() is 1 [ms] even if nothing to update
	time = hostrequest(); // 91 ticks
	if (time==1)
		time = 0;

	// [CRUSH-SCHED] DWI setup creates the same six FSE/crusher matrices as
	// v1.6. Diffusion-OFF scheduled mode needs two more: reject a setup
	// overrun here, BEFORE the excitation/ADC, rather than lengthening TR.
	// Reserve 550 us for timer/check overhead within the 3000 us setup window.
	// MAN 4.8.1 documents timing-function overhead of 360.2 +/- 5.0 us;
	// the assignment/comparisons also consume this allowance. Target timing
	// still requires vendor verification. Reject signed timer overrange.
	crusher_setup_ticks = gettimer();
	if ((crusher_setup_ticks<0)||(crusher_setup_ticks>24500))
	{
		printf("Matrix setup exceeds timing budget\n");
		goto end;
	}
	
	
	if (v19_mode==1) goto v19_mat_window;
	waittimer(30000); // 3000 us; included in the 11350-us TR overhead

	resync();

/*   ************************************ SEQUENCE STARTS HERE ********************************************** */

	// T2 gating - do specific subset of slices ETs in each resp interval
	// T1 gating - do batch_slices echo trains (ETs) in each resp interval
	// T1 with long resp interval - fit multiple TRs in each resp interval (do a specified number of VPS in each r.i.)
	gating_condition_1 = ((current_slice-1)%no_slices_per_gating_interval==0); // T2, 82 ticks
	// Check if both conditions are true (i.e., slice is at the start of the batch and the view is good for triggering)

#ifdef MAINSGATE	
	if (mains_gating==1)
	{
		gating_condition = (current_slice==1); // T2, 82 ticks
		
		if (gating_condition)
		{		
			// wait for HI
			do{
				noop;
				hostrequest();
			} until input#1!=0;
			
			// If HI detected, wait for LO
			if (input#1==1)
				do{
					noop;
					hostrequest();
				} until input#1!=1;
			
			if (post_mains_gate_delay>0)
				delay(post_mains_gate_delay, ms);
			// UNTESTED
		}
	}	
	// Insert secondary mains triggering delays
	if (current_slice==3)
		delay(93, ms);
	if (current_slice==6)
		delay(140, ms);
	if (current_slice==8)
		delay(93, ms);
	if (current_slice==11)
		delay(140, ms);
	if (current_slice==13)
		delay(93, ms);
	if (current_slice==16)
		delay(140, ms);
	if (current_slice==18)
		delay(93, ms);
	if (current_slice==21)
		delay(140, ms);
	if (current_slice==23)
		delay(93, ms);
	if (current_slice==26)
		delay(140, ms);
#endif

	if (gating)
	{
		if (gating_mode==1) 
			gating_condition = gating_condition_1; // T2
		else if (gating_mode==2) 
			gating_condition = gating_condition_1; // T1 and T2 are now identical
		else 
			gating_condition = -1; // trigger each echo train (=slice) - e.g. for cardiac
		//output(19);  // Select Userport
		if (gating_condition)
		{
			do{
				noop;
				hostrequest();
			} until input#0!=0;
		}
	}

	
/*  Selective 90 degree pulse in presence of slice select gradient */

	echo_cnt = 0;
	total_echo_cnt = 0; // counts all echo, including first discarded ones
	resync();
	phase(phase_90);                        /*  90x pulse */	
	MR3040_Clock(clock);
	
#ifdef MTC
    if(mtc_on){
		cest_count = 0;								\\ CEST pulse loop counter
		cest_loop:
			MR3040_SetList( mtc_list, ALL_CHANNELS );
			MR3040_SelectMatrix( mtc_mat );
			frequency_buffer(5);
			reset_frequency();
#ifdef PDD	
			if (use_pdd>0)
				userout(pdd_tx_mask);
#endif
			if (mtc_gaussian)
			{
				temp_mac = 100 - (22+warmup);
				delay(temp_mac,us);
				Set_Board_Multipliers( mtc_mul,0, rbd[mtc_rfnum]);
				Set3031Address(rad[mtc_rfnum],rbd[mtc_rfnum]+4);
				Set3031Waits(rwt[mtc_rfnum],rbd[mtc_rfnum]+4);
				Append_Boards_Ready( rbd[mtc_rfnum]+4 );
				rfampon(0);
				delay(warmup,us);
				rfon(rf_on);
				MR3031_go();
				delay(tselmtc_ms, ms);
				rfon(0);
			}
			else
			{
				MR3031_setup(pf1,"rf_analog_on",0,0,0,mtc_mul);
				rfampon(0);
				delay(warmup,us);
				rfon(rf_on);
				MR3031_go();
				delay(tselmtc_ms, ms);				
				rfoff();
				MR3031_setup(pf1,"rf_off",0,0,0,0);
				MR3031_go();
			}
			delay(100,us);
#ifdef PDD	
			if (use_pdd>0)
				userout(pdd_rx_mask);
#endif
			MR3040_Clock(clock);                    \\ Extra 3040 call for 3040 syncronisation
			delay(tramp,us);
			delay(mtc_tcrush,us);
			starttimer();
				ret = tramp*10;
				frequency_buffer(0);
				reset_frequency();
				cest_count = cest_count + 1;
			waittimer(ret);
			if (cest_count < no_cest_pulses) {               \\ CEST pulse loop
				delay(inter_cest_cal, ms);
				goto cest_loop;
			}
			if (post_cest_delay>0)
				delay(post_cest_delay, ms);
        }
#endif	
	
	
#ifdef MULTIPRESAT
 	if ((sat_on)&&(no_PB>0))
	{
		PB_index = 0;
		do {
			if (PB_on[PB_index]==1) 
			{
				starttimer(); 
					sat_channel = PB_channel[PB_index];
					gs_sat = PB_gs_sat[PB_index];
 					sat_on_ar[0] = -(sat_channel == CHANNEL_S); 
					sat_on_ar[1] = -(sat_channel == CHANNEL_P); 
					sat_on_ar[2] = -(sat_channel == CHANNEL_R); 
					CREATE_MATRIX(presat_mat, sat_on_ar[0]*gs_sat, sat_on_ar[1]*gs_sat, sat_on_ar[2]*gs_sat)					
					delay(caldelay,us);  
					MR3040_SetList( sat_list, ALL_CHANNELS);
					MR3040_SelectMatrix( presat_mat );
					MR3040_Clock(clock);  
					frequency_buffer(3);     \\ need to overwrite the buffer here
					frequency(MHz, kHz+PB_kHz[PB_index], Hz+PB_Hz[PB_index], rx1MHz);
					offset_frequency(PB_freq[PB_index]);
					reset_frequency();
				waittimer(5200); // 4936
				MR3040_Start(ALL_CHANNELS);
				
#ifdef PDD
				if (use_pdd>0)
					userout(pdd_tx_mask);
#endif			
				NEWSHAPE_SETUP(rfnum_sat, p_sat_mul)
				
				rfampon(0);
				if (warmup>10) delay(warmup,us);
				rfon(rf_on);
				MR3031_go();
				
				starttimer();
					// Presat to apply on all OTHER axes only
					
					sat_on_ar[0] = -!sat_on_ar[0];
					sat_on_ar[1] = -!sat_on_ar[1];
					sat_on_ar[2] = -!sat_on_ar[2];
					CREATE_MATRIX(presat_mat_sec, sat_on_ar[0]*sat_gr_amp, sat_on_ar[1]*sat_gr_amp, sat_on_ar[2]*sat_gr_amp)
					ret = tsel_sat-500;
				waittimer(5000);
				delay(ret,us);
				
				rfon(0);
				MR3040_CONTINUE(ALL_CHANNELS);
#ifdef PDD
				if (use_pdd>0)
					userout(pdd_rx_mask);
#endif	
				delay(tramp,us);
				delay(sat_tcrush,us);
				MR3040_CONTINUE(ALL_CHANNELS);
				
				starttimer();
					ret = tramp*10;
					frequency_buffer(0);    
					reset_frequency();
				waittimer(ret);
				delay(inter_PB_delay,us);
			}
			PB_index = PB_index+1;						
		} until (PB_index==MAX_PRESAT_BLOCKS);
    }
	
	
	
#endif	

#ifdef CHESS
	if (chess_on)
	{
		// Duration = 30+t_chess+40+2*tramp+tcrush_chess [us]
		starttimer();
			frequency_buffer(4);
			reset_frequency();
		waittimer(300);
#ifdef PDD
		if (use_pdd>0)
			userout(pdd_tx_mask);
#endif		
		if (chess_gauss>0)
		{
			NEWSHAPE_SETUP(chess_rfnum, chess_mul)
			
			rfampon(0);
			if (warmup>10) delay(warmup,us);
			rfon(rf_on);
			MR3031_go();
			
			starttimer();
				// Calculate crusher parameters
				MR3040_SetList( chess_list, CHANNEL_S );
				MR3040_SelectMatrix( chess_mat );
				MR3040_Clock(clock); 
				ret = t_chess_gauss-1; // [ms]
			waittimer(10000);
			delay(ret, ms);
			
			rfon(0);
		}
		else
		{
			MR3031_setup(pf1,"rf_analog_on",0,0,0,chess_mul);
			rfampon(0);
			if (warmup>10) delay(warmup,us);
			rfon(rf_on);
			MR3031_go();
			starttimer();
				// Calculate crusher parameters
				MR3040_SetList( chess_list, CHANNEL_S );
				MR3040_SelectMatrix( chess_mat );
				MR3040_Clock(clock); 
				ret = t_chess*10;
			waittimer(ret);
			rfoff();
			MR3031_setup(pf1,"rf_off",0,0,0,0);
			MR3031_go();
		}		
#ifdef PDD		
		if (use_pdd>0)
			userout(pdd_rx_mask);
#endif		
		MR3040_Start(CHANNEL_S);
		// Restore slice frequency within while ramping the gradient
		starttimer();
			ret = tramp*10;
			frequency_buffer(0);    
			reset_frequency();
		waittimer(ret);		
		delay(tcrush_chess,us);
		delay(tramp,us);
	}	
#endif
	
	MR3040_SetList( slice_list, CHANNEL_S); 	// 33 ticks
	MR3040_SetList( read_pre_list, CHANNEL_R ); // 33 ticks
	MR3040_SelectMatrix( fse_mat ); 			// 20 ticks
	MR3040_Clock(clock); // makes images worse. Or better? 22 ticks
	MR3040_Start( CHANNEL_S|CHANNEL_R );
	
	// 90 degree pulse

	// there is a default ~17us delay between the beginning of the gate and start of the pulse
	// rfdelay is the delay from end of ramp to start of rf pulse, not the gate
	// TODO this is not timed
 	temp_mac = tramp-40+rfdelay-(rfgate_delay-17); // -40 gives 0 delay; takes 40 ticks

	starttimer();
#ifdef PDD
		if (use_pdd>0)
			userout(pdd_tx_mask);
#endif	
		ret = temp_mac*10;
	waittimer(ret);
	NEWSHAPE_SETUP(rfnum, p90_mul)
	rfampon(0); // this opens the gate
 	if (warmup>10) 
		delay(warmup,us);
	starttimer();
		ret = (rfgate_delay-17)*10;
	waittimer(ret);
	rfon(rf_on);
	MR3031_go();
	ret = tsel90 - 3-rfdelay;
	delay(ret, us);
	MR3040_CONTINUE(CHANNEL_S|CHANNEL_R);	
	starttimer();
		ret = rfdelay*10; // Note that the minimum waittimer delay is 50 clocks
	waittimer(ret);
		rfon(0); 
#ifdef PDD
		if (use_pdd>0)
			userout(pdd_rx_mask);
#endif
		// Specsim-s interpretation of waittimer is wrong with multiple waittimers, it resets the timer after waittimer is called
		templ3 = IntToLong(tramp*3+tref);
		templ3 = templ3*10L;

		resync();
		phase(phase_180-phcor0);      \\ 180 y pulse
		if (diff_on == 0)
		{
			post_90_delay0L = te_balance_al + IntToLong(-21-6+post_90_delay1); // 6us is an empirically detected delay
			post_90_delay0L = post_90_delay0L*10L;
			pre_90_delay0L = post_90_delay0L;
			
		}
		else
		{
			// [TWO-TE FIX #3] subtract the first-180 crusher surplus (tcrush1 - tcrush)
			// now physically played by slice_180_refocus_diff and the this_tcrush delays
			post_90_delay0L = te_balance_al + IntToLong(-21-6+post_90_delay1) - sm_delta_us - diff_tramp - IntToLong(tcrush1 - tcrush);
			post_90_delay0L = post_90_delay0L*10L - extra_delta_us - 185;
			pre_90_delay0L = post_90_delay0L;
			\\printf("Post90 delay = %ld\n",post_90_delay);
		}
		
		if (flow_comp_on) 
			post_90_delay0L = post_90_delay0L+IntToLong((20*tramp)+(5*tsel90));
		if(templ3>49000L)
		{
			ret = templ3/10-4800;
			// 25 is the time taken by if statement before delay32 below			
			waittimer(47975L); // 48000-25 = 47975;
			delay(ret, us);
		}
		else
			waittimer(templ3-25); // te_balance_al 1166 vs te_balance_a 1043
	/* second ramp starts here*/
	/* read dephase gradient ramp starts here, too */
	/* slice rephase gradient already going! */
	
	// It is expected that the code above compensates for 25 clock time that the if statement below takes to avoid introducing additional delay
	if (post_90_delay0L>25L)
		delay32(post_90_delay0L); // can do more calculations here
	starttimer();
		MR3040_SetList( slice_180_refocus_diff, CHANNEL_S);
		MR3040_SelectMatrix(slice_crush);
		//gp_sl_var = -gp_sl_inc*gp_var_mul2[current_view_2];		
		gp_sl_var = -gp_sl_inc*get_gp_var_mul2(current_view_2);
	waittimer(210 + post_90_delay); // 78

	
	if (diff_on)
	{
		// First diffusion gradient lobe	
		// The section from here....
		MR3040_clock(clock); // change clock for diffusion ramps
		MR3040_SelectMatrix( diff_mat );
		MR3040_SetList( diff_list, ALL_CHANNELS );
		// ... to here is not yet timed
		MR3040_Start(ALL_CHANNELS);
		delay(sm_delta_us,us); // sm_delta includes tramp
		MR3040_Continue(ALL_CHANNELS);
		delay(tramp,us);
		\\delay(20,ms);
		// Delay between DW gradients and 180 pulse (when isotropic DWI it is equal te1/2)
		// TE_DELAY_2
		
		if( extra_delta_us > 25) 
		{
			\\printf("extra_delta_us = %d\n", extra_delta_us);
			delay32(extra_delta_us); // Delay to make up to big_delta_us
		}
		if(echo_cnt < views_per_seg)
		MR3040_SetList( slice_180_refocus_diff, CHANNEL_S);
	}
	
	

echo_loop:
	MR3040_SelectMatrix(crusher_play_mat);
	MR3040_Start( CHANNEL_S);
	
	// 180 degree pulse

	// there is a default ~17us delay between the beginning of the gate and start of the pulse
	// rfdelay is the delay from end of ramp to start of rf pulse, not the gate
	// [TWO-TE FIX #3] The first 180 (total_echo_cnt==0) uses the tcrush1 crusher budget
	// played by slice_180_refocus_diff; imaging 180s (2..N) keep tcrush.
	this_tcrush = tcrush_play;
	if ((diff_on==1) && (total_echo_cnt == 0))
		this_tcrush = tcrush1_play;
 	temp_mac = this_tcrush+tramp-40+rfdelay-(rfgate_delay-17); // -40 gives 0 rf delay, 17 gate delay gives minimum gate delay
	starttimer();
#ifdef PDD
		if (use_pdd>0)
			userout(pdd_tx_mask);
#endif	
		refocus_wait_ticks = IntToLong(temp_mac)*10L;
	waittimer(refocus_wait_ticks);
	NEWSHAPE_SETUP(rfnum, p180_mul)
	rfampon(0); // this opens the gate ?)
	if (warmup>10) 
		delay(warmup,us);
	starttimer();
		ret = (rfgate_delay-17)*10; // Note that the minimum waittimer delay is 50 clocks
	waittimer(ret);
	rfon(rf_on);
	MR3031_go();
	starttimer();
	#ifdef SKIP_FIRST_ECHOES
		discard_current_echo = (total_echo_cnt<echoes_to_discard);
		if (discard_current_echo) 
			gp_mul = 0;
		else 
			gp_mul = get_gp_order(current_view+echo_cnt);
	#else
		gp_mul = get_gp_order(current_view+echo_cnt);
	#endif
		gp_var = (-gp_inc*gp_mul)*nav_cnt;

		CREATE_MATRIX(aq_mat_sec,gs_on*(gsp_rp-(gp_sl_var*gp_sl_on*nav_cnt)), gp_on*gp_var, gr_on*gr_dp)
		// 1356 clocks (135.6 us) 

		// Limit the min duration to 300 us - can probably be shortened to less than 200 us
		if (tsel90<300)
		{
			ret = tsel90*10;
			waittimer(ret);
		}
		else
		{
			// Implement a fixed 300 us delay
			// and calculate the remaining duration as a difference
			ret = 3000-25; // 25 is the time taken by if statement before delay32 below			
			rf_extend_delay = IntToLong(tsel90)*10-3000;
			waittimer(ret);

			// It is expected that the code above compensates for 25 clock time that the if statement below takes to avoid introducing additional delay
			if (rf_extend_delay>25)
				delay32(rf_extend_delay);
		}

	starttimer();
		rfon(0);
		refocus_wait_ticks = IntToLong(tramp+this_tcrush-rfdelay+crush_post_pad-crush_pre_pad)*10L;
#ifdef PDD
		if (use_pdd>0)
			userout(pdd_rx_mask);
#endif
	waittimer(refocus_wait_ticks);
	
	if (diff_on && total_echo_cnt == 0)
	{
		if( extra_delta_us > 25) 
		{
			\\printf("extra_delta_us = %d\n", extra_delta_us);
			delay32(extra_delta_us); // Delay to make up to big_delta_us
		}		
		// Second diffusion gradient lobe	
		// The section from here....
		MR3040_clock(clock); // change clock for diffusion ramps
		MR3040_SelectMatrix( diff_mat );
		MR3040_SetList( diff_list, ALL_CHANNELS );
		// ... to here is not yet timed
		MR3040_Start(ALL_CHANNELS);
		delay(sm_delta_us,us); // sm_delta includes tramp
		MR3040_Continue(ALL_CHANNELS);
		delay(tramp,us);
		// Delay between DW gradients and 180 pulse (when isotropic DWI it is equal te1/2)
		// TE_DELAY_2
	}
		
	if (de_on && (echo_cnt==views_per_seg)) 
	{
		goto de_90_pulse;
	}
/*  Recalculate phase encode matrices */

	starttimer();
		
		temp = 0;
		if(total_echo_cnt == 0) 
			temp = post_180_delay_1;

		MR3040_SelectMatrix( aq_mat );
		MR3040_SetList( read_list, CHANNEL_R );
		MR3040_SetList( phase_list, CHANNEL_P );
		MR3040_SetList( slice_list_rp, CHANNEL_S );
	waittimer(210 + temp - 25); // 25 is the time taken by if statement before delay32 below
		
	\\printf("te_balanceb1_temp = %ld\n", te_balance_bl_temp1);
	
	if(diff_on)
	{
		if(total_echo_cnt == 0)
		{
			/* [MERGE-2TE] M4 (port): nesting reordered (total_echo_cnt outermost) so
			   the cumulative branch overhead to the first-echo delay32 stays 49 ticks
			   (13+11+25), identical to the ordering the empirical -156L constant was
			   tuned against, while train echoes get their own guard on the esp
			   balance instead of the first-echo balance. */
			if (te_balance_bl_temp1>25)
			{
				// [TWO-TE FIX #3] subtract the first-180 crusher surplus on the post side
				templ1  = te_balance_bl_temp1 - sm_delta_us*10L - extra_delta_us - diff_tramp*10L - IntToLong(tcrush1 - tcrush)*10L - 156L; 
				\\printf("templ1 = %ld\n", UnsignedToLong(templ1));
				if (templ1>25L) 
					delay32(templ1);
				else
				{
					// [TWO-TE FIX #5] a negative first-echo balance shifts the echo; abort
					printf("Timing error (=%ld): first-echo post-180 balance negative. Increase TE.\n",templ1);
					goto end;
				}
			}
		}
		else
		{
			/* [MERGE-2TE] M4 (port): train echoes 2..N reach delay32 through 49
			   ticks (13+11+24+1) vs 13 on the legacy path; the -36 tick difference
			   is pre-subtracted in te_balance_bl_temp1_esp. DERIVED, needs phantom
			   trim. */
			if (te_balance_bl_temp1_esp>25L)
				delay32(te_balance_bl_temp1_esp);
		}
	}
	else

	{
		delay32(te_balance_bl_temp1);
	}
	
		
	
	MR3040_Start( ALL_CHANNELS );
	starttimer();
		CREATE_MATRIX(aq_mat,gs_on*gs_var_rescale,gp_on*gp_var,(gr_on*gr_undersample)*(gr_var/gr_oversample))
		// delay not required as we are not doing another matrix calc
	    //  Calculate increment in rec phase for offset in pe direction. This is necessary for each PE step
		
		// New code - as in flash 3D - needs tweaking
		templ1 = IntToLong(fov_phase_deg)*IntToLong(gp_mul);
		//templ1 = templ1 + IntToLong(gp_var_mul2[current_view_2])*IntToLong(fov_sl_phase_deg);		// 144 clocks
		templ1 = templ1 + IntToLong(get_gp_var_mul2(current_view_2))*IntToLong(fov_sl_phase_deg);		// 144 clocks
		
		phase_rec = templ1%deg_360;
		phase_rec = phase_rec*nav_cnt;
		if (gp_on == 0 ) phase_rec = 0; // should do this for PE2 also
		ret=tramp*20+tdp*10;
		rphase(phase_rec+phase_correction);
		
		// phase_correction formula moved into the acquire below
#ifdef SKIP_FIRST_ECHOES	
		if (discard_current_echo) 
			dummy_cycles(1);
		else 
		{
			dummy_cycles(0);
			echo_cnt = echo_cnt+1;
		}
#else
		echo_cnt = echo_cnt+1;		
#endif	

	// Discard acquisitions at the beginning of each slice

		notDummy = -(disacq_cnt >= no_disacq);
		Dummy_Cycles(!notDummy);
	waittimer(ret);
	
	starttimer();
		resync();
		frequency_buffer(1);                    /*  buffer 1 = rx freq */
		reset_frequency();
		ret = (tramp+rfdelay)*10;
		// the timing here is very sensitive to the ramp time and rfdelay. tramp+rfdelay should be at least 163us
	waittimer(ret);
	
	
	initiate(sample_period);
	starttimer();	
		CREATE_MATRIX(aq_mat_sec,gs_on*(gsp_rp+(gp_sl_var*gp_sl_on*nav_cnt)), gp_on*gp_var, gr_on*gr_dp)
		// ***********SLOW CODE ***********************
 		templ1 = phase_ang;
		total_echo_cnt = total_echo_cnt+1;
		if (crusher_schedule==0) crusher_play_mat=slice_crush; // original constant path		
#ifdef SKIP_FIRST_ECHOES	
		templ2 = IntToLong(total_echo_cnt);
#else
		templ2 = IntToLong(echo_cnt);
#endif		
		templ3 = templ1*templ2+0*phcor0;
		phase_correction_0 = templ3%IntToLong(deg_360);
		templ5 = templ2*IntToLong(remainder_phase);
		templ4 = templ5/1000L;
		phase_correction_1 = templ4;
		templ4 = templ5%1000L;
		phase_correction_2 = 0;
		if (templ4 > 500 ) 
			phase_correction_2 = 1;
		if (templ4 < -500 ) 
			phase_correction_2 = -1;
		phase_correction = (phase_correction_0 + phase_correction_1 + phase_correction_2)%deg_360;
		
	// [CRUSH-SCHED] aq_mat is active; BOTH RF-k crushers have completed.
	// Set RF-(k+1) only; the final pulse never reads table[ETL]. This work
	// and its DSP waits are hidden inside the original sampled ADC interval.
		if (crusher_schedule!=0) { PREPARE_NEXT_CRUSHER }
	// *********** END OF SLOW CODE ******************
		templ1 = IntToLong(no_samples+no_discard)*IntToLong(sample_period)-3L; // [ticks] 78597
		ret = 8997; // original calculation window [100 ns ticks]
		if (crusher_schedule!=0) ret=CRUSHER_ADC_TICKS; // +1000 us, no added samples
		if (templ1<ret) 
			printf("Sampling time too short\n");
		templ1 = templ1-ret; // allow 8997 ticks for calculations
		// Find [ms]
		templ2 = templ1/10000L;
		if (templ2<1) 
			printf("Sampling time incompatible \n");
		// Find [us]
		templ3 = (templ1/10)-templ2*1000L;
		// Temp fix for 512 samples and 40kHz bw only
		if (sample_period==250) 
			templ3 = templ3 -1;
		if (templ3<10) 
			printf("Sampling time incompatible \n");
#ifdef MAINSGATE		
		if (input#1!=0)
			bad_cnt = bad_cnt+1;
#endif
	waittimer(ret); // 8236 ticks
		delay(templ2,ms);
		delay(templ3,us);
	complete();

	starttimer();
		resync();
		frequency_buffer(0);                    /*  buffer 0 = tx freq */
		reset_frequency();
		phase(phase_180+phase_correction);
		// Select BEFORE sampling the timer. Everything above is included in ret.
		// A missed waittimer deadline adds 5 ms (EVO manual pp. 90-91).
		templ3 = post_adc_base_ticks;
		if (echo_cnt < views_per_seg+de_on)
			templ3 = post_adc_train_ticks;
		ret = gettimer()+250;
		templ3 = templ3-ret;
		ret = ret+25;
	waittimer(ret-25); // 25 is the time taken by if statement before delay32;;
	
	// It is expected that the code above compensates for 25 clock time that the if statement below takes to avoid introducing additional delay		
	
	/* [MERGE-2TE] M4 (port): retain the factory two-branch structure below.
	   Its empirical
	   constants -21-16 and the +250 pad retain the existing
	   57-tick branch pattern: if(diff_on) 13 + if(diff_on==0) 19 + if(templ3>25) 25.
	   In diffusion mode the same balance delay32(templ3) plays (FIX #7 logic:
	   templ3 = post_adc_train_ticks - ret while echoes remain), so
	   echo->next-180 = esp/2 for every train interval including echo1->180_2.
	   The diffusion path evaluates the false if(diff_on==0) AFTER its delay32,
	   so the TOTAL interval overhead is the same 57 ticks in both modes. */
	if(diff_on)
	{
		if (templ3>25) 
			delay32(templ3);
	}
	
	if (diff_on == 0)
	{
		if (templ3>25) 
			delay32(templ3);
	}
	// --- ORIGINAL CODE (disabled by TWO-TE FIX #7) ---
	/*
	if(diff_on)
	{
		if(total_echo_cnt == 0)   // [ESP MOD] disabled former first-echo rephase branch
		{
			delay(tramp,us);
			delay(tref_setup,us);// Min. duration is fixed to 300 us
		}
		else                      // [ESP MOD] disabled former imaging-echo esp branch
		{
			if (templ3>25)
				delay32(templ3);
		}
	}
	if (diff_on == 0)
	{
		if (templ3>25) 
			delay32(templ3);
	}
	*/
	// [TWO-TE FIX #7] end
	
	
	starttimer();
		if(echo_cnt < views_per_seg+de_on)
			MR3040_SetList( slice_180_refocus, CHANNEL_S);

#ifdef DRIVEN_EQUILIBRIUM
	if ( echo_cnt < views_per_seg+de_on ) {
		waittimer(210 - post_acq_delay);
		goto echo_loop;
	}
#else
	if ( echo_cnt < views_per_seg ) {
		waittimer(210 - post_acq_delay);
		goto echo_loop;
	}
#endif
	ret = 210 - post_acq_delay;
	waittimer(ret);
de_90_pulse:	


#ifdef DRIVEN_EQUILIBRIUM
	/*  Driven Equilibrium Pulse */
	// The original 90-180 sequence played out in reverse
	// Timing obtained using 32 bit timer
	// The duration calculation below is for this part only - it excludes the 180 pulse
	// DE duration = pre_90_delay0L + 210 + post_90_delay + 24 + 20*tramp + 10*tref + 40 + 20*tramp + 10*tsel90 + 260 // 260 is empirical
	\\printf("DE duration = %ld\n", (pre_90_delay0L + 210 + post_90_delay + 24 + 20*tramp + 10*tref + 40 + 20*tramp + 10*tsel90 + 260));
	
	// or simply IntToLong(esp)*500L - (tsel180 - tsel90)/2 - tcrush - tramp + tramp;	
	\\printf("DE duration (simplified) =%ld [us]\n", IntToLong(esp)*500L - (tsel180 - tsel90)/2 - tcrush - tramp + tramp + 26); // 26 empirical
    if (de_on == 1)
	{
	
		// It is expected that the code above compensates for 25 clock time that the if statement below takes to avoid introducing additional delay
		if (pre_90_delay0L>25)
			delay32(pre_90_delay0L); // can do more calculations here

		starttimer();
			MR3040_SetList( slice_de90_list, CHANNEL_S); // 33 ticks
			MR3040_SetList( read_de90_list, CHANNEL_R ); // 33 ticks
			MR3040_SelectMatrix( fse_mat ); // 20 ticks
			MR3040_Clock(clock); // 22 ticks
			// 108 ticks to this point
		waittimer(210 + post_90_delay); // 78
			
		MR3040_Start( CHANNEL_S|CHANNEL_R ); // 24 ticks
		
		starttimer();
			phase(2*deg_90-phase_180-phase_correction+de_phase);
			
			ret = 20*tramp;
			if (flow_comp_on)
				ret = 2*ret + 5*tsel90;
		waittimer(ret);
		
		delay(tref, us);
		
	
		// 90 degree pulse

		// there is a default ~17us delay between the beginning of the gate and start of the pulse
		// rfdelay is the delay from end of ramp to start of rf pulse, not the gate
		// TODO this is not timed but could be beneficial
		temp_mac = tramp-40+rfdelay-(rfgate_delay-17); // -40 gives 0 delay; takes 40 ticks

		starttimer();
	#ifdef PDD
			if (use_pdd>0)
				userout(pdd_tx_mask);
	#endif	
			ret = temp_mac*10;
		waittimer(ret);
		NEWSHAPE_SETUP(rfnum, p90_mul)
		rfampon(0); // this opens the gate
		if (warmup>10) 
			delay(warmup,us);
		starttimer();
			ret = (rfgate_delay-17)*10;
		waittimer(ret);
		rfon(rf_on);
		MR3031_go();
		ret = tsel90 - 3-rfdelay;
		delay(ret, us);
		MR3040_CONTINUE(CHANNEL_S);	
		starttimer();
			ret = rfdelay*10; // Note that the minimum waittimer delay is 50 clocks
		waittimer(ret);
			rfon(0); 
	#ifdef PDD
			if (use_pdd>0)
				userout(pdd_rx_mask);
	#endif
			ret = tramp*10;
		waittimer(ret);
	}
#endif


v19_after_train: 
#ifdef POST_ETL_CRUSHER
	// 240 us gap before the gradient output below
	if (post_crush_on) {
		CREATE_MATRIX(post_crush_mat,-gs_on*post_crush_amp,-gp_on*post_crush_amp,-gr_on*post_crush_amp)
		delay( caldelay, us);
		MR3040_SelectMatrix( post_crush_mat );			 // ~2 us	
		MR3040_SetList( post_crush_list,  ALL_CHANNELS); // ~>4? us
		MR3040_Start(ALL_CHANNELS);
		ret = tramp+tramp+post_tcrush;
		delay(ret, us); // delay until the gradient output has finished
	}
#endif	

/*  Repetition delays */

	// This code is now timed, but it takes 69 us which restricts the tr min
	starttimer();
		templ1 = 0;

		// When gating is enabled, we optionally execute our correct TR delay and only then wait for trigger
		if ((gating == 1)&&(gating_after_tr_on==1))
		{	// Effectively force slice_clustering = 1;
			// Test version for WashU that will not do clustering with gating on
			if (slice_clustering_on == 0) 						// Wait equal intervals between echo trains
				templ1 = tr_extend_usL - IntToLong(time)*10000L;
		}

		if (gating == 0 )
		{
			// Gating = 0 and Slice_clustering_on = 0
			// Gating = 0 and Slice_clustering_on = 1
			if (time > 10 ) 
				time = 0;
			if (slice_clustering_on == 0) 						// Wait equal intervals between echo trains
				templ1 = tr_extend_usL - IntToLong(time)*10000L;
			else if (current_slice == (slice_batch_start + batch_slices))				// Wait once at the end of the slice batch		
			{
				tr_extend = tr - (tr_min+interslice_delay)*batch_slices;
				templ1 = IntToLong(tr_extend)*10000L;
			}
		}
	waittimer(690);
	
	if ( templ1 > 25L )
		delay32(templ1);
	
	if ((gating==1)&&( interslice_delay > 0 )) // this also assumes that slice_clustering_on is effectively 1 when gating is on
		delay(interslice_delay, ms);	
	starttimer(); 					/*  matrix calculations and overheads */

	no_acq = no_acq + 1;                            /*  acquisition number */

	slice_av = slice_av + 1;
	if( slice_av < slice_block )                    /*  Slice block */
		goto slice_block_loop;
    if (current_slice < slice_batch_start + batch_slices) /*  Multislicing */
	{
		goto multislice_loop;
	}

	disacq_cnt = disacq_cnt +1;
	if (disacq_cnt <= no_disacq)
	{
		goto disacq_loop;
	}
	else
		// prevent disacq_cnt increasing uncontrollably 
		disacq_cnt = no_disacq;

	view_av = view_av + slice_block;
	if (view_av < view_block)                       /*  View block */
		goto view_block_loop;
#ifdef FSE3D

	

	current_view_2 = current_view_2+1;
	if (current_view_2 < no_views_2)               	/*  Slice phase encoding */
	{
		goto phase_encode_2_loop;
	}
#endif 
		
	current_view = current_view + views_per_seg;
	if(nav_cnt == 0) {
		nav_cnt = 1;
	}	

	
	if (current_view < no_views )  			 		/*  Phase encode */
	{
		goto phase_encode_loop;
    }	
	slice_batch_start = slice_batch_start + batch_slices;
    if (slice_batch_start < no_slices)                    
	{
		goto slice_batch_loop;
	}	
	image_av = image_av+view_block;
	
	if (setup_mode>0) {
		if (image_av < no_averages)               	/*  Averages loop, to be used with tref_setup mode */
			goto averages_loop_setup;
	}	
		
	if (image_av < no_averages)                     /*  Averages */
		goto averages_loop;

	completed_ex = completed_ex + 1;
	// next diffusion acquisition (next row of the acq table)
	diff_acq_cnt = diff_acq_cnt + 1;
	if (diff_acq_cnt < no_diff_acq)
		goto diff_acq_loop;

	if (completed_ex < no_experiments) {
		goto experiment_loop;
	}			
#ifdef MAINSGATE
	printf("Count=%d\n", bad_cnt);
#endif

	goto end;





v19_mat_window:
	waittimer(30000); 
	
		
		starttimer();
		MR3040_SelectMatrix( ss_mat );
		CREATE_MATRIX(v19_m_ex, gs_on*v19_g_ex, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_ex+256, gs_on*v19_c_ex, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_rf, gs_on*v19_g_rf, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_rf+256, gs_on*crusher_saved_first, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_d, 0, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_d+256, gs_on*v19_d_dac, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_m, gs_on*v19_g_m, 0, 0)
		delay(caldelay,us);
		v19_setup_ticks = gettimer();
		if ((v19_setup_ticks<0)||(v19_setup_ticks>20000))
		{ printf("V19 matrix window 1 overrun\n"); goto end; }
		waittimer(25000);
		starttimer();
		CREATE_MATRIX(v19_m_m+256, gs_on*v19_c_m, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_sp, 0, v19_spoil_dac, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_sp+256, 0, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_re, gs_on*v19_g_re, 0, 0)
		delay(caldelay,us);
		templ1 = (IntToLong(G1)*IntToLong(tref+tramp))/IntToLong(tdp+tramp);
		if ((templ1<-IntToLong(crusher_max_dac))||(templ1>IntToLong(crusher_max_dac))||
		    (templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp))||(-templ1*100L>IntToLong(crusher_slew_dac_100us)*IntToLong(tramp)))
		{ printf("V19 read prephaser DAC %ld outside ceiling\n", templ1); goto end; }
		v19_rp_dac = templ1;
		CREATE_MATRIX(v19_m_re+256, gs_on*v19_c_re, 0, gr_on*v19_rp_dac)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_im, gs_on*v19_g_im, 0, 0)
		delay(caldelay,us);
		CREATE_MATRIX(v19_m_im+256, gs_on*crusher_saved_train, 0, 0)
		delay(caldelay,us);
		v19_setup_ticks = gettimer();
		if ((v19_setup_ticks<0)||(v19_setup_ticks>20000))
		{ printf("V19 matrix window 2 overrun\n"); goto end; }
		waittimer(25000);
	resync();
v19_shot:
	gp_sl_var = 0;     
	echo_cnt = 0;
	total_echo_cnt = 0;
	resync();
	starttimer();
		MR3040_Clock(clock);
		MR3040_SelectMatrix(v19_m_ex);
		MR3040_SetList(v19_l_ex, CHANNEL_S);
		phase(phase_90);                         
	waittimer(1000);
	
	starttimer();
MR3040_Start(CHANNEL_S);
if (use_pdd>0) userout(pdd_tx_mask);
	waittimer(v19_go_ex-v19_lead);
starttimer();
NEWSHAPE_SETUP(18, v19_mul_ex)
waittimer(v19_unblank);
rfampon(0);
if (warmup>10) delay(warmup,us);
waittimer(v19_lead-V19_ANCHOR);
rfon(rf_on);
MR3031_go();
waittimer(v19_offl_ex);
rfon(0);
if (use_pdd>0) userout(pdd_rx_mask);
waittimer(v19_offl_ex+V19_POST_RF);
starttimer();
	waittimer(v19_rem_ex);
		MR3040_SelectMatrix(diff_mat);
		MR3040_SetList(v19_l_diff, ALL_CHANNELS);
	waittimer(v19_rem_ex+V19_TAIL_US*10L);
	delay32(v19_gap_x1);
	
	starttimer();
		MR3040_Start(ALL_CHANNELS);
	waittimer(1000);
	delay32(v19_df_wait);
	starttimer();
		MR3040_SelectMatrix(v19_m_rf);
		MR3040_SetList(v19_l_rf, CHANNEL_S);
		phase(phase_180);                        
	waittimer(V19_TAIL_US*10L);
	delay32(v19_gap_1r);
	
	starttimer();
MR3040_Start(CHANNEL_S);
if (use_pdd>0) userout(pdd_tx_mask);
	waittimer(v19_go_rf-v19_lead);
starttimer();
NEWSHAPE_SETUP(19, v19_mul_rf)
waittimer(v19_unblank);
rfampon(0);
if (warmup>10) delay(warmup,us);
waittimer(v19_lead-V19_ANCHOR);
rfon(rf_on);
MR3031_go();
waittimer(v19_offl_rf);
rfon(0);
if (use_pdd>0) userout(pdd_rx_mask);
waittimer(v19_offl_rf+V19_POST_RF);
starttimer();
	waittimer(v19_rem_rf);
		MR3040_SelectMatrix(diff_mat);
		MR3040_SetList(v19_l_diff, ALL_CHANNELS);
	waittimer(v19_rem_rf+V19_TAIL_US*10L);
	delay32(v19_gap_r2);
	
	starttimer();
		MR3040_Start(ALL_CHANNELS);
	waittimer(1000);
	delay32(v19_df_wait);
	starttimer();
		MR3040_SelectMatrix(v19_m_d);
		MR3040_SetList(v19_l_d, CHANNEL_S);
	waittimer(V19_TAIL_US*10L);
	delay32(v19_gap_2d);
	
	
	starttimer();
		MR3040_Start(CHANNEL_S);
	waittimer((v19_b_d-V19_TAIL_US)*10L);
		MR3040_SelectMatrix(v19_m_m);
		MR3040_SetList(v19_l_m, CHANNEL_S);
		phase(phase_90+2*deg_90);                
	waittimer(v19_b_d*10L);
	delay32(v19_gap_dm);
	
	starttimer();
MR3040_Start(CHANNEL_S);
if (use_pdd>0) userout(pdd_tx_mask);
	waittimer(v19_go_m-v19_lead);
starttimer();
NEWSHAPE_SETUP(20, v19_mul_m)
waittimer(v19_unblank);
rfampon(0);
if (warmup>10) delay(warmup,us);
waittimer(v19_lead-V19_ANCHOR);
rfon(rf_on);
MR3031_go();
waittimer(v19_offl_m);
rfon(0);
if (use_pdd>0) userout(pdd_rx_mask);
waittimer(v19_offl_m+V19_POST_RF);
starttimer();
	waittimer(v19_rem_m);
		MR3040_SelectMatrix(v19_m_sp);
		MR3040_SetList(v19_l_sp, CHANNEL_P);
	waittimer(v19_rem_m+V19_TAIL_US*10L);
	delay32(v19_gap_ms);
	
	starttimer();
		MR3040_Start(CHANNEL_P);
	waittimer((v19_b_sp-V19_TAIL_US)*10L);
		MR3040_SelectMatrix(v19_m_re);
		MR3040_SetList(v19_l_re, CHANNEL_S);
		MR3040_SetList(v19_l_rr, CHANNEL_R);
		phase(phase_90);                         
	waittimer(v19_b_sp*10L);
	delay32(v19_gap_sr);
	
	starttimer();
MR3040_Start(CHANNEL_S|CHANNEL_R);
if (use_pdd>0) userout(pdd_tx_mask);
	waittimer(v19_go_re-v19_lead);
starttimer();
NEWSHAPE_SETUP(22, v19_mul_re)
waittimer(v19_unblank);
rfampon(0);
if (warmup>10) delay(warmup,us);
waittimer(v19_lead-V19_ANCHOR);
rfon(rf_on);
MR3031_go();
waittimer(v19_offl_re);
rfon(0);
if (use_pdd>0) userout(pdd_rx_mask);
waittimer(v19_offl_re+V19_POST_RF);
starttimer();
	waittimer(v19_rem_re);
		MR3040_SelectMatrix(v19_m_im);
		MR3040_SetList(v19_l_im, CHANNEL_S);
		phase(phase_180);                        
	
	v19_wait_next = v19_first_wait;
	goto v19_echo_loop;


v19_echo_loop:
	waittimer(v19_wait_next);
	
	starttimer();
MR3040_Start(CHANNEL_S);
if (use_pdd>0) userout(pdd_tx_mask);
		gp_mul = get_gp_order(current_view+echo_cnt);
		gp_var = (-gp_inc*gp_mul)*nav_cnt;
		
		CREATE_MATRIX(aq_mat_sec,gs_on*(gsp_rp-(gp_sl_var*gp_sl_on*nav_cnt)+v19_d_dac), gp_on*gp_var, gr_on*gr_dp)
	waittimer(v19_go_im-v19_lead);
starttimer();
NEWSHAPE_SETUP(23, v19_mul[echo_cnt])
waittimer(v19_unblank);
rfampon(0);
if (warmup>10) delay(warmup,us);
waittimer(v19_lead-V19_ANCHOR);
rfon(rf_on);
MR3031_go();
waittimer(v19_offl_im);
rfon(0);
if (use_pdd>0) userout(pdd_rx_mask);
waittimer(v19_offl_im+V19_POST_RF);
starttimer();
	waittimer(v19_rem_im);
		MR3040_SelectMatrix( aq_mat );
		MR3040_SetList( read_list, CHANNEL_R );
		MR3040_SetList( phase_list, CHANNEL_P );
		MR3040_SetList( slice_list_rp, CHANNEL_S );
	waittimer(v19_rem_im+V19_TAIL_US*10L);
	delay32(v19_gap_ir);
	
	starttimer();
		MR3040_Start( ALL_CHANNELS );
		CREATE_MATRIX(aq_mat,gs_on*gs_var_rescale,gp_on*gp_var,(gr_on*gr_undersample)*(gr_var/gr_oversample))
		templ1 = IntToLong(fov_phase_deg)*IntToLong(gp_mul);
		templ1 = templ1 + IntToLong(get_gp_var_mul2(current_view_2))*IntToLong(fov_sl_phase_deg);
		phase_rec = templ1%deg_360;
		phase_rec = phase_rec*nav_cnt;
		if (gp_on == 0 ) phase_rec = 0;
		rphase(phase_rec+phase_correction);
		echo_cnt = echo_cnt+1;
		notDummy = -(disacq_cnt >= no_disacq);
		Dummy_Cycles(!notDummy);
	waittimer(v19_rd_a1);
		resync();
		frequency_buffer(1);                    
		reset_frequency();
	waittimer(v19_rd_a2);
	initiate(sample_period);
	starttimer();
		
		CREATE_MATRIX(aq_mat_sec,gs_on*(gsp_rp+(gp_sl_var*gp_sl_on*nav_cnt)-v19_d_dac), gp_on*gp_var, gr_on*gr_dp)
		templ1 = phase_ang;
		total_echo_cnt = total_echo_cnt+1;
		templ2 = IntToLong(total_echo_cnt);
		templ3 = templ1*templ2;
		phase_correction_0 = templ3%IntToLong(deg_360);
		templ5 = templ2*IntToLong(remainder_phase);
		templ4 = templ5/1000L;
		phase_correction_1 = templ4;
		templ4 = templ5%1000L;
		phase_correction_2 = 0;
		if (templ4 > 500 )
			phase_correction_2 = 1;
		if (templ4 < -500 )
			phase_correction_2 = -1;
		phase_correction = (phase_correction_0 + phase_correction_1 + phase_correction_2)%deg_360;
	waittimer(V19_ADC_SLOW);
	delay32(v19_adc_mid);
	starttimer();
	delay32(10000L);
	complete();
		frequency_buffer(0);                    
		reset_frequency();
		phase(phase_180+phase_correction);
	waittimer(v19_post_a);
	
	if (echo_cnt < views_per_seg)
	{
		MR3040_SelectMatrix(v19_m_im);
		MR3040_SetList(v19_l_im, CHANNEL_S);
		v19_wait_next = v19_post_b;
		goto v19_echo_loop;
	}
	waittimer(v19_post_end);
	goto v19_after_train;
end:
	
}

/***************************************************************************
						MODIFICATION  HISTORY

	26 Aug  98  SR - PPH and SEQ file updates
	21 April 99 SR - Tref added to paramlist
	26 November 09 RG - new Phase Order
	30 November 09 RG - alternative Phase Order
	14 January 2010 RG - te -> esp, te_2 -> te replacement
	04 February 2010 RG - flow compensation
	05 March 2010 RG - revised PE0 ordering scheme
	01 April 2010 RG - slice frequency added to the ParamList header
	26 August 2011 RG - manual phase correction; slice thk correction; 
	25-26 October 2011 RG - tgen phase order as PE_order 3; phcor as time; first echo discard
	10 November 2011 RG - first echo discard refined; fast recovery option
	23 November 2011 RG - first N echoes can now be discarded; egen reordering scheme added as PE_order_1
	24 November 2011 RG - single shot with partial k-space option (new PE_order_2)
	25 November 2011 RG - reduced timing - shortest TE is now 768 (=800-31) us shorter
	10 February 2012 RG - fixed flow compensation gradient glitch apparent with short TE	
	4 December 2012 RG - timing bug fixed (90-180 interval), lines should have been commented...
					   - gating option added; batch_slice feature added
	9 December 2012 RG - 3D made working with offset slabs
	26 April 2013 RG - slice clustering option added for gating
					 - single (slice direction) travelling (sticky) presaturation block option added
	28 November 2013 RG - multiple TRs in single resp interval option - not yet finished!
						- automatic minimum TR when 0 entered
						- no_slices_per_gating_interval is removed from Paramlist and calculated from 
						  t_resp_plateau which is a new parameter
						- the sequence is too big to fit in 64K
						- DRIVEN_EQUILIBRIUM commented out to fit in 64K
	= fse3d_pfp25gbs2.ppl
	
	NOTE: slice clustering must always be used when resp gated!
	
	15 March 2014 RG - chess pulse added for fat-sat option	(hash defined)
					 - IMG size reduced by using new var_fse.pph (64726 bytes)
					 - RFstd2 replaced with RFstd4, pulse 8 removed for now
	= fse3d_pfp25gbsch1.ppl
	21-25 March 2014 RG - rf delay added to compensate for (isotropic) gradient group delay
	= fse3d_pfp25gbsch2.ppl = fse3d_26.ppl	
	PE_order_4 commented out for further size reduction (65490 with, 64416 without)
	
	default size 65490
	by commenting we get:
	SKIP_FIRST_ECHOES (only) 65278
	CHESS (only) 64932
	TRAVEL_PRESAT (only) 65192
	TRAVEL_PRESAT & MULTIPRESAT 62568
	all 5 commented out 63690
	
	27 March 2014 RG - tref = 4*tdp to reduce gradient strength (now modifiable, but flow comp needs checking!)
	
	Note that tcrush should be optimised with setup loop looping over in full, e.g. with 1 average only otherwise
	the list won't update in realtime
	
	16 April 2014 RG - added missing RF pulses for presat
					 - orientation dependance makes for minimum rfdelay+tramp of 170us 
  					- fixed by restoring initiate-complete
	21 April 2014 RG - finalised T2/T1/long resp T1 gating - needs validating
	20 June 2014 RG - pplsim validator support
					- todo: sort out travelling/fixed presat switch vs define
	21 September 2014 RG - single echo support (with VPS=1, nav_on=0, PE_order=2)
						- discarded acquisition (at the beginning of each slice)
	23 October 2014 RG - four large arrays moved to extended memory - saving 2394 bytes!
					 	- DRIVEN_EQUILIBRIUM, SKIP_FIRST_ECHOES, and TRAVEL_PRESAT can all be used simultaneously but will make it to 65500
	09 November 2014 RG - fov_sl removed completely as redundant in favour of slab_ratio
	19 November 2014 RG - single echo (PE_order 5) checks for validation
	01 December 2014 RG - clean ups to do with undefined options and pre-sat blocks
						- timing needs to be verified when pre-sat blocks are used!
	08 December 2014 RG - no_PB added as a validation parameter
	08 February 2015 RG - Gauss pulse as chess option
	24 February 2015 RG - autogate code corrected, as the time reported was ~20% too short
						- TR min error fixed - waittimer error previously resulted in 5ms extra
						- gating_condition_2 removed, was not working anyway. T1 now uses the same condition as T2
						- new - tr extend ignored when gating
	15 April 2015 RG - cluster interlslice delay option added
	26 January 2016 RG - fixed 3D phase offset (new variable phase_sign introduced - set to -1 for 7T, 3T and 4.7T untested)
	15 June 2016 RG - Pin Diode Driver outputs added
	22 August 2016 RG - frequency offset negated in offst_fse_mix.pph
	07 September 2016 RG -  Pin Diode Driver outputs are now controlled by smis.ini, removed from paramlist ->268
	19 October 2016 RG - chemical shift and presat rf pulses use own scale factors -> fse269
		WARNING: when setting up CHESS or PRESAT always use Tx attenuation that corresponds to rfcal of 29% for rfnum=1 for Preclinical Scan compatibility
	20 October 2016 RG - presat crusher behaviour might be improved; but commented out for now
	04 November 2016 RG - MTC option (train of Gauss pulses)
	09 November 2016 RG - Pin Diode Driver control added to MTC pulses
	08 December 2016 RG - Pin Diode Driver code was introducing extra delays spoiling the phase correction - fixed by putting the code in timed sections
						- not verified with any prepulse (CHESS, MTC, PRESAT)
	20 February 2017 RG - SHIFTUP option added for inverted offsets; this option should not be used if gradient orientations are correct
	28 February 2017 RG - post ETL crusher now in parameters (helps with T1) -> 2691
	01 March 2017 RG - views1 resolution increased to 1012 (with navigators); 128 slices
	02 March 2017 RG - gradient check more robust (now long)
	26 July 2017 RG - CEST step is now positive - sweep can start in the up or down direction from the initial offset
	26 July 2017 RG - array of CEST offsets supported -> 2693a
	11 October 2017 RG - PTS mask added, via smis.ini (same PPL name)
	20 November 2017 RG - 	temporary workaround for Moulis - in coronal orientation fifth and sixth presat blocks are sign negated (PRESAT_FREQ_FLIP)
	21 November 2017 RG - presat crusher changed to the other remaining gradient axes -> 2694	
	07 December 2017 RG - systemout PTS call moved into slice_block_loop
	11 January 2018 RG - last page for phase order changed to 5 from 6 for new scan (only 0-5 are valid pages)
	14 March 2018 RG - bug that killed pplsim fixed when de_rf_delay was 0 or negative
    20 May 2018 RG - travelling presat option bug fix; moved to last presat block (#5 zero-based); enabled in PPR
	18 July 2018 RG - 'Y eddy current correction Mie special' - phase correction for readout gradient is done with a new parameter - three times the slice value of 18 for the sagittal lymph node rat protocol -> 2697
	07 November 2018 RG - new option: when gating is on, trigger is requested after TR
	28 November 2018 RG - 3 point dixon option added for single echo only
	20 March 2019 RG - disacq_cnt condition changed so that disacq_cnt does not increase indefinitely 
	10 November 2019 RG - PE_order = 5 (single echo) is allowed to run with single view  - required for rx gain routine to work
	21 May 2020 RG - fse3d_2699a.ppl with added WashU fix for clustering -> fse3d_2699a1.ppl
	27 August 2020 RG - PE_order_2 (single shot) separated from PE_order_5 (single echo)
					  - PE_order_2 (single shot) implemented using centric ordering (incompatible change, but it did not work before anyway)
					  - MTC crusher disabled. It appears to cause ghosting even when the crusher amplitude is 0. PARAMLIST value limited to 0 for now.
	02 September 2020 RG - fixed phase encode direction was flipped
	11 December 2020 RG - added TR array feature
	15 February 2021 RG - Found that PRESAT_FREQ_FLIP is also needed for transverse orientation. Enabled by default.-->2701
	18 April 2021 RG - PE direction flipped fixed -> 2702
	13 August 2021 RG - long esp supported by converting te_balance_a and te_balance_b to long ->2703
					  - fixed tr_min calculation error
    27 January 2022 RG - mtc array size changed from 200 to 1000
	17 May 2022 RG - fixed long tref value buf for tref_setup > 1400 us -> 2704
	07 October 2022 RG - fixed 180 pulse duration limited to 5 ms ->2704a
	10 November 2022 RG - improved timing by correcting for if statements timing in critical parts ->2704b
	21 March 2023 RG - improved TR timing by correctly including post-etl crusher -> 2706b
					 - DE code rewritten and properly timed
					 - flow compensation timing fixed -> 2707b
	07 July 2023 RG - tidy up; MAINSGATE undefined for release - remains 2707b; ORIGINAL_CODE used not new ph cor
	20 October 2023 RG - fixed FOV in slice direction too small when not doing 3D
					   - pph and seq update
	14 March 2024 AJVB - added diffusion module
	
	18 April 2024 AJVB - Sequence modified into non CPMG TR according to the paper DOI: 10.1055/s-0029-1220884
***************************************************************************/
/*******************************************************************************
  VERSION 1.0
  TWO-ECHO-TIME MODIFICATION - CHANGE LOG AND VALIDATION NOTES
  Derived from FSE_dwi_CPMG_non_CPMG.ppl (FSENFP.PPL, v2.7.7c/DWI, Garipov/AJVB).
  Purpose: allow a long diffusion-weighted first echo (TE = te) followed by a SHORT
  imaging echo train, by permitting diff_tcrush (first-180 time budget) > tcrush
  (imaging-180 crushers). This restores the sequence's intended capability, which was
  blocked by a temporary guard.

  ------------------------------------------------------------------------------
  WHAT WAS CHANGED (search the file for the tags):

  [TWO-TE MOD #1]  (~ line 1786, "directions_loop" block)
      Removed the two hard guards that aborted the scan:
        - if (diff_tcrush != tcrush) ... goto end;   (forced the two crushers equal)
        - if (diff_tcrush >  tcrush)  ... goto end;   (blocked the desired direction)
      Replaced with a non-aborting sanity warning if diff_tcrush < tcrush. The original
      lines are preserved in a comment. This is the ONLY change that alters behaviour.

  [TWO-TE MOD #2]  (~ line 1820, validator worst-case block)
      No code change. Added comments documenting WHY the existing worst-case forcing
      (tcrush1 = diff_tcrush during validate==1) makes diff_tcrush > tcrush safe to
      validate, and replaced the author's "TODO this is still wrong" note with an
      explicit instruction to verify on the console.

  ------------------------------------------------------------------------------
  WHY THIS IS THE CORRECT (AND MINIMAL) CHANGE - read before editing further:

  In this sequence the slice-refocus crusher gradient list (slice_180_refocus, built at
  ~line 1451 with POSPULSE(tsel90 + tcrush + tcrush)) uses tcrush for EVERY 180, first
  and imaging alike. The heavy dephasing on the FIRST 180 is provided by the diffusion
  gradients G1/G2 that straddle it, NOT by a separate large slice-crusher lobe.
  diff_tcrush therefore acts as a TIME BUDGET reserved around the first 180 (it enters
  min_pre, min_post and big_delta_min via tcrush1), while the imaging echo spacing is set
  by tcrush (via te_a / te_b and the slice_180_refocus list). Decoupling the two echo
  times is thus achieved simply by allowing diff_tcrush > tcrush - which is what MOD #1
  does. The PARAMLIST defaults (tcrush = 10 us, diff_tcrush = 2000 us) confirm this was
  the original design intent.

  ------------------------------------------------------------------------------
  RECOMMENDED PPR SETTINGS FOR A TWO-TE DW-FSE RUN:
      diff_on       = 1            ; enable diffusion
      PE_order      = 1            ; multi-echo DWI order (NOT 5, which forces ETL = 1)
      views_per_seg = >1           ; the imaging echo train length (e.g. 8 or 16)
      te            = <long>       ; the diffusion-weighted first-echo time (effective TE)
      tcrush        = <small>      ; imaging-180 crusher -> sets the SHORT train spacing
      diff_tcrush   = <large>      ; first-180 time budget (>= tcrush; e.g. 2000)
      sm_delta, big_delta, b-values, no_diff_dir, directions : as required
  Note: the uploaded PPR had diff_on = 0, tcrush = 400, diff_tcrush = 50 (reversed).
  For two-TE DWI set diff_tcrush >= tcrush as above.

  ------------------------------------------------------------------------------
  VERSION 1.1
  07 August 2026 - TWO-TE FIX SET:
    FIX #1: Commented the two bare [TIMINGS MOD #1] tag lines to restore compilation.
    FIX #2: Made tcrush1 and timing calculations depend on diff_on for all b-values.
    FIX #3: Added and played a dedicated tcrush1 first-180 crusher list and rebalanced TE.
    FIX #4: Added a hard abort unless diff_tramp equals tramp.
    FIX #5: Turned negative first-echo timing paths into hard pre-flight/play-time aborts.
    FIX #6: Based diffusion-on minimum TR train duration on esp spacing.
    FIX #7: Removed the unreachable first-echo rephase path; use unified ESP balance.
    FIX #8: Removed the unreachable te==0 diffusion block using uninitialised timing.
    FIX #9: Removed unused extra_te timing variables and conversions.
    FIX #10: Updated the esp UI label to describe imaging echo spacing.
    FIX #11: Marked the s/mm^2 b-value array as record-only; DAC values drive gradients.

  07 August 2026 - B-VALUE MODE:
    Added b_input_mode (default 0 = legacy DAC array; 1 = requested b-value array).
    In mode 1, setup validates 1000-normalised directions and numerically inverts the
    unchanged forward b-factor calculation with a conservative DAC binary search.
    Requested b=0 is stored as DAC 1 to avoid the known zero-gradient artifact. Requests
    above the 30000-DAC ceiling abort; low-b quantisation may produce a >5% warning.
    Setup recomputes b after diff_grad_scale back-conversion so its report matches runtime.
    Validate with mode 1 and known b_steps_array values; confirm setup "got" b matches
    runtime "b-value ~" output. Change big_delta and confirm DAC changes while achieved b
    remains at the requested target; compile and confirm the image remains within 64K.

  VERSION 1.2 - 07 August 2026:
    Removed // comments from PARAMLIST entries because the Powerscan PARAMLIST parser does
    not accept them. Shortened the diffusion TE and pre-180-balance abort reports to fit the
    Powerscan printf buffer. Reworked B-VALUE MODE setup gating to remove the generated long
    conditional branch that caused "branch is out of range" in the Forth compiler. Entry and
    search-loop exits now use short conditional branches plus long unconditional gotos. The
    setup arithmetic falls through in legacy mode, but validation, b_grads_array writes, and
    reports are gated by b_input_mode, so mode 0 acquisition behaviour remains unchanged.

  MANDATORY VALIDATION BEFORE ANY SPECIMEN ([MERGE-2TE] status reconciliation:
  v1.2 WAS iterated under the p2f/Forth compiler until it compiled - see the
  v1.2 note on "branch is out of range" - but has never run on hardware or in
  the simulator; the merged v1.3 has NOT yet been compiled at all):
    1. Compile in Powerscan; run the sequence validator with diff_on=1, diff_tcrush >
       tcrush; confirm pass.
    2. With report_on=1, confirm min TE, min esp, and min TR are sensible; confirm no
       "Timing error" or pre-flight aborts across ALL b entries including the smallest.
    3. Scope/console check: first-180 slice crusher plateau = tsel180 + 2*diff_tcrush;
       imaging 180 crushers = tsel180 + 2*tcrush; diffusion lobe onset separation =
       big_delta as requested.
    4. Do not scan a true b=0: set the smallest b_grads_array entry to a small nonzero
       DAC value (e.g., 1) per the original author's guidance, and record its true b-value
       for fitting.
    5. ADC phantom: fitted ADC must match reference within tolerance (this directly tests
       the FIX #3 big-delta correction; the pre-fix code underestimated b by roughly a
       factor of (big_delta - 3.98ms - delta/3)/(big_delta - delta/3) at defaults).
    6. Echo train check on phantom: first echo at TE = te, echoes 2..N spaced by esp, no
       ghosting or train modulation. FIX #3 implements the dedicated first-180 crusher
       list previously proposed here as a contingency.


  ------------------------------------------------------------------------------
  VERSION 1.3 - 22 August 2026 - MERGE (all changes tagged [MERGE-2TE]):
    Base: v1.2 (b-value mode and the Forth short-branch restructuring kept).
    Ported from FSE_dwi_2TE_CPMG.ppl:
      M1 Validate-path worst-case block (tcrush1/diff_non_zero set before the
         goto averages_loop jump; validator previously used stale DPRAM values).
      M2 Full-overhead min-TR in diffusion mode (legacy overhead chain reused;
         only part 1 swapped to TE + (N-1)*ESP; FIX #6 block removed).
      M3 min-ESP check: te_a dropped, gated on views_per_seg>1; report likewise.
      M4 -36 tick compensation on te_balance_bl_temp1_esp (DERIVED from manual
         4.9 tables, NOT measured - trim on phantom) and the factory two-branch
         post-acquisition structure restored: diffusion-OFF timing is again
         instruction-identical to the original.
      M5 DE + diffusion combination blocked.
    Fixed in the base:
      F1 diff_tcrush<tcrush warning text was inverted vs its condition.
      F2 b_max promoted to long.
      F3 b-factor arithmetic on a fixed-point kernel (b_kfac): delta exact in us
         (the old whole-ms truncation made TRUE b exceed the printed/requested
         value by ~(delta/floor_ms(delta))^2-1, ~+14% at delta = 6.4 ms);
         Delta-delta/3 rounded to nearest ms; net accuracy ~+/-2%, unbiased.
         Envelope delta <= 10 ms AND Delta <= 80 ms (32-bit headroom); outside
         it b-input mode aborts and the runtime report prints a notice. Setup
         search, b_max, achieved-b and the runtime report share the kernel and
         therefore agree. Side effect: ~5 long divisions removed from the tight
         waittimer(19700) window.
      F4 IntToLong 16-bit truncation patterns in the TE/esp checks and balances
         replaced by pure long arithmetic.
      F5 Pre-flight abort replica for the FIRST-ECHO post-180 balance (was only
         caught mid-scan at play time).
      F6 Runtime b report clamps non-unit-direction gradient sums that would
         overflow the 32-bit product and prints a notice instead.
    The pre-merge v1.2 file is retained unchanged as the rollback.
  Original sequence behaviour with diff_tcrush == tcrush is unchanged.

  ============================================================================
  [ACQ-TABLE] Explicit diffusion acquisition table / 2026 (tagged [ACQ-TABLE])
  ============================================================================
  Purpose: replace the rectangular (no_b_steps x no_diff_dir) diffusion grid with
  an explicit table with ONE ROW PER ACQUIRED DIFFUSION VOLUME, so that b=0 need
  not be repeated once per direction, each shell may carry a different number of
  directions, and extra b=0 volumes may be inserted anywhere in the order.

  Interface (PARAMLIST / PPR):
      no_diff_acq            number of table rows (1 .. MAX_DIFF_ACQ = 512)
      acq_b[512]             requested b, s/mm^2   (used when b_input_mode = 1)
      acq_grad[512]          gradient DAC          (used when b_input_mode = 0;
                             written by the setup b->DAC search when mode = 1)
      acq_x/acq_y/acq_z[512] direction components, 1000-normalised
  Superseded: no_b_steps, b_steps_array[16], b_grads_array[16], no_diff_dir,
  diff_grad_dir[48], and the runtime counters b_step_cnt / diff_dir_cnt (now the
  single index diff_acq_cnt). MAX_BVALS / MAX_DIRECTIONS / MAX_DIRECTIONSX3 are
  replaced by MAX_DIFF_ACQ.

  Mapping from an old PPR: an old configuration with no_b_steps = B and
  no_diff_dir = D becomes no_diff_acq = B*D rows, row (i*D + j) carrying
  b_steps_array[i] / b_grads_array[i] and direction j - i.e. exactly the order
  the old nested loop acquired them in, so the MRD experiment index is unchanged.

  Deliberately PRESERVED:
    - the b->DAC binary search, b_kfac kernel, max_diff_grad = 30000 cap,
      diff_grad_scale back-conversion and achieved-b reporting (F3), all still
      executed once per row in the setup section, never during acquisition;
    - the DAC = 1 workaround for b = 0 in b-value mode. A b = 0 row must
      therefore carry a UNIT direction; the normalisation check now runs over
      every table row, so a literal X = Y = Z = 0 row is rejected in b-value mode
      instead of silently turning the DAC = 1 lobe into a true zero gradient.
      DAC mode (b_input_mode = 0) is unchanged and still takes acq_grad
      literally, including 0;
    - diff_on timing (FIX #2): tcrush1 = diff_tcrush, min_pre/min_post,
      big_delta, extra_delta and the first-180 budget follow diff_on, not the
      gradient amplitude, so the surviving b = 0 volume keeps the timing it had;
    - the outer experiment repetition: the test is no_experiments % no_diff_acq,
      NOT equality. The acquisition loop only re-enters experiment_loop after a
      complete pass over the table, so the acquired volume count is always a
      multiple of no_diff_acq; the modulo test makes that multiple equal
      no_experiments, exactly as the old no_b_steps*no_diff_dir test did. This
      keeps TR_array, Dixon W-F (needs no_experiments >= 3), MTC array indexing
      by completed_ex and the Duration report working unchanged;
    - the runtime scale(acq_grad[i], diff_grad_scale, 100), so the interactively
      adjustable (common int) diff_grad_scale still applies during a scan.

  Also fixed as a direct consequence (was a latent out-of-bounds):
      EDITTEXT "Number of directions" exposed a maximum of 300 while
      diff_grad_dir held only 48 ints (16 directions). no_diff_dir > 16 read past
      the end of the array both in the setup normalisation loop and at
      diff_grad_dir[diff_dir_cnt*3 + 2] during acquisition, feeding out-of-bounds
      memory into the played gradient amplitudes (PPL performs no array bounds
      checking - manual 4.8.5). The new EDITTEXT maximum (512 since [ACQ-512]) equals both the
      VAR_ARRAY no_elements and the declared array size for all five arrays.

  Execution-time accounting (manual 4.9.2), starttimer() at the end of the
  profile loop -> waittimer(31000):
      removed  index arithmetic diff_dir_cnt*3(+1)(+2) from 3 array reads
               (3 * 400 ns '*' + 2 * (200 + 100) ns) ................ -2.4 us
      added    the former b_step_loop head now runs on EVERY volume,
               not only on b-value boundaries: scale() 11.1 us +
               operands, if(report_on), if(diff_on && diff_grad>30000)  +16.7 us
      loop tail is 3 statements instead of 6 ................... -3.2 us when
               the old path had to fall through to b_step_loop
      net    : +14.3 us worst case (multi-direction shells), and FASTER than the
               old code whenever no_diff_dir was 1. The documented slack on that
               window is 31000 - 29813 = 118.7 us. No statement was added to the
               tighter waittimer(5300)/waittimer(19700) windows; the 19700 window
               got 2.4 us cheaper. MUST BE CONFIRMED ON THE CONSOLE: an overrun
               of a waittimer budget costs a full 5 ms (manual 4.8.x waittimer),
               which would show as a 5 ms TR step at volume boundaries.

  Nothing downstream of diff_grad / diff_read / diff_phase / diff_slice was
  touched: RF timing, gradient lists, crushers, diffusion lobes, sm_delta,
  big_delta, diff_tramp, tcrush1, min_pre/min_post, min TE/TR, extra_delta,
  first-180 and subsequent-180 timing, CPMG/non-CPMG, two-TE, phase encoding,
  echo ordering, navigators, averaging, phase cycling, MTC, Dixon and the
  Duration formula are all byte-for-byte unchanged.

  ============================================================================
  [ACQ-512] Acquisition table enlarged to 512 rows / twoTE-1.5, 24 Sep 2026
  ============================================================================
  Purpose: allow multi-shell protocols larger than 64 volumes in one PPR
  (e.g. 13 b-values x 12 directions = 156 rows).

  Changed (all five table arrays and their PARAMLIST entries kept in lockstep,
  since PPL performs no array bounds checking - manual 4.8.5):
    - #define MAX_DIFF_ACQ 64 -> 512 (declared size of acq_b, acq_grad,
      acq_x, acq_y, acq_z)
    - EDITTEXT no_diff_acq maximum 64 -> 512
    - VAR_ARRAY no_elements 64 -> 512 for acq_b, acq_grad, acq_x, acq_y,
      acq_z. The explicit 64-value initialiser lists were dropped (same form
      as mtc_freq_array, 1000;), so all defaults are now 0. Old default was
      acq_x[0] = 1000; a PPR always supplies the table, so this only affects a
      scan started from bare defaults.
    - VAR_ARRAY acq_b maximum 4000 -> 13000 s/mm^2, so b-values the hardware
      can reach (b_max ~13342 at delta = 4 ms, Delta = 40 ms) sit inside the
      dialog range. The runtime b > b_max abort is unchanged.

  Unchanged: every loop over the table is bounded by no_diff_acq, the b->DAC
  search runs once per row in setup (outside the timed windows), and nothing
  in the acquisition timing depends on the array size. Old PPRs with 64-element
  arrays should be re-saved once from the dialog, or regenerated with
  512-element arrays, so the PPR matches the new no_elements.
  Memory: +2240 ints over 1.4. Confirm the compile fits the image limit.
*******************************************************************************/

/*
3 October 2026 - twoTE-1.7 [CRUSH-SCHED]
  Added original/up/alternate/up+alternate/down/custom signed crusher schedules.
  Native 64-entry VAR_ARRAY percentages with explicit active count; built-in
  schedules support ETL 1..1024. Additive step, magnitude-half-up rounding,
  pre-multiply overflow guards, DAC/amplitude/slew and sampling-window aborts.
  Preserve DWI pulse 1 diff_crush_amp, pulse 2 crush_amp; no table repetition.
  Reuse matrix pairs 21/277 and 22/278; identical primary slice selection;
  Rename local selection variable to crusher_play_mat: m3040_15.pph defines
  refocus_mat as macro 5, so the v1.6 local name collides under preprocessing.
  prepare inactive secondary during ADC under aq_mat, including two DSP waits.
  Preflight benchmark admits <=9000 ticks into an extra 10000-tick ADC bucket;
  no RF/ADC duration, TE, ESP or TR increase. Setup window remains 18500 ticks.
  Independent RF pads now equal: 2*tramp+crush_rf_pad/2. Combined time unchanged;
  assumed physical gradient delay requires measurement and instruction audit.
  PE0: terminating short-train branch retained; doubled scratch indices must
  be strictly <512; rejects ETL 256 conservatively and corrupting ETL 512.
  DWI still excludes PE0. RF waveforms/flips/phase cycles/receiver unchanged.
  Diffusion calibration and b=0 DAC-1 workaround unchanged. Full played-gradient
  export/per-echo tensor: python -m dwfse.btensor; requested b is not total b.
  New source has NOT been vendor compiled or physically qualified. Hardware
  amplitude/slew ratings, vendor RF files/includes and matrix instruction timing
  must be checked on the target EVO system before phantom acquisition.
*/

/*
3 October 2026 - twoTE-1.7 [CRUSH-SCHED]
1. **Imaging RF spacing increased by 5 ms.** The user measured this in the
   vendor simulator. After `ret=gettimer()+250`, v1.6/v1.7 selected a balance,
   added long values, converted crusher pads, and performed a long multiply
   before `waittimer(ret-25)`. This was a marginal 25-us deadline. The manual
   says missed deadlines add complete 5-ms intervals (pp.90–91); long multiply
   alone costs 9 us (pp.118–121). Both complete tick targets are now computed
   inside the existing 3-ms matrix setup and selected **before** `gettimer()`.
   The short window retains only a subtraction, the original ret adjustment,
   and the wait. The absolute balance and the existing delay32 branch pattern
   remain unchanged, including the last-echo path. No TE/ESP extension is used.
   Source expression cost is 54 ticks; with a 30-tick dispatch allowance the
   estimate is 8.4 us inside 25 us. This estimate is not compiled timing.

2. **Diffusion scaling could wrap before its ceiling check.** DAC 20000 at
   200% yields 40000, which cannot fit a signed scanner `int`. The subsequent
   positive-only 30000 check could miss the negative wrapped result. All rows
   now receive a long-product preflight before narrowing, with the scale
   snapshotted for the run. Runtime retains the fast `scale()` operation;
   no long division is added to its timed acquisition-row setup.

3. **The b=0 DAC-1 workaround failed for oblique rows.** `scale(1,577,1000)`
   truncates to zero on all three axes. When b-value mode would produce an
   all-zero vector from a positive DAC, runtime assigns signed DAC 1 to the
   largest direction component. Ties prefer read, then phase, then slice.
   Original table directions remain available for reporting. Normal nonzero
   diffusion gradients and legacy explicitly zero DAC rows retain their values.

4. **Long refocusing waits could narrow outside the timer range.** Both pulse
   types' pre/post targets are checked in long arithmetic before acquisition.
   Targets outside 50..65500 ticks fail explicitly; long crusher settings are
   not wrapped or silently shortened. The 65500 limit follows the manual's
   6.5500-ms argument limit, including its documented unsigned bit patterns.

5. **Setup's achieved nominal b report ignored direction quantization/norm.**
   It now uses the actual integer direction components, matching the runtime
   diffusion-module report. The existing scalar DAC search and calibration
   kernel, including its units and 6.3² convention, are preserved. Accepted
   direction norms still span 0.95..1.05, so requested nominal b can differ
   from the played module b; the existing >5% warning now sees that difference.
   Neither value includes imaging/crusher contributions or their cross-terms.
   Full waveform tensors remain the appropriate offline calculation.
*/
